PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s_S%s_%s' % (expName, studyID, expInfo['participant'], expInfo['session'], expInfo['date'])
  Experiment info = {'participant': 'pilot1', 'session': '0'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['stimuli/emaQuestions.xlsx', 'stimuli/instructions.xlsx', 'stimuli/Food_Stimuli/1.jpg', 'stimuli/Food_Stimuli/3.jpg', 'stimuli/Food_Stimuli/4.jpg', 'stimuli/Food_Stimuli/8.jpg', 'stimuli/Food_Stimuli/12.jpg', 'stimuli/Food_Stimuli/14.jpg', 'stimuli/Food_Stimuli/20.jpg', 'stimuli/Food_Stimuli/24.jpg', 'stimuli/Food_Stimuli/26.jpg', 'stimuli/Food_Stimuli/30.jpg', 'stimuli/Food_Stimuli/33.jpg', 'stimuli/Food_Stimuli/34.jpg', 'stimuli/Food_Stimuli/36.jpg', 'stimuli/Food_Stimuli/38.jpg', 'stimuli/Food_Stimuli/52.jpg', 'stimuli/Food_Stimuli/58.jpg', 'stimuli/Food_Stimuli/61.jpg', 'stimuli/Food_Stimuli/62.jpg', 'stimuli/Food_Stimuli/72.jpg', 'stimuli/Food_Stimuli/76.jpg', 'stimuli/Food_Stimuli/81.jpg', 'stimuli/Food_Stimuli/103.jpg', 'stimuli/Food_Stimuli/104.jpg', 'stimuli/Food_Stimuli/114.jpg', 'stimuli/Food_Stimuli/115.jpg', 'stimuli/Food_Stimuli/121.jpg', 'stimuli/Food_Stimuli/131.jpg', 'stimuli/Food_Stimuli/136.jpg', 'stimuli/Food_Stimuli/138.jpg', 'stimuli/Food_Stimuli/141.jpg', 'stimuli/Food_Stimuli/142.jpg', 'stimuli/Food_Stimuli/144.jpg', 'stimuli/Food_Stimuli/157.jpg', 'stimuli/Food_Stimuli/167.jpg', 'stimuli/Food_Stimuli/170.jpg', 'stimuli/Food_Stimuli/171.jpg', 'stimuli/Food_Stimuli/180.jpg', 'stimuli/Food_Stimuli/181.jpg', 'stimuli/Food_Stimuli/183.jpg', 'stimuli/Food_Stimuli/189.jpg', 'stimuli/Food_Stimuli/190.jpg', 'stimuli/Food_Stimuli/192.jpg', 'stimuli/Food_Stimuli/199.jpg', 'stimuli/Food_Stimuli/202.jpg', 'stimuli/Food_Stimuli/203.jpg', 'stimuli/Food_Stimuli/224.jpg', 'stimuli/Food_Stimuli/228.jpg', 'stimuli/Food_Stimuli/241.jpg', 'stimuli/Food_Stimuli/256.jpg', 'stimuli/Food_Stimuli/259.jpg', 'stimuli/Food_Stimuli/263.jpg', 'stimuli/Food_Stimuli/272.jpg', 'stimuli/Food_Stimuli/300.jpg', 'stimuli/Food_Stimuli/321.jpg', 'stimuli/Food_Stimuli/322.jpg', 'stimuli/Food_Stimuli/323.jpg', 'stimuli/Food_Stimuli/326.jpg', 'stimuli/Food_Stimuli/328.jpg', 'stimuli/Food_Stimuli/331.jpg', 'stimuli/Food_Stimuli/337.jpg', 'stimuli/imageList.xlsx', 'buttons/germany_flag.png', 'buttons/uk_flag.png']
  Save log file = False
  Screen = 1
  Show mouse = True
  Units = height
  Use version = 2024.2.4
  Window size (pixels) = [2048, 1152]
  color = 1.0000, 1.0000, 1.0000
  expName = food_choice_v4
  frameRateMsg = Attempting to measure frame rate of screen, please hold your breath...
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine language_choice
    RoutineSettingsComponent language_choice
      saveStartStop = False
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    CodeComponent code_languagechoice
      Code Type = JS
      Begin JS Experiment:
        languagechoice = null;
      Begin JS Routine:
        // Window size
        // in js: 1=height; 0=width
        window_height = psychoJS.window.size[1];
        window_width = psychoJS.window.size[0];

        xrange = (window_width / window_height);
        yrange = (window_height / window_width);
        last_xrange = xrange;

        // Positional arguments
        sourcetext_xy = [(0.3 * Math.max(1, xrange)), ((- 0.48) * Math.max(1, yrange))];
      Each JS Frame:
        // Hovereffect for both countryflag-images
        if ((! mobile_device)) {
            if (image_ukflag.contains(mouse_languagechoice)) {
                image_ukflag_opacity = opacity2;
            } else {
                image_ukflag_opacity = opacity1;
            }
            if (image_germanyflag.contains(mouse_languagechoice)) {
                image_germanyflag_opacity = opacity2;
            } else {
                image_germanyflag_opacity = opacity1;
            }
        }

        // window size
        window_height = psychoJS.window.size[1];
        window_width = psychoJS.window.size[0];
        xrange = (window_width / window_height);

        if ((xrange !== last_xrange)) {
            // size changed
            last_xrange = xrange;
            yrange = (window_height / window_width);
            sourcetext_xy = [(0.3 * Math.max(1, xrange)), ((- 0.48) * Math.max(1, yrange))];
        }
      End JS Routine:
        // If clicked on the german (uk) flag, the language choice is set to german (english)
        if ((mouse_languagechoice.clicked_name[0] === "image_germanyflag")) {
            languagechoice = "ger";
        } else {
            languagechoice = "uk";
        }

        // store chosen language
        expInfo["language"] = languagechoice;

        // set widely used text options
        if ((languagechoice === "ger")) {
            submitbutton_text = "Weiter";
        } else {
            submitbutton_text = "Submit";
        }
    ImageComponent image_germanyflag
      image = buttons/germany_flag.png
      opacity [set every frame] = image_germanyflag_opacity 
      pos = (-0.3, -0.22)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_ukflag
      image = buttons/uk_flag.png
      opacity [set every frame] = image_ukflag_opacity 
      pos = (0.3, -0.22)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_languagechoice
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.95, 0.5)
      startVal [time (s)] = 0.0
      text = Choose your preferred language
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    MouseComponent mouse_languagechoice
      clickable = image_germanyflag, image_ukflag,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveParamsClickable = name
      saveStartStop = False
      startVal [time (s)] = 0.5
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    TextboxComponent textbox_sourceflag
      bold = False
      color = 0.6549, 0.6549, 0.6549
      editable = False
      letterHeight = 0.015
      pos [set every frame] = sourcetext_xy
      saveStartStop = False
      size = (0.3, 0.04)
      startVal [time (s)] = 0.0
      text = Icons from https://www.countryflags.com/
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  Routine load_instructions
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  Routine load_imageList
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  Routine fixation
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    PolygonComponent fixation_cross
      fillColor = black
      shape = cross
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    CodeComponent code_fixation
      Code Type = JS
      Begin JS Routine:
        fixationStart = fixationClock.getTime();
      End JS Routine:
        // save the duration of this routine
        fixationStop = fixationClock.getTime();
        fixationDuration = fixationStop-fixationStart;
        psychoJS.experiment.addData("fixationDuration", fixationDuration);
  Routine emaInstructions
    RoutineSettingsComponent emaInstructions
      saveStartStop = False
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    CodeComponent code_instructions
      Code Type = JS
      Begin JS Routine:
        // text options
        if ((languagechoice === "ger")) {
            emaInstructions_text = emaInstr_ger;
        } else {
            emaInstructions_text = emaInstr_eng;
        }
      Each JS Frame:
        // Hovereffect for submitbutton
        if ((! mobile_device)) {
            if (polygon_submitbutton.contains(mouse_instructions)) {
                submitbutton_opacity = opacity2;
            } else {
                submitbutton_opacity = opacity1;
            }
        }
    CodeComponent code_jsLinebreaks
      Code Type = JS
      Begin JS Routine:
        // make up for wrong line-breaks when reading file with javascript
        emaInstructions_text = emaInstructions_text.split('\\n').join('\n');
    TextboxComponent textbox_instructions
      alignment = center-left
      bold = False
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.035
      pos = (0, 0.1)
      saveStartStop = False
      size = (0.9, 0.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaInstructions_text
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    MouseComponent mouse_instructions
      clickable = polygon_submitbutton,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.5
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    PolygonComponent polygon_submitbutton
      fillColor = [0.9,0.9,0.9]
      lineColor = [-1,-1,-1]
      lineWidth = 2
      opacity [set every frame] = submitbutton_opacity
      pos = submitbuttonXY
      saveStartStop = False
      shape = rectangle
      size = submitbuttonSize
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_submitbutton
      bold = False
      color = black
      editable = False
      letterHeight = 0.04
      pos = submitbuttonXY
      saveStartStop = False
      size = submitbuttonSize
      startVal [time (s)] = 0.0
      text [set every repeat] = $submitbutton_text
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  Routine global_vars
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    CodeComponent code_shuffle
      Code Type = JS
      Before JS Experiment:
        // Coders hint: Always put a function definition in its own exclusive
        // code-component in psychopy builder!
        //
        // Otherwise, when there is other code outside with variables of same name, then
        // the respective function variables wouldn't get the 'var' keyword when
        // auto-translated to javascript! (and so wouldn't have function scope!)
        // As a result they may very likely interfere with the outside variables.

        // Fisher-Yates shuffle (reversed)
        function shuffle_array(arr) {
            var i, j, n, prelast;
            n = arr.length;
            prelast = (n - 2); // second last element is at index n-2 if we start at 0
            i = 0;
            while ((i <= prelast)) {
                // random(): 0.0 <= x < 1
                // random integer such that i ≤ j ≤ n-1
                j = Number.parseInt((i + (Math.random() * (n - i))));
                [arr[i], arr[j]] = [arr[j], arr[i]];
                i += 1;
            }
            return arr.slice(0); // return a real copy, not a reference!
        }
    CodeComponent code_global
      Code Type = JS
      Begin JS Experiment:
        // Define opacities for hover buttons
        opacity1 = 0.75; // default opacity of buttons
        opacity2 = 1; // opacity if hovered over button

        // Window size
        // in js: 1=height; 0=width
        window_height = psychoJS.window.size[1];
        window_width = psychoJS.window.size[0];
        xrange = (window_width / window_height);

        // general parameters
        submitbutton_opacity = opacity1;
        submitbuttonSize = [0.3, 0.1];
        submitbuttonXY = [0, (- 0.4)];

        //// the next entries rule for all emaTypes
        // some positions
        sliderW = 0.9;
        sliderH = 0.1;
        sliderY = (- 0.1);
        anchorY = (sliderY - 0.1);

        // these values must be computed for each emaType separately
        checkBox1x = 0;
        checkBox2x = 0;
        checkBox3x = 0;
        checkBox4x = 0;
        checkBox5x = 0;
        checkBox6x = 0;
        checkBox7x = 0;
        checkBox8x = 0;

        // labels must be set for each emaType separately
        emaLabel1 = "tba";
        emaLabel2 = "tba";
        emaLabel3 = "tba";
        emaLabel4 = "tba";
        emaLabel5 = "tba";
        emaLabel6 = "tba";
        emaLabel7 = "tba";
        emaLabel8 = "tba";
    CodeComponent code_expInfoHandling
      Code Type = JS
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      Before JS Experiment:
        // the studyID is initiated here in order to make it available
        // for the filename
        const studyID = "BON006";
      Begin JS Experiment:
        // these info is added to the experiment here, and not before experiment,
        // because it shall not appear in the input dialog at start.
        expInfo["studyID"] = studyID;
  Routine choice
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    CodeComponent code_choice
      Code Type = JS
      Begin JS Experiment:
        choiceTimeLimit = 4; // stimulus-onset in seconds

        // prepare image parameter
        imgLeft = "tba";
        imgRight = "tba";
        imgLeftSize = [0.52, 0.35];
        imgLeftPos = [(- 0.33), 0];
        imgRightSize = imgLeftSize;
        imgRightPos = [0.33, 0];
        keys = [];
      Begin JS Routine:
        myStart = globalClock.getTime();

        // The "loop_choice" iterates over the choice images,
        //  where 2 images are needed per iteration!
        cli = loop_choice.thisN; // current choice loop index

        // extract infos for current images
        indexLeft = (cli * 2);
        indexRight = ((cli * 2) + 1);
        // create filepath for both images
        imgPath = "stimuli/Food_Stimuli/";
        imgLeft = ((imgPath + imgSet[indexLeft][0].toString()) + ".jpg");
        imgRight = ((imgPath + imgSet[indexRight][0].toString()) + ".jpg");

        // count their usage
        imgSet[indexLeft][5] +=1;
        imgSet[indexRight][5] +=1;

        // save the count of usage of images
        psychoJS.experiment.addData("imgCounterL", imgSet[indexLeft][5] );
        psychoJS.experiment.addData("imgCounterR", imgSet[indexRight][5] );
        // save the image names
        psychoJS.experiment.addData("leftImage", imgSet[indexLeft][0] );
        psychoJS.experiment.addData("rightImage", imgSet[indexRight][0] );

        // prepare some vars
        validResponse = false;
      Each JS Frame:
        // react to the choosing of one of the images
        psychoJS.experiment.addData("choice", "missed");
        psychoJS.experiment.addData("optionRight", "missed");
        psychoJS.experiment.addData("choiceRT", (- 1));
        if (mobile_device) {
            if (mouse_choice.isPressedIn(image_choiceLeft)) {
                validResponse = true;
                psychoJS.experiment.addData("choice", "left");
                psychoJS.experiment.addData("optionRight", 0);
                psychoJS.experiment.addData("choiceRT", (globalClock.getTime() - myStart));
                continueRoutine = false; // native PsychoJS var
            } else {
                if (mouse_choice.isPressedIn(image_choiceRight)) {
                    validResponse = true;
                    psychoJS.experiment.addData("choice", "right");
                    psychoJS.experiment.addData("optionRight", 1);
                    psychoJS.experiment.addData("choiceRT", (globalClock.getTime() - myStart));
                    continueRoutine = false; // native PsychoJS var
                }
            }
        } else {
            keys = key_choice.keys;
            if (keys) {
                for (var key, _pj_c = 0, _pj_a = keys, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                    key = _pj_a[_pj_c];
                    if ((key === "x")) {
                        validResponse = true;
                        psychoJS.experiment.addData("choice", "left");
                        psychoJS.experiment.addData("optionRight", 0);
                        psychoJS.experiment.addData("choiceRT", (globalClock.getTime() - myStart));
                        continueRoutine = false; // native PsychoJS var
                    }
                    if ((key === "m")) {
                        validResponse = true;
                        psychoJS.experiment.addData("choice", "right");
                        psychoJS.experiment.addData("optionRight", 1);
                        psychoJS.experiment.addData("choiceRT", (globalClock.getTime() - myStart));
                        continueRoutine = false; // native PsychoJS var
                    }
                }
            }
        }
      End JS Routine:
        // add more date to output
        cli = loop_choice.thisN; // current choice loop index
        psychoJS.experiment.addData("trialCounter", cli+1);

        blockNum = Math.floor(cli / 10) + 1;
        psychoJS.experiment.addData("blockCounter", blockNum)

        if (validResponse) {
            psychoJS.experiment.addData("validChoice", 1)
        } else {
            psychoJS.experiment.addData("validChoice", 0)
        }

        validResponse = false; // reset
    ImageComponent image_choiceLeft
      image [set every repeat] = $imgLeft
      pos = imgLeftPos
      size = imgLeftSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = choiceTimeLimit
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    ImageComponent image_choiceRight
      image [set every repeat] = $imgRight
      pos = imgRightPos
      size = imgRightSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = choiceTimeLimit
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    MouseComponent mouse_choice
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0
      stopVal [duration (s)] = choiceTimeLimit
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    TextboxComponent reminder
      bold = False
      color = 1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.2
      pos = (0, 0.05)
      size = (0.1, 0.2)
      startVal [time (s)] = choiceTimeLimit-1
      stopVal [time (s)] = choiceTimeLimit
      text = !
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    KeyboardComponent key_choice
      allowedKeys = 'x','m'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = choiceTimeLimit
      store = all keys
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  Routine choicePreparations
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    CodeComponent code_printImgSet
      Code Type = JS
      Before JS Experiment:
        function printImgSet(arr) {
            console.log("showing Array for debugging")
            for (let i=0; i<arr.length; i++) {
                console.log(arr[i][0])
            }
        }
    CodeComponent code_choicePreparations
      Code Type = JS
      Before JS Experiment:
        let imgSet = []; // the images used for the choice task
      Begin JS Routine:
        // here we prepare a subset of images for the choice task
        subSet = filteredLikings.slice(0, 20);
        // add a counter to the end of each subarray, to count each image usage
        subSet = subSet.map((subArray) => [...subArray, 0]);


        // do until 60 images are found in a proper order (unique pairs)
        while (imgSet.length < 60) {
            subSet = shuffle_array(subSet);

            // test if the subSet is valid (no pairs already in imgSet present)
            let skipFlag = false
            for (let i=0; i<imgSet.length; i+=2) {
                for (let j=0; j<subSet.length; j+=2) {
                    // test every 2 entries of imgSet against every 2 of subSet
                    if ((imgSet[i] === subSet[j] && imgSet[i+1] === subSet[j+1]) ||
                        (imgSet[i] === subSet[j+1] && imgSet[i+1] === subSet[j]))
                        skipFlag = true; // subSet is invalid, won't be added to imgSet
                }
            }
            if (skipFlag) {
                continue;
            }
            // if test of subSet didn't skip, then add this subset to the imgSet
            imgSet = imgSet.concat(subSet);
        }

        choiceLoopCount = (imgSet.length / 2);
        // choiceLoopcount = 2 // TODO: debug, delete
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  Routine instructions
    RoutineSettingsComponent instructions
      saveStartStop = False
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    CodeComponent code_instructions_2
      Code Type = JS
      Begin JS Routine:
        // text options
        if (mobile_device) {
            if ((languagechoice === "ger")) {
                choiceInstructions1_text = choiceInstr1_ger;
            } else {
                choiceInstructions1_text = choiceInstr1_eng;
            }
        } else {
            if ((languagechoice === "ger")) {
                choiceInstructions1_text = choiceInstr1b_ger;
            } else {
                choiceInstructions1_text = choiceInstr1b_eng;
            }
        }
      Each JS Frame:
        // Hovereffect for submitbutton
        if ((! mobile_device)) {
            if (polygon_submitbutton_2.contains(mouse_instructions_2)) {
                submitbutton_opacity = opacity2;
            } else {
                submitbutton_opacity = opacity1;
            }
        }
    CodeComponent code_jsLinebreaks_2
      Code Type = JS
      Begin JS Routine:
        // make up for wrong line-breaks when reading file with javascript
        choiceInstructions1_text = choiceInstructions1_text .split('\\n').join('\n');
    TextboxComponent textbox_instructions_2
      alignment = center-left
      bold = False
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.035
      pos = (0, 0.1)
      saveStartStop = False
      size = (0.9, 0.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $choiceInstructions1_text
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    MouseComponent mouse_instructions_2
      clickable = polygon_submitbutton_2,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.5
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    PolygonComponent polygon_submitbutton_2
      fillColor = [0.9,0.9,0.9]
      lineColor = [-1,-1,-1]
      lineWidth = 2
      opacity [set every frame] = submitbutton_opacity
      pos = submitbuttonXY
      saveStartStop = False
      shape = rectangle
      size = submitbuttonSize
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_submitbutton_2
      bold = False
      color = black
      editable = False
      letterHeight = 0.04
      pos = submitbuttonXY
      saveStartStop = False
      size = submitbuttonSize
      startVal [time (s)] = 0.0
      text [set every repeat] = $submitbutton_text
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  Routine instructions_2
    RoutineSettingsComponent instructions_2
      saveStartStop = False
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    CodeComponent code_instructions_3
      Code Type = JS
      Begin JS Routine:
        // text options
        if ((languagechoice === "ger")) {
            choiceInstructions2_text = choiceInstr2_ger;
        } else {
            choiceInstructions2_text = choiceInstr2_eng;
        }
      Each JS Frame:
        // Hovereffect for submitbutton
        if ((! mobile_device)) {
            if (polygon_submitbutton_3.contains(mouse_instructions_3)) {
                submitbutton_opacity = opacity2;
            } else {
                submitbutton_opacity = opacity1;
            }
        }
    CodeComponent code_jsLinebreaks_3
      Code Type = JS
      Begin JS Routine:
        // make up for wrong line-breaks when reading file with javascript
        choiceInstructions2_text = choiceInstructions2_text .split('\\n').join('\n');
    TextboxComponent textbox_instructions_3
      alignment = center-left
      bold = False
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.035
      pos = (0, 0.1)
      saveStartStop = False
      size = (0.9, 0.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $choiceInstructions2_text
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    MouseComponent mouse_instructions_3
      clickable = polygon_submitbutton_3,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.5
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    PolygonComponent polygon_submitbutton_3
      fillColor = [0.9,0.9,0.9]
      lineColor = [-1,-1,-1]
      lineWidth = 2
      opacity [set every frame] = submitbutton_opacity
      pos = submitbuttonXY
      saveStartStop = False
      shape = rectangle
      size = submitbuttonSize
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_submitbutton_3
      bold = False
      color = black
      editable = False
      letterHeight = 0.04
      pos = submitbuttonXY
      saveStartStop = False
      size = submitbuttonSize
      startVal [time (s)] = 0.0
      text [set every repeat] = $submitbutton_text
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  Routine emaController
    RoutineSettingsComponent emaController
      desc = This routine sets the next question according to choosen language and respecting if follow-up question shall be skipped due to an preceeding answer.
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    CodeComponent code_emaController
      Code Type = JS
      Begin JS Experiment:
        // declare some variables
        emaType = 0;
        emaSkipNext = false;
        emaQuestion = "no question";
        emaResponse = "no response";
      Begin JS Routine:
        // This routine sets the text and type of the next question, if it is not
        // skipped due to a preceeding question/response

        // handle data storage
        psychoJS.experiment.addData("VAS_questionNr", (questionloop.thisN + 1));
        // the emaTypeX-routines have to change this entry
        psychoJS.experiment.addData("VAS_response", "skipped");

        if (emaSkipNext) {
            emaType = 0; // skip current question
            emaSkipNext = false; // reset
        } else {
            emaType = emaQuestions_type;
            //emaType = 10 // TODO: debug, delete, foobar
            if ((languagechoice === "ger")) {
                emaQuestion = emaQuestions_de;
            } else {
                emaQuestion = emaQuestions_uk;
            }
        }
  Routine emaType1
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    CodeComponent code_emaType1
      Code Type = JS
      Begin JS Routine:
        // set anchortext according to language
        if ((languagechoice === "ger")) {
            emaLabel1 = "\u00fcberhaupt nicht";
            emaLabel2 = "sehr";
        } else {
            emaLabel1 = "not at all";
            emaLabel2 = "very";
        }
      Each JS Frame:
        // Hovereffect for submitbutton
        if ((! mobile_device)) {
            if (textbox_submitbuttonType1.contains(mouse_type1)) {
                submitbutton_opacity = opacity2;
            } else {
                submitbutton_opacity = opacity1;
            }
        }
      End JS Routine:
        // save result for eval if next question shall skip
        emaResponse = slider_emaType1.getRating();
    CodeComponent code_type1RatingDetection
      Code Type = JS
      Begin JS Experiment:
        // track if ratings have been given to all sliders
        ratingGiven = false;
      Each JS Frame:
        // submitbutton display condition
        ratingDone = slider_emaType1.getRating();
        if ((ratingDone !== undefined)) {
            ratingGiven = true;
        }

        // Check if submitbutton was pressed and end routine if true
        if ((ratingGiven && polygon_submitbuttonType1.contains(mouse_type1))) {
            buttonPressed = mouse_type1.getPressed()[0];
            if ((buttonPressed === 1)) {
                continueRoutine = false; // native PsychoJS var
            }
        }
      End JS Routine:
        ratingGiven = false;
    TextboxComponent textbox_emaType1
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0, 0.2)
      size = (0.9, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaQuestion
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    SliderComponent slider_emaType1
      borderColor = lightgrey
      color = lightgrey
      fillColor = red
      forceEndRoutine = False
      granularity = 0
      initVal = 50
      letterHeight = 0.05
      pos = (0, sliderY)
      size = (sliderW, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (0, 100)
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    TextboxComponent textbox_emaType1LeftAnchor
      bold = False
      color = black
      editable = False
      letterHeight = 0.035
      pos = (-sliderW/2, anchorY)
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaLabel1
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    TextboxComponent textbox_emaType1RightAnchor
      bold = False
      color = black
      editable = False
      letterHeight = 0.035
      pos = (sliderW/2, anchorY)
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaLabel2
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    PolygonComponent polygon_submitbuttonType1
      fillColor = [0.9,0.9,0.9]
      lineColor = [-1,-1,-1]
      lineWidth = 2
      opacity [set every frame] = submitbutton_opacity
      pos = submitbuttonXY
      saveStartStop = False
      shape = rectangle
      size = submitbuttonSize
      startVal [condition] = ratingGiven
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    TextboxComponent textbox_submitbuttonType1
      bold = False
      color = black
      editable = False
      letterHeight = 0.04
      pos = submitbuttonXY
      saveStartStop = False
      size = submitbuttonSize
      startVal [condition] = ratingGiven
      text [set every repeat] = $submitbutton_text
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    MouseComponent mouse_type1
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine emaSkipper
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    CodeComponent code_emaSkipper
      Code Type = JS
      Begin JS Routine:
        psychoJS.experiment.addData("VAS_response", emaResponse);
        // handle condition for skipping next question
        expectation = emaQuestions_expectation;
        console.log(emaResponse);
        console.log(expectation);

        if ((expectation === [(- 1)])) {
            emaSkipNext = false;
            console.log("emaSkipNext = False");
        } else {
            // TODO: implement tests to detect skip condition
            console.log("emaSkipNext = maybe");
        }
  Routine emaType4
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    CodeComponent code_emaType4
      Code Type = JS
      Begin JS Routine:
        // set anchortext according to language
        if ((languagechoice === "ger")) {
            emaLabel1 = "sehr schlecht";
            emaLabel2 = "sehr gut";
        } else {
            emaLabel1 = "very poor";
            emaLabel2 = "very good";
        }
      Each JS Frame:
        // Hovereffect for submitbutton
        if ((! mobile_device)) {
            if (textbox_submitbuttonType4.contains(mouse_type4)) {
                submitbutton_opacity = opacity2;
            } else {
                submitbutton_opacity = opacity1;
            }
        }
      End JS Routine:
        // save result for eval if next question shall skip
        emaResponse = slider_emaType4.getRating();
    CodeComponent code_type4RatingDetection
      Code Type = JS
      Begin JS Experiment:
        // track if ratings have been given to all sliders
        ratingGiven = false;
      Each JS Frame:
        // submitbutton display condition
        ratingDone = slider_emaType4.getRating();
        if ((ratingDone !== undefined)) {
            ratingGiven = true;
        }

        // Check if submitbutton was pressed and end routine if true
        if ((ratingGiven && polygon_submitbuttonType4.contains(mouse_type4))) {
            buttonPressed = mouse_type4.getPressed()[0];
            if ((buttonPressed === 1)) {
                continueRoutine = false; // native PsychoJS var
            }
        }
      End JS Routine:
        ratingGiven = false;
    TextboxComponent textbox_emaType4
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0, 0.2)
      size = (0.9, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaQuestion
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    SliderComponent slider_emaType4
      borderColor = lightgrey
      color = lightgrey
      fillColor = red
      forceEndRoutine = False
      granularity = 0
      initVal = 50
      letterHeight = 0.05
      pos = (0, sliderY)
      size = (sliderW, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (0, 100)
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    TextboxComponent textbox_emaType4LeftAnchor
      bold = False
      color = black
      editable = False
      letterHeight = 0.035
      pos = (-sliderW/2, anchorY)
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaLabel1
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    TextboxComponent textbox_emaType4RightAnchor
      bold = False
      color = black
      editable = False
      letterHeight = 0.035
      pos = (sliderW/2, anchorY)
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaLabel2
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    PolygonComponent polygon_submitbuttonType4
      fillColor = [0.9,0.9,0.9]
      lineColor = [-1,-1,-1]
      lineWidth = 2
      opacity [set every frame] = submitbutton_opacity
      pos = submitbuttonXY
      saveStartStop = False
      shape = rectangle
      size = submitbuttonSize
      startVal [condition] = ratingGiven
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    TextboxComponent textbox_submitbuttonType4
      bold = False
      color = black
      editable = False
      letterHeight = 0.04
      pos = submitbuttonXY
      saveStartStop = False
      size = submitbuttonSize
      startVal [condition] = ratingGiven
      text [set every repeat] = $submitbutton_text
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    MouseComponent mouse_type4
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine emaType2
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    CodeComponent code_emaType2
      Code Type = JS
      Begin JS Routine:
        // compute checbox positions
        boxCount = 6;
        gaps = (boxCount - 1); // amount of gaps between boxes
        dist = (sliderW / gaps); // distance between boxes
        checkBox1x = ((- sliderW) / 2);
        checkBox2x = (((- sliderW) / 2) + dist);
        checkBox3x = (((- sliderW) / 2) + (dist * 2));
        checkBox4x = (((- sliderW) / 2) + (dist * 3));
        checkBox5x = (((- sliderW) / 2) + (dist * 4));
        checkBox6x = (((- sliderW) / 2) + (dist * 5));
      Each JS Frame:
        // Hovereffect for submitbutton
        if ((! mobile_device)) {
            if (textbox_submitbuttonType2.contains(mouse_type2)) {
                submitbutton_opacity = opacity2;
            } else {
                submitbutton_opacity = opacity1;
            }
        }
      End JS Routine:
        // save result for eval if next question shall skip
        emaResponse = slider_emaType2.getRating();
    CodeComponent code_type2RatingDetection
      Code Type = JS
      Begin JS Experiment:
        // track if ratings have been given to all sliders
        ratingGiven = false;
      Each JS Frame:
        // submitbutton display condition
        ratingDone = slider_emaType2.getRating();
        if ((ratingDone !== undefined)) {
            ratingGiven = true;
        }

        // Check if submitbutton was pressed and end routine if true
        if ((ratingGiven && polygon_submitbuttonType2.contains(mouse_type2))) {
            buttonPressed = mouse_type2.getPressed()[0];
            if ((buttonPressed === 1)) {
                continueRoutine = false; // native PsychoJS var
            }
        }
      End JS Routine:
        ratingGiven = false;
    TextboxComponent textbox_emaType2
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0, 0.2)
      size = (0.9, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaQuestion
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    SliderComponent slider_emaType2
      borderColor = white
      color = white
      fillColor = red
      forceEndRoutine = False
      granularity = 2
      labels = 1,2,3,4,5,6
      letterHeight = 0.05
      pos = (0, sliderY)
      size = (sliderW, sliderH)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1,2,3,4,5,6)
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    PolygonComponent polygon_submitbuttonType2
      fillColor = [0.9,0.9,0.9]
      lineColor = [-1,-1,-1]
      lineWidth = 2
      opacity [set every frame] = submitbutton_opacity
      pos = submitbuttonXY
      saveStartStop = False
      shape = rectangle
      size = submitbuttonSize
      startVal [condition] = ratingGiven
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    TextboxComponent textbox_submitbuttonType2
      bold = False
      color = black
      editable = False
      letterHeight = 0.04
      pos = submitbuttonXY
      saveStartStop = False
      size = submitbuttonSize
      startVal [condition] = ratingGiven
      text [set every repeat] = $submitbutton_text
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    MouseComponent mouse_type2
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType2Box1
      bold = False
      borderColor = Black
      color = None
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (checkBox1x, sliderY)
      size = (sliderH, sliderH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType2Box2
      bold = False
      borderColor = Black
      color = None
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (checkBox2x, sliderY)
      size = (sliderH, sliderH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType2Box3
      bold = False
      borderColor = Black
      color = None
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (checkBox3x, sliderY)
      size = (sliderH, sliderH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType2Box4
      bold = False
      borderColor = Black
      color = None
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (checkBox4x, sliderY)
      size = (sliderH, sliderH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType2Box5
      bold = False
      borderColor = Black
      color = None
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (checkBox5x, sliderY)
      size = (sliderH, sliderH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType2Box6
      bold = False
      borderColor = Black
      color = None
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (checkBox6x, sliderY)
      size = (sliderH, sliderH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType2Label1
      bold = False
      color = black
      editable = False
      letterHeight = sliderH/2
      pos [set every repeat] = (checkBox1x, anchorY)
      size = (sliderH*2, sliderH)
      startVal [time (s)] = 0.0
      text = <0.5h
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    TextboxComponent textbox_emaType2Label2
      bold = False
      color = black
      editable = False
      fillColor = none
      letterHeight = sliderH/2
      pos [set every repeat] = (checkBox2x, anchorY)
      size = (sliderH*2, sliderH)
      startVal [time (s)] = 0.0
      text = 1h
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    TextboxComponent textbox_emaType2Label3
      bold = False
      color = black
      editable = False
      fillColor = none
      letterHeight = sliderH/2
      pos [set every repeat] = (checkBox3x, anchorY)
      size = (sliderH*2, sliderH)
      startVal [time (s)] = 0.0
      text = 1.5h
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    TextboxComponent textbox_emaType2Label4
      bold = False
      color = black
      editable = False
      fillColor = none
      letterHeight = sliderH/2
      pos [set every repeat] = (checkBox4x, anchorY)
      size = (sliderH*2, sliderH)
      startVal [time (s)] = 0.0
      text = 2h
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    TextboxComponent textbox_emaType2Label5
      bold = False
      color = black
      editable = False
      fillColor = none
      letterHeight = sliderH/2
      pos [set every repeat] = (checkBox5x, anchorY)
      size = (sliderH*2, sliderH)
      startVal [time (s)] = 0.0
      text = 2.5h
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    TextboxComponent textbox_emaType2Label6
      bold = False
      color = black
      editable = False
      fillColor = none
      letterHeight = sliderH/2
      pos [set every repeat] = (checkBox6x, anchorY)
      size = (sliderH*2, sliderH)
      startVal [time (s)] = 0.0
      text = >3h
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  Routine emaType3
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    CodeComponent code_emaType3
      Code Type = JS
      Begin JS Experiment:
        type3sliderW = 0.5;
      Begin JS Routine:
        // set anchortext according to language
        if ((languagechoice === "ger")) {
            emaLabel1 = "Ja";
            emaLabel2 = "Nein";
        } else {
            emaLabel1 = "Yes";
            emaLabel2 = "No";
        }

        // compute checbox positions
        boxCount = 2;
        gaps = (boxCount - 1); // amount of gaps between boxes
        dist = (type3sliderW / gaps); // distance between boxes
        checkBox1x = ((- type3sliderW) / 2);
        checkBox2x = (((- type3sliderW) / 2) + dist);
      Each JS Frame:
        // Hovereffect for submitbutton
        if ((! mobile_device)) {
            if (textbox_submitbuttonType3.contains(mouse_type3)) {
                submitbutton_opacity = opacity2;
            } else {
                submitbutton_opacity = opacity1;
            }
        }
      End JS Routine:
        // save result for eval if next question shall skip
        emaResponse = slider_emaType3.getRating();
    CodeComponent code_type3RatingDetection
      Code Type = JS
      Begin JS Experiment:
        // track if ratings have been given to all sliders
        ratingGiven = false;
      Each JS Frame:
        // submitbutton display condition
        ratingDone = slider_emaType3.getRating();
        if ((ratingDone !== undefined)) {
            ratingGiven = true;
        }

        // Check if submitbutton was pressed and end routine if true
        if ((ratingGiven && polygon_submitbuttonType3.contains(mouse_type3))) {
            buttonPressed = mouse_type3.getPressed()[0];
            if ((buttonPressed === 1)) {
                continueRoutine = false; // native PsychoJS var
            }
        }
      End JS Routine:
        ratingGiven = false;
    TextboxComponent textbox_emaType3
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0, 0.2)
      size = (0.9, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaQuestion
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    SliderComponent slider_emaType3
      borderColor = white
      color = white
      fillColor = red
      forceEndRoutine = False
      granularity = 2
      labels = 1,2
      letterHeight = 0.05
      pos = (0, sliderY)
      size = (type3sliderW, sliderH)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1,2,3,4,5,6)
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    PolygonComponent polygon_submitbuttonType3
      fillColor = [0.9,0.9,0.9]
      lineColor = [-1,-1,-1]
      lineWidth = 2
      opacity [set every frame] = submitbutton_opacity
      pos = submitbuttonXY
      saveStartStop = False
      shape = rectangle
      size = submitbuttonSize
      startVal [condition] = ratingGiven
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    TextboxComponent textbox_submitbuttonType3
      bold = False
      color = black
      editable = False
      letterHeight = 0.04
      pos = submitbuttonXY
      saveStartStop = False
      size = submitbuttonSize
      startVal [condition] = ratingGiven
      text [set every repeat] = $submitbutton_text
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    MouseComponent mouse_type3
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType3Box1
      bold = False
      borderColor = Black
      color = None
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (checkBox1x, sliderY)
      size = (sliderH, sliderH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType3Box2
      bold = False
      borderColor = Black
      color = None
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (checkBox2x, sliderY)
      size = (sliderH, sliderH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType3Label1
      bold = False
      color = black
      editable = False
      letterHeight = sliderH/2
      pos [set every repeat] = (checkBox1x, anchorY)
      size = (sliderH*2, sliderH)
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaLabel1
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    TextboxComponent textbox_emaType3Label2
      bold = False
      color = black
      editable = False
      fillColor = none
      letterHeight = sliderH/2
      pos [set every repeat] = (checkBox2x, anchorY)
      size = (sliderH*2, sliderH)
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaLabel2
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  Routine emaType5
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    CodeComponent code_emaType5
      Code Type = JS
      Begin JS Experiment:
        type5sliderW = 0.7;
        reminderText = "tba";
      Begin JS Routine:
        // set anchortext according to language
        if ((languagechoice === "ger")) {
            emaLabel1 = "Ja";
            emaLabel2 = "Nein";
            reminderText = "Bitte holen Sie das nach";
        } else {
            emaLabel1 = "Yes";
            emaLabel2 = "No";
            reminderText = "Please catch up";
        }

        // compute checbox positions
        boxCount = 2;
        gaps = (boxCount - 1); // amount of gaps between boxes
        dist = (type5sliderW / gaps); // distance between boxes
        checkBox1x = ((- type5sliderW) / 2);
        checkBox2x = (((- type5sliderW) / 2) + dist);
      Each JS Frame:
        // Hovereffect for submitbutton
        if ((! mobile_device)) {
            if (textbox_submitbuttonType5.contains(mouse_type5)) {
                submitbutton_opacity = opacity2;
            } else {
                submitbutton_opacity = opacity1;
            }
        }
      End JS Routine:
        // save result for eval if next question shall skip
        emaResponse = slider_emaType5.getRating();
    CodeComponent code_type5RatingDetection
      Code Type = JS
      Begin JS Experiment:
        // track if ratings have been given to all sliders
        ratingGiven = false;
        reminderCond = false;
      Each JS Frame:
        // submitbutton display condition
        ratingDone = slider_emaType5.getRating();
        if ((ratingDone !== undefined)) {
            ratingGiven = true;
        }

        if ((ratingDone === 2)) {
            reminderCond = true;
        }

        // Check if submitbutton was pressed and end routine if true
        if ((ratingGiven && polygon_submitbuttonType5.contains(mouse_type5))) {
            buttonPressed = mouse_type5.getPressed()[0];
            if ((buttonPressed === 1)) {
                continueRoutine = false; // native PsychoJS var
            }
        }
      End JS Routine:
        ratingGiven = false;
        reminderCond = false;
    TextboxComponent textbox_emaType5
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0, 0.2)
      size = (0.9, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaQuestion
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    SliderComponent slider_emaType5
      borderColor = white
      color = white
      fillColor = red
      forceEndRoutine = False
      granularity = 2
      labels = 1,2
      letterHeight = 0.05
      pos = (0, sliderY)
      size = (type5sliderW, sliderH)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1,2,3,4,5,6)
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    PolygonComponent polygon_submitbuttonType5
      fillColor = [0.9,0.9,0.9]
      lineColor = [-1,-1,-1]
      lineWidth = 2
      opacity [set every frame] = submitbutton_opacity
      pos = submitbuttonXY
      saveStartStop = False
      shape = rectangle
      size = submitbuttonSize
      startVal [condition] = ratingGiven
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    TextboxComponent textbox_submitbuttonType5
      bold = False
      color = black
      editable = False
      letterHeight = 0.04
      pos = submitbuttonXY
      saveStartStop = False
      size = submitbuttonSize
      startVal [condition] = ratingGiven
      text [set every repeat] = $submitbutton_text
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    MouseComponent mouse_type5
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType5Box1
      bold = False
      borderColor = Black
      color = None
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (checkBox1x, sliderY)
      size = (sliderH, sliderH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType5Box2
      bold = False
      borderColor = Black
      color = None
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (checkBox2x, sliderY)
      size = (sliderH, sliderH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType5Label1
      bold = False
      color = black
      editable = False
      letterHeight = sliderH/2
      pos [set every repeat] = (checkBox1x, anchorY)
      size = (sliderH*2, sliderH)
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaLabel1
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    TextboxComponent textbox_emaType5Label2
      bold = False
      color = black
      editable = False
      fillColor = none
      letterHeight = sliderH/2
      pos [set every repeat] = (checkBox2x, anchorY)
      size = (sliderH*2, sliderH)
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaLabel2
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    TextboxComponent textbox_reminder
      bold = False
      color = 1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.05
      pos = (0, sliderY)
      size = (0.5, 0.5)
      startVal [condition] = reminderCond
      text [set every repeat] = $reminderText
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  Routine emaType6
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    CodeComponent code_emaType6
      Code Type = JS
      Begin JS Routine:
        // set anchortext according to language
        if ((languagechoice === "ger")) {
            emaLabel1 = "0=nie";
            emaLabel2 = "1";
            emaLabel3 = "2";
            emaLabel4 = "3";
            emaLabel5 = "4";
            emaLabel6 = "5=immer";
        } else {
            emaLabel1 = "0=never";
            emaLabel2 = "1";
            emaLabel3 = "2";
            emaLabel4 = "3";
            emaLabel5 = "4";
            emaLabel6 = "5=always";
        }

        // compute checbox positions
        boxCount = 6;
        gaps = (boxCount - 1); // amount of gaps between boxes
        dist = (sliderW / gaps); // distance between boxes
        checkBox1x = ((- sliderW) / 2);
        checkBox2x = (((- sliderW) / 2) + dist);
        checkBox3x = (((- sliderW) / 2) + (dist * 2));
        checkBox4x = (((- sliderW) / 2) + (dist * 3));
        checkBox5x = (((- sliderW) / 2) + (dist * 4));
        checkBox6x = (((- sliderW) / 2) + (dist * 5));
      Each JS Frame:
        // Hovereffect for submitbutton
        if ((! mobile_device)) {
            if (textbox_submitbuttonType6.contains(mouse_type6)) {
                submitbutton_opacity = opacity2;
            } else {
                submitbutton_opacity = opacity1;
            }
        }
      End JS Routine:
        // save result for eval if next question shall skip
        emaResponse = slider_emaType6.getRating();
    CodeComponent code_type6RatingDetection
      Code Type = JS
      Begin JS Experiment:
        // track if ratings have been given to all sliders
        ratingGiven = false;
      Each JS Frame:
        // submitbutton display condition
        ratingDone = slider_emaType6.getRating();
        if ((ratingDone !== undefined)) {
            ratingGiven = true;
        }

        // Check if submitbutton was pressed and end routine if true
        if ((ratingGiven && polygon_submitbuttonType6.contains(mouse_type6))) {
            buttonPressed = mouse_type6.getPressed()[0];
            if ((buttonPressed === 1)) {
                continueRoutine = false; // native PsychoJS var
            }
        }
      End JS Routine:
        ratingGiven = false;
    TextboxComponent textbox_emaType6
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0, 0.2)
      size = (0.9, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaQuestion
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    SliderComponent slider_emaType6
      borderColor = white
      color = white
      fillColor = red
      forceEndRoutine = False
      granularity = 2
      labels = 1,2,3,4,5,6
      letterHeight = 0.05
      pos = (0, sliderY)
      size = (sliderW, sliderH)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1,2,3,4,5,6)
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    PolygonComponent polygon_submitbuttonType6
      fillColor = [0.9,0.9,0.9]
      lineColor = [-1,-1,-1]
      lineWidth = 2
      opacity [set every frame] = submitbutton_opacity
      pos = submitbuttonXY
      saveStartStop = False
      shape = rectangle
      size = submitbuttonSize
      startVal [condition] = ratingGiven
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    TextboxComponent textbox_submitbuttonType6
      bold = False
      color = black
      editable = False
      letterHeight = 0.04
      pos = submitbuttonXY
      saveStartStop = False
      size = submitbuttonSize
      startVal [condition] = ratingGiven
      text [set every repeat] = $submitbutton_text
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    MouseComponent mouse_type6
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType6Box1
      bold = False
      borderColor = Black
      color = None
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (checkBox1x, sliderY)
      size = (sliderH, sliderH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType6Box2
      bold = False
      borderColor = Black
      color = None
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (checkBox2x, sliderY)
      size = (sliderH, sliderH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType6Box3
      bold = False
      borderColor = Black
      color = None
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (checkBox3x, sliderY)
      size = (sliderH, sliderH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType6Box4
      bold = False
      borderColor = Black
      color = None
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (checkBox4x, sliderY)
      size = (sliderH, sliderH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType6Box5
      bold = False
      borderColor = Black
      color = None
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (checkBox5x, sliderY)
      size = (sliderH, sliderH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType6Box6
      bold = False
      borderColor = Black
      color = None
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (checkBox6x, sliderY)
      size = (sliderH, sliderH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType6Label1
      bold = False
      color = black
      editable = False
      letterHeight = sliderH/2
      pos [set every repeat] = (checkBox1x, anchorY)
      size = (sliderH*2, sliderH)
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaLabel1
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    TextboxComponent textbox_emaType6Label2
      bold = False
      color = black
      editable = False
      fillColor = none
      letterHeight = sliderH/2
      pos [set every repeat] = (checkBox2x, anchorY)
      size = (sliderH*2, sliderH)
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaLabel2
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    TextboxComponent textbox_emaType6Label3
      bold = False
      color = black
      editable = False
      fillColor = none
      letterHeight = sliderH/2
      pos [set every repeat] = (checkBox3x, anchorY)
      size = (sliderH*2, sliderH)
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaLabel3
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    TextboxComponent textbox_emaType6Label4
      bold = False
      color = black
      editable = False
      fillColor = none
      letterHeight = sliderH/2
      pos [set every repeat] = (checkBox4x, anchorY)
      size = (sliderH*2, sliderH)
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaLabel4
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    TextboxComponent textbox_emaType6Label5
      bold = False
      color = black
      editable = False
      fillColor = none
      letterHeight = sliderH/2
      pos [set every repeat] = (checkBox5x, anchorY)
      size = (sliderH*2, sliderH)
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaLabel5
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    TextboxComponent textbox_emaType6Label6
      bold = False
      color = black
      editable = False
      fillColor = none
      letterHeight = sliderH/2
      pos [set every repeat] = (checkBox6x, anchorY)
      size = (sliderH*2, sliderH)
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaLabel6
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  Routine emaType7
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    CodeComponent code_emaType7
      Code Type = JS
      Begin JS Experiment:
        type7labelLetterHeight = 0.03;
        type7anchorSize = [(sliderH * 1.5), (sliderH * 2)];
        type7anchorY = (sliderY - 0.1);
      Begin JS Routine:
        // set anchortext according to language
        if ((languagechoice === "ger")) {
            emaLabel1 = "Stimme \u00fcberhaupt nicht zu";
            emaLabel2 = "Stimme nicht zu";
            emaLabel3 = "Stimme eher nicht zu";
            emaLabel4 = "Stimme eher zu";
            emaLabel5 = "Stimme zu";
            emaLabel6 = "Stimme vollst\u00e4ndig zu";
        } else {
            emaLabel1 = "Strongly disagree";
            emaLabel2 = "Moderately disagree";
            emaLabel3 = "Mildly disagree";
            emaLabel4 = "Mildly agree";
            emaLabel5 = "Moderately agree";
            emaLabel6 = "Strongly agree";
        }

        // compute checkbox positions
        boxCount = 6;
        gaps = (boxCount - 1); // amount of gaps between boxes
        dist = (sliderW / gaps); // distance between boxes
        checkBox1x = ((- sliderW) / 2);
        checkBox2x = (((- sliderW) / 2) + dist);
        checkBox3x = (((- sliderW) / 2) + (dist * 2));
        checkBox4x = (((- sliderW) / 2) + (dist * 3));
        checkBox5x = (((- sliderW) / 2) + (dist * 4));
        checkBox6x = (((- sliderW) / 2) + (dist * 5));
      Each JS Frame:
        // Hovereffect for submitbutton
        if ((! mobile_device)) {
            if (textbox_submitbuttonType7.contains(mouse_type7)) {
                submitbutton_opacity = opacity2;
            } else {
                submitbutton_opacity = opacity1;
            }
        }
      End JS Routine:
        // save result for eval if next question shall skip
        emaResponse = slider_emaType7.getRating();
    CodeComponent code_type7RatingDetection
      Code Type = JS
      Begin JS Experiment:
        // track if ratings have been given to all sliders
        ratingGiven = false;
      Each JS Frame:
        // submitbutton display condition
        ratingDone = slider_emaType7.getRating();
        if ((ratingDone !== undefined)) {
            ratingGiven = true;
        }

        // Check if submitbutton was pressed and end routine if true
        if ((ratingGiven && polygon_submitbuttonType7.contains(mouse_type7))) {
            buttonPressed = mouse_type7.getPressed()[0];
            if ((buttonPressed === 1)) {
                continueRoutine = false; // native PsychoJS var
            }
        }
      End JS Routine:
        ratingGiven = false;
    TextboxComponent textbox_emaType7
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0, 0.2)
      size = (0.9, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaQuestion
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    SliderComponent slider_emaType7
      borderColor = white
      color = white
      fillColor = red
      forceEndRoutine = False
      granularity = 2
      labels = 0,1,2,3,4,5
      letterHeight = 0.05
      pos = (0, sliderY)
      size = (sliderW, sliderH)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1,2,3,4,5,6)
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    PolygonComponent polygon_submitbuttonType7
      fillColor = [0.9,0.9,0.9]
      lineColor = [-1,-1,-1]
      lineWidth = 2
      opacity [set every frame] = submitbutton_opacity
      pos = submitbuttonXY
      saveStartStop = False
      shape = rectangle
      size = submitbuttonSize
      startVal [condition] = ratingGiven
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    TextboxComponent textbox_submitbuttonType7
      bold = False
      color = black
      editable = False
      letterHeight = 0.04
      pos = submitbuttonXY
      saveStartStop = False
      size = submitbuttonSize
      startVal [condition] = ratingGiven
      text [set every repeat] = $submitbutton_text
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    MouseComponent mouse_type7
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType7Box1
      bold = False
      borderColor = Black
      color = None
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (checkBox1x, sliderY)
      size = (sliderH, sliderH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType7Box2
      bold = False
      borderColor = Black
      color = None
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (checkBox2x, sliderY)
      size = (sliderH, sliderH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType7Box3
      bold = False
      borderColor = Black
      color = None
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (checkBox3x, sliderY)
      size = (sliderH, sliderH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType7Box4
      bold = False
      borderColor = Black
      color = None
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (checkBox4x, sliderY)
      size = (sliderH, sliderH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType7Box5
      bold = False
      borderColor = Black
      color = None
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (checkBox5x, sliderY)
      size = (sliderH, sliderH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType7Box6
      bold = False
      borderColor = Black
      color = None
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (checkBox6x, sliderY)
      size = (sliderH, sliderH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType7Label1
      bold = False
      color = black
      editable = False
      letterHeight = type7labelLetterHeight
      pos [set every repeat] = (checkBox1x, type7anchorY)
      size = type7anchorSize
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaLabel1
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    TextboxComponent textbox_emaType7Label2
      bold = False
      color = black
      editable = False
      fillColor = none
      letterHeight = type7labelLetterHeight
      pos [set every repeat] = (checkBox2x, type7anchorY)
      size = type7anchorSize
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaLabel2
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    TextboxComponent textbox_emaType7Label3
      bold = False
      color = black
      editable = False
      fillColor = none
      letterHeight = type7labelLetterHeight
      pos [set every repeat] = (checkBox3x, type7anchorY)
      size = type7anchorSize
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaLabel3
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    TextboxComponent textbox_emaType7Label4
      bold = False
      color = black
      editable = False
      fillColor = none
      letterHeight = type7labelLetterHeight
      pos [set every repeat] = (checkBox4x, type7anchorY)
      size = type7anchorSize
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaLabel4
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    TextboxComponent textbox_emaType7Label5
      bold = False
      color = black
      editable = False
      fillColor = none
      letterHeight = type7labelLetterHeight
      pos [set every repeat] = (checkBox5x, type7anchorY)
      size = type7anchorSize
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaLabel5
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    TextboxComponent textbox_emaType7Label6
      bold = False
      color = black
      editable = False
      fillColor = none
      letterHeight = type7labelLetterHeight
      pos [set every repeat] = (checkBox6x, type7anchorY)
      size = type7anchorSize
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaLabel6
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  Routine emaType8
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    CodeComponent code_emaType8
      Code Type = JS
      Begin JS Routine:
        // set anchortext according to language
        if ((languagechoice === "ger")) {
            emaLabel1 = "Weniger";
            emaLabel2 = "Gleiche Menge";
            emaLabel3 = "Mehr";
        } else {
            emaLabel1 = "Less";
            emaLabel2 = "same amount";
            emaLabel3 = "More";
        }

        // compute checbox positions
        boxCount = 3;
        gaps = (boxCount - 1); // amount of gaps between boxes
        dist = (sliderW / gaps); // distance between boxes
        checkBox1x = ((- sliderW) / 2);
        checkBox2x = (((- sliderW) / 2) + dist);
        checkBox3x = (((- sliderW) / 2) + (dist * 2));
      Each JS Frame:
        // Hovereffect for submitbutton
        if ((! mobile_device)) {
            if (textbox_submitbuttonType8.contains(mouse_type8)) {
                submitbutton_opacity = opacity2;
            } else {
                submitbutton_opacity = opacity1;
            }
        }
      End JS Routine:
        // save result for eval if next question shall skip
        emaResponse = slider_emaType8.getRating();
    CodeComponent code_type8RatingDetection
      Code Type = JS
      Begin JS Experiment:
        // track if ratings have been given to all sliders
        ratingGiven = false;
      Each JS Frame:
        // submitbutton display condition
        ratingDone = slider_emaType8.getRating();
        if ((ratingDone !== undefined)) {
            ratingGiven = true;
        }

        // Check if submitbutton was pressed and end routine if true
        if ((ratingGiven && polygon_submitbuttonType8.contains(mouse_type8))) {
            buttonPressed = mouse_type8.getPressed()[0];
            if ((buttonPressed === 1)) {
                continueRoutine = false; // native PsychoJS var
            }
        }
      End JS Routine:
        ratingGiven = false;
    TextboxComponent textbox_emaType8
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0, 0.2)
      size = (0.9, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaQuestion
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    SliderComponent slider_emaType8
      borderColor = white
      color = white
      fillColor = red
      forceEndRoutine = False
      granularity = 2
      labels = 1,2,3
      letterHeight = 0.05
      pos = (0, sliderY)
      size = (sliderW, sliderH)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1,2,3,4,5,6)
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    PolygonComponent polygon_submitbuttonType8
      fillColor = [0.9,0.9,0.9]
      lineColor = [-1,-1,-1]
      lineWidth = 2
      opacity [set every frame] = submitbutton_opacity
      pos = submitbuttonXY
      saveStartStop = False
      shape = rectangle
      size = submitbuttonSize
      startVal [condition] = ratingGiven
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    TextboxComponent textbox_submitbuttonType8
      bold = False
      color = black
      editable = False
      letterHeight = 0.04
      pos = submitbuttonXY
      saveStartStop = False
      size = submitbuttonSize
      startVal [condition] = ratingGiven
      text [set every repeat] = $submitbutton_text
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    MouseComponent mouse_type8
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType8Box1
      bold = False
      borderColor = Black
      color = None
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (checkBox1x, sliderY)
      size = (sliderH, sliderH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType8Box2
      bold = False
      borderColor = Black
      color = None
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (checkBox2x, sliderY)
      size = (sliderH, sliderH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType8Box3
      bold = False
      borderColor = Black
      color = None
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (checkBox3x, sliderY)
      size = (sliderH, sliderH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType8Label1
      bold = False
      color = black
      editable = False
      letterHeight = sliderH/2
      pos [set every repeat] = (checkBox1x, anchorY)
      size = (sliderH*2, sliderH)
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaLabel1
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    TextboxComponent textbox_emaType8Label2
      bold = False
      color = black
      editable = False
      fillColor = none
      letterHeight = sliderH/2
      pos [set every repeat] = (checkBox2x, anchorY)
      size = (sliderH*2, sliderH)
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaLabel2
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    TextboxComponent textbox_emaType8Label3
      bold = False
      color = black
      editable = False
      fillColor = none
      letterHeight = sliderH/2
      pos [set every repeat] = (checkBox3x, anchorY)
      size = (sliderH*2, sliderH)
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaLabel3
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  Routine mobileLandscape
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    CodeComponent code_landscape
      Code Type = JS
      Begin JS Experiment:
        requestLandscapeText = "tba";
      Begin JS Routine:
        // prepare text
        if ((languagechoice === "ger")) {
            requestLandscapeText = "Falls Sie das Experiment an einem Mobilger\u00e4t durchf\u00fchren, verwenden Sie bitte das Querformat und bleiben Sie bitte im Vollbildmodus. Andernfalls kann es zu Darstellungsfehlern kommen.";
        } else {
            requestLandscapeText = "If you are conducting the experiment on a mobile device, please use landscape format and stay in full screen mode. Otherwise, display problems may occur.";
        }

        // only run routine if a mobile device is used
        if ((! mobile_device)) {
            continueRoutine = false;
        }
    TextboxComponent textbox_requestLandscape
      bold = False
      color = black
      editable = False
      letterHeight = 0.035
      pos = (0, 0.15)
      size = (0.9, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $requestLandscapeText
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    ImageComponent image_tiltphone
      image = buttons/tilt_phone.png
      pos = (0., -0.1)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_sourcetilt
      bold = False
      color = black
      editable = False
      letterHeight = 0.015
      pos = (0.35, -0.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
      text = Icon from https://icons8.com
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    PolygonComponent polygon_landscape
      fillColor = white
      lineColor = black
      pos = (0, -0.3)
      shape = rectangle
      size = submitbuttonSize
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_submitLandscape
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0, -0.3)
      size = submitbuttonSize
      startVal [time (s)] = 0.0
      text [set every repeat] = $submitbutton_text
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    MouseComponent mouse_landscape
      clickable = polygon_landscape
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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
  Routine shelf_extract
    RoutineSettingsComponent shelf_extract
      saveStartStop = False
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    CodeComponent code_testForLocation
      Code Type = JS
      Begin JS Experiment:
        console.log("Location: ", window.location.href);

        // prepare some vars
        locationText = "foobar supreme";
        showLocation = false; // flag to control if location shall be viewed
        doShelfExtract = true; // read food_rating from shelf by default

        // determine if running locally, online-pilot or online-"running"
        if (window.location.href.includes("localhost")) { // local
            locationText = "LOCAL";
            showLocation = true;
            doShelfExtract = false; // using fix test-set for food_rating

        } else if (window.location.href.includes("pilotToken")) { // online-pilot
            locationText = "PILOT";
            showLocation = true;
            doShelfExtract = false; // using fix test-set for food_rating

        } else { // online-"running"
            locationText = "Welcome Participant";
            showLocation = false;
            doShelfExtract = true; // read food_rating from shelf
        }
      Begin JS Routine:
        // in case the text is not shown, the routine doesn't end itself.
        if ( !showLocation ) {
            continueRoutine = false;
        }
    CodeComponent code_shelfExtract
      Code Type = JS
      Begin JS Experiment:
        // prepare some flags
        hasFoodRating = true;

        if(doShelfExtract){
            //// Code component to extract information from the shelf:
            //// https://www.psychopy.org/online/shelf.html

            food_ratings = [];
            // get id's of all participants from shelf
            existingParticipants = await psychoJS.shelf.getDictionaryFieldNames({
                key: ["food_ratings", "@designer"]});
            console.log(existingParticipants)

            // test if there is an entry for the current participant
            hasFoodRating = existingParticipants.includes(expInfo['participant']);
            if(hasFoodRating){
                // if so, get his/her data
                food_ratings = await psychoJS.shelf.getDictionaryFieldValue({
                    key: ["food_ratings", "@designer"],
                    fieldName:expInfo['participant'],
                    defaultValue:'no food ratings detected'});
            }
        }
    CodeComponent code_debug
      Code Type = JS
      Begin JS Experiment:
        // fallback food_rating, when we don't read from the shelf
        if(!doShelfExtract){

        // this food rating is for debug, when you can't read from shelf
        food_ratings = [
        [115,
        ["sustainability", 39.69183952519388],
        ["wanting", 58.43395187397196],
        ["liking", -78.991625658292325],
        ["healthiness", 39.889125631313135]],
        [300,
        ["liking", -8.34412665747098],
        ["sustainability", 61.4425489998827],
        ["healthiness", 67.16382726274355],
        ["wanting", 23.366477272727277]],
        [114,
        ["wanting", 23.563763378846524],
        ["sustainability", 68.64346741425871],
        ["healthiness", 72.78645682816554],
        ["liking", 81.51169900170449]],
        [337,
        ["healthiness", 67.90364733850113],
        ["sustainability", 31.257891414141415],
        ["wanting", 27.361504929234282],
        ["liking", 67.91418293417195]],
        [1,
        ["sustainability",70.12310756577385],
        ["healthiness", 20.703124247416106],
        ["liking", 13.52412689743826],
        ["wanting", 26.375078161557518]],
        [199,
        ["wanting", 72.98374669720428],
        ["healthiness", 23.317156686927333],
        ["sustainability", 75.30184809607688],
        ["liking", 14.387464387464387]],
        [328,
        ["liking", 14.603294643272669],
        ["sustainability", 23.267836101127394],
        ["healthiness", 25.388651393880746],
        ["wanting", 70.46835542929293]], [157, ["sustainability", 76.88012941919192], ["healthiness", 18.237057328224182], ["liking", 80.32461201126767], ["wanting", 25.832544191919194]], [58, ["liking", 64.35293019625803], ["healthiness", 30.37010581806453], ["wanting", 71.8493544092082], ["sustainability", 32.54024545953732]], [72, ["liking", 78.70586039251606], ["sustainability", 30.4687507525839], ["healthiness", 69.72853535353536], ["wanting", 24.698151903923115]], [52, ["wanting", 69.97514204545455], ["liking", 13.41621176953412], ["healthiness", 70.22174873737373], ["sustainability", 25.53661691420006]], [62, ["sustainability", 33.28006553529489], ["healthiness", 67.65704064658193], ["wanting", 73.18102904040404], ["liking", 78.05836139169472]], [26, ["sustainability", 32.98413825757576], ["healthiness", 69.23532196969697], ["liking", 9.423294403305388], ["wanting", 18.483664020143376]], [259, ["wanting", 30.567391924183777], ["sustainability", 64.50047047451288], ["healthiness", 76.53488155567285], ["liking", 10.502462149139802]], [138, ["healthiness", 26.128471469638328], ["sustainability", 70.86292764153144], ["wanting", 34.41445782329097], ["liking", 67.59043343376126]], [144, ["wanting", 31.80042538377974], ["liking", 78.49003013670779], ["sustainability", 19.420770202020204], ["healthiness", 72.2439266214467]], [3, ["sustainability", 34.01988561105247], ["wanting", 69.33396314129685], ["liking", 21.294139607483924], ["healthiness", 26.62168485347671]], [104, ["healthiness", 36.04205973220594], ["sustainability", 72.2439266214467], ["wanting", 76.09098499471492], ["liking", 12.444959151603847]], [141, ["wanting", 34.611743929410224], ["liking", 69.85668817003247], ["healthiness", 30.715357444503088], ["sustainability", 80.38194745478005]], [24, ["sustainability", 33.773278919133276], ["liking", 74.71294302628733], ["healthiness", 26.769650373796022], ["wanting", 70.17242438865429]], [203, ["sustainability", 22.577336611169756], ["healthiness", 75.203206924477], ["liking", 11.581629894974215], ["wanting", 18.631629540462686]], [121, ["liking", 80.64836562837661], ["healthiness", 22.232084984731195], ["sustainability", 71.4547821969697], ["wanting", 23.711725136246347]], [103, ["sustainability", 70.36971425769305], ["healthiness", 28.1506455907918], ["wanting", 72.68781565656566], ["liking", 13.200381513725834]], [20, ["sustainability", 68.84074975745847], ["liking", 45.79124414456649], ["wanting", 26.62168485347671], ["healthiness", 70.61632094961224]], [256, ["liking", 64.35293019625803], ["sustainability", 31.109925893822098], ["wanting", 24.204938520084728], ["healthiness", 69.82717652513524]], [34, ["wanting", 70.56699660089281], ["sustainability", 26.128471469638328], ["healthiness", 30.81399861610297], ["liking", 64.46084944086041]], [170, ["sustainability", 67.60771629786251], ["liking", 66.07960105961203], ["wanting", 27.657432206953413], ["healthiness", 76.48555720695342]], [33, ["liking", 18.70413537080204], ["sustainability", 62.18236907564029], ["healthiness", 26.572364267676768], ["wanting", 71.55342336856958]], [171, ["wanting", 42.5524786566243], ["healthiness", 71.35614102536981], ["liking", 27.2295622095732], ["sustainability", 26.818970959595962]], [131, ["liking", 24.0999740999741], ["wanting", 36.78187980796351], ["healthiness", 72.34256779304658], ["sustainability", 22.33072991925057]], [189, ["liking", 10.502462149139802], ["healthiness", 61.09730113636363], ["wanting", 76.14030934343434], ["sustainability", 21.88683712121212]], [180, ["liking", 12.01329863998728], ["wanting", 31.01128472222222], ["sustainability", 73.82220794456174], ["healthiness", 21.492264908973617]], [181, ["healthiness", 58.28598635365264], ["sustainability", 34.167851131371776], ["liking", 64.56876456876456], ["wanting", 27.11489823731509]], [76, ["wanting", 64.10590578811338], ["sustainability", 33.28006553529489], ["liking", 4.0274556741333285], ["healthiness", 27.904038898872606]], [272, ["sustainability", 55.32670605062234], ["liking", 24.747473100795446], ["healthiness", 71.80003006048877], ["wanting", 25.339330808080806]], [183, ["sustainability", 39.54387776779406], ["liking", 10.718292404948087], ["wanting", 72.2439266214467], ["healthiness", 29.63028574230695]], [142, ["sustainability", 42.70044041402412], ["liking", 13.52412689743826], ["wanting", 70.27107308609317], ["healthiness", 24.00765617688497]], [322, ["healthiness", 31.94839090409905], ["liking", 19.243719243719244], ["sustainability", 76.28827486375364], ["wanting", 26.62168485347671]], [228, ["healthiness", 34.315812888771596], ["liking", 5.969952676597373], ["sustainability", 78.50773509102638], ["wanting", 27.460149863753657]], [8, ["sustainability", 39.29727107587487], ["healthiness", 75.79506147991528], ["wanting", 70.71496212121212], ["liking", 63.48959682293015]], [331, ["sustainability", 29.137072358468565], ["healthiness", 71.01089316185075], ["liking", 17.948721242076548], ["wanting", 28.7918244949495]], [30, ["wanting", 23.366477272727277], ["healthiness", 71.40545784825026], ["liking", 8.128288168266195], ["sustainability", 29.728930676826327]], [321, ["liking", 72.7704377904268], ["wanting", 28.545217803030305], ["sustainability", 72.39188461592703], ["healthiness", 26.375078161557518]], [38, ["healthiness", 67.85432298978169], ["sustainability", 33.0334588433757], ["liking", 61.007511830850646], ["wanting", 30.764678030303028]], [323, ["liking", 74.17335915337013], ["wanting", 28.298611111111114], ["healthiness", 74.95660023255782], ["sustainability", 27.312184343434343]], [136, ["wanting", 69.67921100481593], ["healthiness", 28.545217803030305], ["liking", 64.1370958237515], ["sustainability", 30.222144060664707]], [190, ["healthiness", 62.23169342435971], ["sustainability", 38.36016489399804], ["liking", 58.63334196667529], ["wanting", 34.562419580690786]], [326, ["wanting", 69.92581769673511], ["sustainability", 42.30587196470511], ["healthiness", 66.62128953018573], ["liking", 22.589137609126624]], [192, ["wanting", 68.59414306553927], ["healthiness", 36.92984532828283], ["liking", 81.29586462919795], ["sustainability", 26.375078161557518]], [36, ["wanting", 71.30681667665039], ["liking", 11.581629894974215], ["sustainability", 68.44617754521995], ["healthiness", 25.980509712238508]], [263, ["liking", 11.797460150782497], ["healthiness", 38.45880606559792], ["wanting", 70.71496212121212], ["sustainability", 28.545217803030305]], [61, ["liking", 6.401621421610438], ["sustainability", 75.74573713119584], ["wanting", 70.76428646993156], ["healthiness", 35.992739146406]], [81, ["wanting", 33.378710469814266], ["liking", 72.66252266252266], ["healthiness", 72.8850979997654], ["sustainability", 28.594538388830244]], [12, ["healthiness", 29.186396707188], ["sustainability", 73.87152476744218], ["wanting", 72.8850979997654], ["liking", 76.87127851795617]], [224, ["liking", 21.509969863292213], ["wanting", 29.926216782945573], ["healthiness", 24.45154521200392], ["sustainability", 71.75071323760832]], [14, ["sustainability", 67.90364733850113], ["wanting", 28.545217803030305], ["healthiness", 29.383679050387755], ["liking", 66.40335056002272]], [4, ["healthiness", 70.86292764153144], ["sustainability", 35.84477738900618], ["wanting", 32.14567701021831], ["liking", 72.0150236617013]], [241, ["wanting", 70.76428646993156], ["sustainability", 44.13075997973933], ["healthiness", 32.09635266149887], ["liking", 79.02961400962498]], [167, ["sustainability", 79.74076855062235], ["healthiness", 22.42937109085045], ["wanting", 30.271464646464647], ["liking", 81.08003025669142]], [202, ["healthiness", 71.4547821969697], ["wanting", 16.51081048478984], ["sustainability", 31.257891414141415], ["liking", 82.48294750293651]]];

        }
    TextboxComponent textbox_location
      bold = False
      borderColor = red
      borderWidth = 5
      color = red
      editable = False
      letterHeight = 0.2
      size = (0.8, 0.5)
      startVal [condition] = showLocation
      stopVal [duration (s)] = 3
      text [set every repeat] = $locationText
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  Routine filter_images
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    CodeComponent code_filterImages
      Code Type = JS
      Begin JS Experiment:
        filteredLikings = [];
      Begin JS Routine:
        // This is the selection algorithm for selecting the 20 images out of 60 for the
        // choices
        //
        // The range of the liking ratings is assumed to be in range [-100, 100], and
        // is the relevant variable.
        // Starting with a anchorpoint of 17.82 for the moderate range, choose the 20
        // images with the lowest distance to it.
        // But no negative values if possible, fill up with values from above when
        // reaching 0.
        // If there are not enough positive values, fill up with negatives.


        // Sort each subset of food_ratings alphabetically by the first element, so the
        // order of ratings is the same for each image.
        food_ratings.forEach(subset => {
          subset.sort((a, b) => {
            if (Array.isArray(a) && Array.isArray(b)) {
              return a[0].localeCompare(b[0]); // Compare strings alphabetically
            }
            return 0;
          });
        });
        //console.log(food_ratings);

        // Sort for liking values, the images with the lowest liking values will be the
        // first in the food_ratings array.
        food_ratings.sort((a, b) => {
          const likingA = a.find(entry => entry[0] === 'liking')[1];
          const likingB = b.find(entry => entry[0] === 'liking')[1];
          return likingA - likingB; // Sort in ascending order
        });
        //console.log(food_ratings);

        // Filter the 20 entries with the closest liking to the moderateAnchor
        const moderateAnchor = 17.82; // anchorpoint for a moderate liking range
        const posDistances = []; // stores food_ratings + distance to anchor for positive likings
        const negDistances = []; // stores food_ratings + distance to anchor for negative likings
        food_ratings.forEach(subarray => { // for each single food rating...
            // get the liking rating
            const likingEntry = subarray.find(entry => Array.isArray(entry) && entry[0] === 'liking');
            const likingValue = likingEntry[1];

            // save the food rating together with its distance to the anchorpoint
            const distance= Math.abs(likingValue - moderateAnchor);
            if (likingValue >= 0) {
                posDistances.push({ subarray, distance });
            } else {
                negDistances.push({ subarray, distance });
            }
          });
        posDistances.sort((a, b) => a.distance - b.distance); // sort by distance
        negDistances.sort((a, b) => a.distance - b.distance); // sort by distance
        // add negative likings to end as fallback, if there are less than 20 positives
        const allDistances = posDistances.concat(negDistances);
        // get the 20 food ratings with the smallest distance to the anchor point
        filteredLikings = allDistances.slice(0, 20).map(item => item.subarray);

        //console.log(filteredLikings.length)
        //console.log("foobar")
        //console.log(filteredLikings)
  Routine device_selection
    RoutineSettingsComponent device_selection
      saveStartStop = False
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    CodeComponent code_deviceselection
      Code Type = JS
      Begin JS Experiment:
        mobile_device = false;
        device = "none";
      Begin JS Routine:
        // window size
        window_height = window.innerHeight;
        window_width = window.innerWidth;
        xrange = (window_width / window_height);
        yrange = (window_height / window_width);
        last_xrange = xrange;
        pos_sourcetext = [(0.3 * Math.max(1, xrange)), ((- 0.48) * Math.max(1, yrange))];

        // define texts
        if ((languagechoice === "ger")) {
            device_text = "Bitte w\u00e4hlen Sie das Ger\u00e4t aus, welches Sie gerade benutzen.";
            device_list = ["PC/Laptop", "Smartphone", "Tablet"];
        } else {
            device_text = "Please select the device you are currently using.";
            device_list = ["PC/Laptop", "Smartphone", "Tablet"];
        }
      Each JS Frame:
        // hovereffect
        if ((! mobile_device)) {
            if (button_PC.contains(mouse_deviceselection)) {
                button_PC_opacity = opacity2;
            } else {
                button_PC_opacity = opacity1;
            }
            if (button_smartphone.contains(mouse_deviceselection)) {
                button_smartphone_opacity = opacity2;
            } else {
                button_smartphone_opacity = opacity1;
            }
            if (button_tablet.contains(mouse_deviceselection)) {
                button_tablet_opacity = opacity2;
            } else {
                button_tablet_opacity = opacity1;
            }
        }

        // window size
        window_height = window.innerHeight;
        window_width = window.innerWidth;
        xrange = (window_width / window_height);
        if ((xrange !== last_xrange)) {
            // size changed
            last_xrange = xrange;
            yrange = (window_height / window_width);
            pos_sourcetext = [(0.3 * Math.max(1, xrange)), ((- 0.48) * Math.max(1, yrange))];
        }
      End JS Routine:
        // get chosen device
        if ((mouse_deviceselection.clicked_name[0] === "button_PC")) {
            mobile_device = false;
            device = "PC/Laptop";
        } else {
            mobile_device = true;
            if ((mouse_deviceselection.clicked_name[0] === "button_smartphone")) {
                device = "Smartphone";
            } else {
                device = "Tablet";
            }
        }

        // store chosen device
        expInfo["device"] = device;
    TextboxComponent textbox_deviceselection
      bold = False
      color = black
      editable = False
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.95, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $device_text
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    PolygonComponent button_PC
      fillColor = 1.0000, 0.8431, 0.6078
      lineColor = 1.0000, 0.7882, 0.5373
      opacity [set every frame] = button_PC_opacity
      pos = (-0.3, -0.2)
      saveStartStop = False
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent button_smartphone
      fillColor = 1.0000, 0.8431, 0.6078
      lineColor = 1.0000, 0.7882, 0.5373
      opacity [set every frame] = button_smartphone_opacity
      pos = (0, -0.2)
      saveStartStop = False
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent button_tablet
      fillColor = 1.0000, 0.8431, 0.6078
      lineColor = 1.0000, 0.7882, 0.5373
      opacity [set every frame] = button_tablet_opacity
      pos = (0.3, -0.2)
      saveStartStop = False
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent image_PC
      image = buttons/laptop.png
      pos = (-0.3, -0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent image_smartphone
      image = buttons/smartphone.png
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent image_tablet
      image = buttons/tablet.png
      pos = (0.3, -0.2)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_PC
      bold = False
      color = black
      editable = False
      letterHeight = 0.04
      pos = (-0.3, -0.35)
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $device_list[0]
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    TextboxComponent textbox_smartphone
      bold = False
      color = black
      editable = False
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $device_list[1]
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    TextboxComponent textbox_tablet
      bold = False
      color = black
      editable = False
      letterHeight = 0.04
      pos = (0.3, -0.35)
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $device_list[2]
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    MouseComponent mouse_deviceselection
      clickable = button_PC, button_smartphone, button_tablet
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_sourceicons
      bold = False
      color = (0.6549, 0.6549, 0.6549)
      editable = False
      letterHeight = 0.015
      pos [set every frame] = pos_sourcetext
      size = (0.3, 0.04)
      startVal [time (s)] = 0.0
      text = Icons from https://icons8.com/
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  Routine countdown
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    CodeComponent code_countdown
      Code Type = JS
      Begin JS Experiment:
        countdownNum = 5;
        countdownText = countdownNum.toString();
      Begin JS Routine:
        myStart = globalClock.getTime();
        countdownStep = 1;
      Each JS Frame:
        diffTime = (globalClock.getTime() - myStart);

        if ((diffTime > countdownStep)) {
            countdownStep = (countdownStep + 1);
            countdownNum = (countdownNum - 1);
            countdownText = countdownNum.toString();
        }
    TextboxComponent textbox_countdown
      bold = False
      color = red
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $countdownText
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  Routine emaType10
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    CodeComponent code_emaType10
      Code Type = JS
      Begin JS Routine:
        // compute checbox positions
        boxCount = 7;
        gaps = (boxCount - 1); // amount of gaps between boxes
        dist = (sliderW / gaps); // distance between boxes
        checkBox1x = ((- sliderW) / 2);
        checkBox2x = (((- sliderW) / 2) + dist);
        checkBox3x = (((- sliderW) / 2) + (dist * 2));
        checkBox4x = (((- sliderW) / 2) + (dist * 3));
        checkBox5x = (((- sliderW) / 2) + (dist * 4));
        checkBox6x = (((- sliderW) / 2) + (dist * 5));
        checkBox7x = (((- sliderW) / 2) + (dist * 6));
      Each JS Frame:
        // Hovereffect for submitbutton
        if ((! mobile_device)) {
            if (textbox_submitbuttonType10.contains(mouse_type10)) {
                submitbutton_opacity = opacity2;
            } else {
                submitbutton_opacity = opacity1;
            }
        }
      End JS Routine:
        // save result for eval if next question shall skip
        emaResponse = slider_emaType10.getRating();
    CodeComponent code_type10RatingDetection
      Code Type = JS
      Begin JS Experiment:
        // track if ratings have been given to all sliders
        ratingGiven = false;
      Each JS Frame:
        // submitbutton display condition
        ratingDone = slider_emaType10.getRating();
        if ((ratingDone !== undefined)) {
            ratingGiven = true;
        }

        // Check if submitbutton was pressed and end routine if true
        if ((ratingGiven && polygon_submitbuttonType10.contains(mouse_type10))) {
            buttonPressed = mouse_type10.getPressed()[0];
            if ((buttonPressed === 1)) {
                continueRoutine = false; // native PsychoJS var
            }
        }
      End JS Routine:
        ratingGiven = false;
    TextboxComponent textbox_emaType10
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0, 0.2)
      size = (0.9, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $emaQuestion
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    SliderComponent slider_emaType10
      borderColor = white
      color = white
      fillColor = red
      forceEndRoutine = False
      granularity = 2
      labels = 1,2,3,4,5,6,7
      letterHeight = 0.05
      pos = (0, sliderY)
      size = (sliderW, sliderH)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1,2,3,4,5,6)
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    PolygonComponent polygon_submitbuttonType10
      fillColor = [0.9,0.9,0.9]
      lineColor = [-1,-1,-1]
      lineWidth = 2
      opacity [set every frame] = submitbutton_opacity
      pos = submitbuttonXY
      saveStartStop = False
      shape = rectangle
      size = submitbuttonSize
      startVal [condition] = ratingGiven
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    TextboxComponent textbox_submitbuttonType10
      bold = False
      color = black
      editable = False
      letterHeight = 0.04
      pos = submitbuttonXY
      saveStartStop = False
      size = submitbuttonSize
      startVal [condition] = ratingGiven
      text [set every repeat] = $submitbutton_text
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    MouseComponent mouse_type10
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType10Box1
      bold = False
      borderColor = Black
      color = None
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (checkBox1x, sliderY)
      size = (sliderH, sliderH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType10Box2
      bold = False
      borderColor = Black
      color = None
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (checkBox2x, sliderY)
      size = (sliderH, sliderH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType10Box3
      bold = False
      borderColor = Black
      color = None
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (checkBox3x, sliderY)
      size = (sliderH, sliderH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType10Box4
      bold = False
      borderColor = Black
      color = None
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (checkBox4x, sliderY)
      size = (sliderH, sliderH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType10Box5
      bold = False
      borderColor = Black
      color = None
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (checkBox5x, sliderY)
      size = (sliderH, sliderH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType10Box6
      bold = False
      borderColor = Black
      color = None
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (checkBox6x, sliderY)
      size = (sliderH, sliderH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType10Box7
      bold = False
      borderColor = Black
      color = None
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (checkBox7x, sliderY)
      size = (sliderH, sliderH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_emaType10Label1
      bold = False
      color = black
      editable = False
      letterHeight = sliderH/2
      pos [set every repeat] = (checkBox1x, anchorY)
      size = (sliderH*2, sliderH)
      startVal [time (s)] = 0.0
      text = <5
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    TextboxComponent textbox_emaType10Label2
      bold = False
      color = black
      editable = False
      fillColor = none
      letterHeight = sliderH/2
      pos [set every repeat] = (checkBox2x, anchorY)
      size = (sliderH*2, sliderH)
      startVal [time (s)] = 0.0
      text = 5-14
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    TextboxComponent textbox_emaType10Label3
      bold = False
      color = black
      editable = False
      fillColor = none
      letterHeight = sliderH/2
      pos [set every repeat] = (checkBox3x, anchorY)
      size = (sliderH*2, sliderH)
      startVal [time (s)] = 0.0
      text = 15-29
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    TextboxComponent textbox_emaType10Label4
      bold = False
      color = black
      editable = False
      fillColor = none
      letterHeight = sliderH/2
      pos [set every repeat] = (checkBox4x, anchorY)
      size = (sliderH*2, sliderH)
      startVal [time (s)] = 0.0
      text = 30-44
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    TextboxComponent textbox_emaType10Label5
      bold = False
      color = black
      editable = False
      fillColor = none
      letterHeight = sliderH/2
      pos [set every repeat] = (checkBox5x, anchorY)
      size = (sliderH*2, sliderH)
      startVal [time (s)] = 0.0
      text = 45-59
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    TextboxComponent textbox_emaType10Label6
      bold = False
      color = black
      editable = False
      fillColor = none
      letterHeight = sliderH/2
      pos [set every repeat] = (checkBox6x, anchorY)
      size = (sliderH*2, sliderH)
      startVal [time (s)] = 0.0
      text = 60-89
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    TextboxComponent textbox_emaType10Label7
      bold = False
      color = black
      editable = False
      fillColor = none
      letterHeight = sliderH/2
      pos [set every repeat] = (checkBox7x, anchorY)
      size = (sliderH*2, sliderH)
      startVal [time (s)] = 0.0
      text = >=90
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  Routine Berghain
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    CodeComponent code_Berghain
      Code Type = JS
      Begin JS Routine:
        // We only show this routine in case we try to get a food_rating from shelf,
        // and there is none.
        continueRoutine = false;
        if ( doShelfExtract && !hasFoodRating ) {
            continueRoutine = true;
        }
      End JS Routine:
        // When there is no food rating on the shelf, the experiment ends
        // with this routine. Goodby;)
        if ( doShelfExtract && !hasFoodRating ) {
            return quitPsychoJS('Thank you for your participation', false);
        }
    TextboxComponent textbox_Berghain
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      saveStartStop = False
      size = (0.8, 0.5)
      startVal [condition] = doShelfExtract && !hasFoodRating
      stopVal [duration (s)] = 5
      text = You cannot run this experiment yet, since there is no record of your food ratings. Please finish the Food Rating experiment first or contact the experiment operator.
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  Routine end
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    CodeComponent code_end
      Code Type = JS
      Begin JS Routine:
        if ((languagechoice === "ger")) {
            end_text = "Das Experiment ist nun beendet.\nVielen Dank f\u00fcr Ihre Teilnahme.";
            end_text2 = "Bitte schliessen Sie das Experiment nicht bevor das Fenster mit der Nachricht 'Thank you for your patience.' erscheint. \nDies kann einen Moment dauern.";
        } else {
            end_text = "The experiment is over.\nThank you for your participation.";
            end_text2 = "Please do not close the experiment before the window with the message 'Thank you for your patience.' appears. \nThis may take a moment.";
        }
    TextboxComponent textbox_end
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      size = (0.9, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $end_text
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    TextboxComponent textbox_wait
      bold = False
      color = black
      editable = False
      letterHeight = 0.03
      pos = (0, -0.1)
      saveStartStop = False
      size = (0.7, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $end_text2
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Flow
  Routine shelf_extract
  Routine Berghain
  Routine filter_images
  Routine global_vars
  Routine language_choice
  Routine device_selection
  Routine mobileLandscape
  LoopInitiator instructionReadLoop loopType="TrialHandler"
    conditions = [{'emaInstr_ger': 'Im Folgenden werden Ihnen Fragen zu Ihrem aktuellen Befinden gestellt. Bitte beantworten Sie diese Fragen gewissenhaft und ehrlich.', 'emaInstr_eng': 'In the following, you will be asked questions about your current condition. Please answer these questions conscientiously and honestly.', 'choiceInstr1_ger': 'In der folgenden Aufgabe sollen Sie sich jeweils zwischen zwei Essensoptionen entscheiden. Dazu sehen Sie jeweils zwei Bilder mit unterschiedlichem Essen. Danach bitten wir Sie anzugeben, welches Essen Sie lieber erhalten möchten.\n Um das linke Essen zu wählen, klicken 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
    conditionsFile = stimuli/instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine load_instructions
  LoopTerminator instructionReadLoop
  LoopInitiator imageListReadLoop loopType="TrialHandler"
    conditionsFile = stimuli/imageList.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'imageNr': 1},
      {'imageNr': 3},
      {'imageNr': 4},
      {'imageNr': 8},
      {'imageNr': 12},
      {'imageNr': 14},
      {'imageNr': 20},
      {'imageNr': 24},
      {'imageNr': 26},
      {'imageNr': 30},
      {'imageNr': 33},
      {'imageNr': 34},
      {'imageNr': 36},
      {'imageNr': 38},
      {'imageNr': 52},
      {'imageNr': 58},
      {'imageNr': 61},
      {'imageNr': 62},
      {'imageNr': 72},
      {'imageNr': 76},
      {'imageNr': 81},
      {'imageNr': 103},
      {'imageNr': 104},
      {'imageNr': 114},
      {'imageNr': 115},
      {'imageNr': 121},
      {'imageNr': 131},
      {'imageNr': 136},
      {'imageNr': 138},
      {'imageNr': 141},
      {'imageNr': 142},
      {'imageNr': 144},
      {'imageNr': 157},
      {'imageNr': 167},
      {'imageNr': 170},
      {'imageNr': 171},
      {'imageNr': 180},
      {'imageNr': 181},
      {'imageNr': 183},
      {'imageNr': 189},
      {'imageNr': 190},
      {'imageNr': 192},
      {'imageNr': 199},
      {'imageNr': 202},
      {'imageNr': 203},
      {'imageNr': 224},
      {'imageNr': 228},
      {'imageNr': 241},
      {'imageNr': 256},
      {'imageNr': 259},
      {'imageNr': 263},
      {'imageNr': 272},
      {'imageNr': 300},
      {'imageNr': 321},
      {'imageNr': 322},
      {'imageNr': 323},
      {'imageNr': 326},
      {'imageNr': 328},
      {'imageNr': 331},
      {'imageNr': 337}]
    Routine load_imageList
  LoopTerminator imageListReadLoop
  Routine emaInstructions
  LoopInitiator questionloop loopType="TrialHandler"
    conditionsFile = stimuli/emaQuestions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'emaQuestions_de': 'Wie hungrig sind Sie im Moment?', 'emaQuestions_uk': 'How hungry are you at the moment?', 'emaQuestions_type': 1, 'emaQuestions_expectation': [-1]},
      {'emaQuestions_de': 'Wie satt sind Sie im Moment?', 'emaQuestions_uk': 'How sated are you at the moment?', 'emaQuestions_type': 1, 'emaQuestions_expectation': [-1]},
      {'emaQuestions_de': 'Wie durstig sind Sie im Moment?', 'emaQuestions_uk': 'How thirsty are you at the moment?', 'emaQuestions_type': 1, 'emaQuestions_expectation': [-1]},
      {'emaQuestions_de': 'Wann haben Sie die letzte Mahlzeit gegessen?', 'emaQuestions_uk': 'When did you eat your last meal?', 'emaQuestions_type': 2, 'emaQuestions_expectation': [-1]},
      {'emaQuestions_de': 'Haben Sie seit der letzten Mahlzeit noch genascht?', 'emaQuestions_uk': 'Have you had a snack since your last meal?', 'emaQuestions_type': 3, 'emaQuestions_expectation': [-1]},
      {'emaQuestions_de': 'Haben Sie in den letzten 2h koffeinhaltige Getränke wie Kaffee getrunken?', 'emaQuestions_uk': 'Have you had any drinks containing caffeine, such as coffee, in the last two hours?', 'emaQuestions_type': 3, 'emaQuestions_expectation': [-1]},
      {'emaQuestions_de': 'Essen Sie zurzeit deutlich mehr oder deutlich weniger im Vergleich zu Ihrem täglichen Konsum in den letzten 4 Wochen?', 'emaQuestions_uk': 'Do you currently consume significantly more or less food in comparison to the last 4 weeks? ', 'emaQuestions_type': 8, 'emaQuestions_expectation': [-1]}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
    Routine emaController
    LoopInitiator emaType1conditionLoop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = emaType == 1
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      Routine emaType1
    LoopTerminator emaType1conditionLoop
    LoopInitiator emaType2conditionLoop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = emaType == 2
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      Routine emaType2
    LoopTerminator emaType2conditionLoop
    LoopInitiator emaType3ConditionLoop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = emaType == 3
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      Routine emaType3
    LoopTerminator emaType3ConditionLoop
    LoopInitiator emaType4conditionLoop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = emaType == 4
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      Routine emaType4
    LoopTerminator emaType4conditionLoop
    LoopInitiator emaType5ConditionsLoop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = emaType == 5
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      Routine emaType5
    LoopTerminator emaType5ConditionsLoop
    LoopInitiator emaType6ConditionLoop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = emaType == 6
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      Routine emaType6
    LoopTerminator emaType6ConditionLoop
    LoopInitiator emaType7ConditionLoop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = emaType == 7
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      Routine emaType7
    LoopTerminator emaType7ConditionLoop
    LoopInitiator emaType8ConditionLoop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = emaType == 8
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      Routine emaType8
    LoopTerminator emaType8ConditionLoop
    LoopInitiator emaType10ConditionLoop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = emaType == 10
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      Routine emaType10
    LoopTerminator emaType10ConditionLoop
    Routine emaSkipper
  LoopTerminator questionloop
  Routine instructions
  Routine instructions_2
  Routine choicePreparations
  Routine countdown
  LoopInitiator loop_choice loopType="TrialHandler"
    loopType = sequential
    nReps = choiceLoopCount
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    Routine fixation
    Routine choice
  LoopTerminator loop_choice
  Routine end
