PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session number': '', 'experimenter mode': '0'}
  Full-screen window = False
  Monitor = testMonitor
  Resources = ['resources/variable_sheets/ExperimenterOutputSheet.xlsx', 'resources/variable_sheets/general_setup_sheet.xlsx', 'resources/variable_sheets/lab1_syringes.xlsx', 'resources/variable_sheets/lab2_syringes.xlsx', 'resources/variable_sheets/lab3_syringes.xlsx', 'resources/variable_sheets/lab4_syringes.xlsx', 'resources/variable_sheets/lab5_syringes.xlsx', 'resources/variable_sheets/outputSheet.xlsx', 'resources/variable_sheets/pathogenSheet.xlsx', 'resources/alternative_screen2.png', 'resources/coin.png', 'resources/correct.png', 'resources/gallery_background.png', 'resources/lab_background_1.png', 'resources/lab_background_2.png', 'resources/lab_background_3.png', 'resources/lab_background_4.png', 'resources/lab_background_5.png', 'resources/lab_background_6.png', 'resources/lab_background_7.png', 'resources/lab_background_8.png', 'resources/lab_background_9.png', 'resources/lab_background_10.png', 'resources/lab_background_11.png', 'resources/lab_background_12.png', 'resources/lab_background_13.png', 'resources/lab_background_14.png', 'resources/lab_background_15.png', 'resources/lab_background_16.png', 'resources/lab_background_17.png', 'resources/lab_background_18.png', 'resources/lab_background_19.png', 'resources/lab_background_20.png', 'resources/lab_background_21.png', 'resources/lab_background_22.png', 'resources/lab_background_23.png', 'resources/lab_background_24.png', 'resources/lab_background_25.png', 'resources/lab_background_26.png', 'resources/lab_background_27.png', 'resources/lab_background_28.png', 'resources/lab_background_29.png', 'resources/lab_background_30.png', 'resources/notepad_1.png', 'resources/notepad_2.png', 'resources/notepad_3.png', 'resources/notepad_4.png', 'resources/notepad_5.png', 'resources/pathogen_1.png', 'resources/pathogen_2.png', 'resources/pathogen_3.png', 'resources/pathogen_4.png', 'resources/pathogen_5.png', 'resources/pathogen_6.png', 'resources/pathogen_7.png', 'resources/pathogen_8.png', 'resources/pathogen_9.png', 'resources/pathogen_10.png', 'resources/pathogen_11.png', 'resources/pathogen_12.png', 'resources/pathogen_13.png', 'resources/pathogen_14.png', 'resources/pathogen_15.png', 'resources/pathogen_16.png', 'resources/pathogen_17.png', 'resources/pathogen_18.png', 'resources/pathogen_19.png', 'resources/pathogen_20.png', 'resources/pathogen_21.png', 'resources/pathogen_22.png', 'resources/pathogen_23.png', 'resources/pathogen_24.png', 'resources/pathogen_25.png', 'resources/pathogen_26.png', 'resources/pathogen_27.png', 'resources/pathogen_28.png', 'resources/pathogen_29.png', 'resources/pathogen_30.png', 'resources/pathogen_31.png', 'resources/scoreboard_lab_1.png', 'resources/scoreboard_lab_2.png', 'resources/scoreboard_lab_3.png', 'resources/scoreboard_lab_4.png', 'resources/scoreboard_lab_5.png', 'resources/syringe_lab_1_empty_1.png', 'resources/syringe_lab_1_empty_2.png', 'resources/syringe_lab_1_empty_3.png', 'resources/syringe_lab_1_empty_4.png', 'resources/syringe_lab_1_empty_5.png', 'resources/syringe_lab_1_empty_6.png', 'resources/syringe_lab_1_empty_7.png', 'resources/syringe_lab_1_empty_8.png', 'resources/syringe_lab_1_empty_9.png', 'resources/syringe_lab_1_empty_10.png', 'resources/syringe_lab_1_empty_11.png', 'resources/syringe_lab_1_empty_12.png', 'resources/syringe_lab_1_full_1.png', 'resources/syringe_lab_1_full_2.png', 'resources/syringe_lab_1_full_3.png', 'resources/syringe_lab_1_full_4.png', 'resources/syringe_lab_1_full_5.png', 'resources/syringe_lab_1_full_6.png', 'resources/syringe_lab_1_full_7.png', 'resources/syringe_lab_1_full_8.png', 'resources/syringe_lab_1_full_9.png', 'resources/syringe_lab_1_full_10.png', 'resources/syringe_lab_1_full_11.png', 'resources/syringe_lab_1_full_12.png', 'resources/syringe_lab_2_empty_1.png', 'resources/syringe_lab_2_empty_2.png', 'resources/syringe_lab_2_empty_3.png', 'resources/syringe_lab_2_empty_4.png', 'resources/syringe_lab_2_empty_5.png', 'resources/syringe_lab_2_empty_6.png', 'resources/syringe_lab_2_empty_7.png', 'resources/syringe_lab_2_empty_8.png', 'resources/syringe_lab_2_empty_9.png', 'resources/syringe_lab_2_empty_10.png', 'resources/syringe_lab_2_empty_11.png', 'resources/syringe_lab_2_empty_12.png', 'resources/syringe_lab_2_full_1.png', 'resources/syringe_lab_2_full_2.png', 'resources/syringe_lab_2_full_3.png', 'resources/syringe_lab_2_full_4.png', 'resources/syringe_lab_2_full_5.png', 'resources/syringe_lab_2_full_6.png', 'resources/syringe_lab_2_full_7.png', 'resources/syringe_lab_2_full_8.png', 'resources/syringe_lab_2_full_9.png', 'resources/syringe_lab_2_full_10.png', 'resources/syringe_lab_2_full_11.png', 'resources/syringe_lab_2_full_12.png', 'resources/syringe_lab_3_empty_1.png', 'resources/syringe_lab_3_empty_2.png', 'resources/syringe_lab_3_empty_3.png', 'resources/syringe_lab_3_empty_4.png', 'resources/syringe_lab_3_empty_5.png', 'resources/syringe_lab_3_empty_6.png', 'resources/syringe_lab_3_empty_7.png', 'resources/syringe_lab_3_empty_8.png', 'resources/syringe_lab_3_empty_9.png', 'resources/syringe_lab_3_empty_10.png', 'resources/syringe_lab_3_empty_11.png', 'resources/syringe_lab_3_empty_12.png', 'resources/syringe_lab_3_full_1.png', 'resources/syringe_lab_3_full_2.png', 'resources/syringe_lab_3_full_3.png', 'resources/syringe_lab_3_full_4.png', 'resources/syringe_lab_3_full_5.png', 'resources/syringe_lab_3_full_6.png', 'resources/syringe_lab_3_full_7.png', 'resources/syringe_lab_3_full_8.png', 'resources/syringe_lab_3_full_9.png', 'resources/syringe_lab_3_full_10.png', 'resources/syringe_lab_3_full_11.png', 'resources/syringe_lab_3_full_12.png', 'resources/syringe_lab_4_empty_1.png', 'resources/syringe_lab_4_empty_2.png', 'resources/syringe_lab_4_empty_3.png', 'resources/syringe_lab_4_empty_4.png', 'resources/syringe_lab_4_empty_5.png', 'resources/syringe_lab_4_empty_6.png', 'resources/syringe_lab_4_empty_7.png', 'resources/syringe_lab_4_empty_8.png', 'resources/syringe_lab_4_empty_9.png', 'resources/syringe_lab_4_empty_10.png', 'resources/syringe_lab_4_empty_11.png', 'resources/syringe_lab_4_empty_12.png', 'resources/syringe_lab_4_full_1.png', 'resources/syringe_lab_4_full_2.png', 'resources/syringe_lab_4_full_3.png', 'resources/syringe_lab_4_full_4.png', 'resources/syringe_lab_4_full_5.png', 'resources/syringe_lab_4_full_6.png', 'resources/syringe_lab_4_full_7.png', 'resources/syringe_lab_4_full_8.png', 'resources/syringe_lab_4_full_9.png', 'resources/syringe_lab_4_full_10.png', 'resources/syringe_lab_4_full_11.png', 'resources/syringe_lab_4_full_12.png', 'resources/syringe_lab_5_empty_1.png', 'resources/syringe_lab_5_empty_2.png', 'resources/syringe_lab_5_empty_3.png', 'resources/syringe_lab_5_empty_4.png', 'resources/syringe_lab_5_empty_5.png', 'resources/syringe_lab_5_empty_6.png', 'resources/syringe_lab_5_empty_7.png', 'resources/syringe_lab_5_empty_8.png', 'resources/syringe_lab_5_empty_9.png', 'resources/syringe_lab_5_empty_10.png', 'resources/syringe_lab_5_empty_11.png', 'resources/syringe_lab_5_empty_12.png', 'resources/syringe_lab_5_full_1.png', 'resources/syringe_lab_5_full_2.png', 'resources/syringe_lab_5_full_3.png', 'resources/syringe_lab_5_full_4.png', 'resources/syringe_lab_5_full_5.png', 'resources/syringe_lab_5_full_6.png', 'resources/syringe_lab_5_full_7.png', 'resources/syringe_lab_5_full_8.png', 'resources/syringe_lab_5_full_9.png', 'resources/syringe_lab_5_full_10.png', 'resources/syringe_lab_5_full_11.png', 'resources/syringe_lab_5_full_12.png', 'resources/wrong.png', 'resources/variable_sheets/general_setup_sheet.xlsx', 'resources/variable_sheets/lab1_syringes.xlsx', 'resources/variable_sheets/lab2_syringes.xlsx', 'resources/variable_sheets/lab3_syringes.xlsx', 'resources/variable_sheets/lab4_syringes.xlsx', 'resources/variable_sheets/lab5_syringes.xlsx', 'resources/variable_sheets/outputSheet.xlsx', 'resources/variable_sheets/pathogenSheet.xlsx', 'resources/variable_sheets/testSheet.xlsx', 'resources/Language_Images/germany_flag.png', 'resources/Language_Images/uk_flag.png', 'resources/Introduction_German/info_button_normal.png', 'resources/Introduction_German/Intro_Deutsch_1.png', 'resources/Introduction_German/Intro_Deutsch_2.png', 'resources/Introduction_German/Intro_Deutsch_3.png', 'resources/Introduction_German/Intro_Deutsch_4.png', 'resources/Introduction_German/Intro_Deutsch_5.png', 'resources/Introduction_German/Intro_Deutsch_6.png', 'resources/Introduction_German/Intro_Deutsch_7.png', 'resources/Introduction_German/Intro_Deutsch_8.png', 'resources/Introduction_German/Intro_Deutsch_9.png', 'resources/Introduction_German/Intro_Deutsch_10.png', 'resources/Introduction_English/info_button_normal.png', 'resources/Introduction_English/info_button_pressed.png', 'resources/Introduction_English/Intro_English_1.png', 'resources/Introduction_English/Intro_English_2.png', 'resources/Introduction_English/Intro_English_3.png', 'resources/Introduction_English/Intro_English_4.jpg', 'resources/Introduction_English/Intro_English_5.jpg', 'resources/Introduction_English/Intro_English_6.jpg', 'resources/Introduction_English/Intro_English_7.jpg', 'resources/Introduction_English/Intro_English_8.png', 'resources/Introduction_English/Intro_English_9.png', 'resources/Introduction_English/Intro_English_10.png', 'resources/Introduction_English/TitleScreen.png', 'resources/Gallerie/Score_0.png', 'resources/Gallerie/Score_1.png', 'resources/Gallerie/Score_2.png', 'resources/Gallerie/Score_3.png', 'resources/Gallerie/Score_4.png', 'resources/Gallerie/Score_5.png', 'resources/Gallerie/Score_6.png', 'resources/Gallerie/Score_7.png', 'resources/Gallerie/Score_8.png', 'resources/Gallerie/Score_9.png', 'resources/Gallerie/Score_10.png', 'resources/Gallerie/Score_11.png', 'resources/Gallerie/Score_12.png', 'resources/Gallerie/Score_13.png', 'resources/Gallerie/Score_14.png', 'resources/Gallerie/Score_15.png', 'resources/Gallerie/Score_16.png', 'resources/Gallerie/Score_17.png', 'resources/Gallerie/Score_18.png', 'resources/Gallerie/Score_19.png', 'resources/Gallerie/Score_20.png', 'resources/Gallerie/Score_21.png', 'resources/Gallerie/Score_22.png', 'resources/Gallerie/Score_23.png', 'resources/Gallerie/Score_24.png', 'resources/Gallerie/Score_25.png', 'resources/Gallerie/Score_26.png', 'resources/Gallerie/Score_27.png', 'resources/Gallerie/Score_28.png', 'resources/Gallerie/Score_29.png', 'resources/Gallerie/Score_30.png']
  Screen = 1
  Units = height
  Use version = 2022.2.3
  Window size (pixels) = [2200, 1400]
  color = $[-.9, -.9, -.9]
  colorSpace = dkl
  expName = Influenca_Standalone
  keyboardBackend = ioHub
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Routines
  Routine initializing
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    CodeComponent setupCode
      Code Type = JS
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      Before JS Experiment:
        // Declaration of all global variables
        // ----------------------------------------------------------------------------------------------------------

        var introductionText, flagCircleSizeLeft, flagCircleSizeRight, mobile_device, used_device;
        var score_n, round_n, level_n, nTrials, sceneSetupSheet;
        var scenes_list, notepadImage_list, scoreboardImage_list, syringeTypeSheet_list;
        var currentNotepadImage, currentScoreboardImage, currentSyringeTypeSheetPath;
        var emptySyringes_list, fullSyringes_list, syringeColor_list;
        var pathogen_list, rewardImageSize;
        var nSyringes, leftSyringeIndex, rightSyringeIndex, count, leftFullSyringeImage, rightFullSyringeImage, leftEmptySyringeImage, rightEmptySyringeImage, leftSyringeColor, rightSyringeColor;
        var currentTrial;
        var leftSyringe_clicked, rightSyringe_clicked;
        var correctChoicesList;
        var rewardBgColor, correctCure, leftCuredInt, rightCuredInt, leftCuredNum, rightCuredNum;
        var leftFeedbackImage, rightFeedbackImage, correctColor, currentCorrectCure;
        var previousCorrectCure, trialText, leftProbability, rightProbability, scoreBoardText;
        var correctlyDone, choice_name;
        var allProbabilities, antiProbabilities;
        var randomSceneFactor, scene_n, backgroundPath;
        var window_height, window_width, xrange, yrange, size_xy;
        var notepad_xy_ratio, scoreboard_yx_ratio;
        var existing_participants, session_n;
        var goodRun, totalCount, step, count, differences,totalDifferences, meanDifferences;
        var alreadyPlayed, neverPlayed, cond_key, cond_touch;
        var languageChoice;
        var score_text, round_text1, round_text2, level_text, gallery_text, continueText, playText, endingStatement, beginningStatement;
        var intro1, intro2, intro3, intro4, intro5, intro6, intro7, intro8, intro9, intro10;
        var galleryText, galleriePath,endGameText;
        var scoreboardAdjustingSizeX, scoreboardAdjustingSizeY, scoreboardAdjustingX, scoreboardAdjustingY, notepadAdjustingX;
        var coinCircleSize, circleColor, score_endText;
        var currentDate, currentDay, currentTime, timesPlayed, lastDayPlayed, lastTimePlayed, canPlay, cantPlay, cantPlayReason, cantPlayReasonText;
        var session_number, minutes_formatFixed, timeToWait, experimenter_mode, trialsSheet, session_data;

        //Assigning values to all time-restriction variables for the first playthrough
        // ----------------------------------------------------------------------------------------------------------

        lastDayPlayed = [0, 0, 0];
        lastTimePlayed = "never before played";
        timesPlayed = 0;
        canPlay = 1;
        cantPlay = 0;
        cantPlayReason = "none";

        //Which device (mobile vs. desktop) is currently being used?
        // ----------------------------------------------------------------------------------------------------------

        if(/(android|bb\d+|meego).+mobile|avantgo|bada\/|blackberry|blazer|compal|elaine|fennec|hiptop|iemobile|ip(hone|od)|ipad|iris|kindle|Android|Silk|lge |maemo|midp|mmp|netfront|opera m(ob|in)i|palm( os)?|phone|p(ixi|re)\/|plucker|pocket|psp|series(4|6)0|symbian|treo|up\.(browser|link)|vodafone|wap|windows (ce|phone)|xda|xiino/i.test(navigator.userAgent)
            || /1207|6310|6590|3gso|4thp|50[1-6]i|770s|802s|a wa|abac|ac(er|oo|s\-)|ai(ko|rn)|al(av|ca|co)|amoi|an(ex|ny|yw)|aptu|ar(ch|go)|as(te|us)|attw|au(di|\-m|r |s )|avan|be(ck|ll|nq)|bi(lb|rd)|bl(ac|az)|br(e|v)w|bumb|bw\-(n|u)|c55\/|capi|ccwa|cdm\-|cell|chtm|cldc|cmd\-|co(mp|nd)|craw|da(it|ll|ng)|dbte|dc\-s|devi|dica|dmob|do(c|p)o|ds(12|\-d)|el(49|ai)|em(l2|ul)|er(ic|k0)|esl8|ez([4-7]0|os|wa|ze)|fetc|fly(\-|_)|g1 u|g560|gene|gf\-5|g\-mo|go(\.w|od)|gr(ad|un)|haie|hcit|hd\-(m|p|t)|hei\-|hi(pt|ta)|hp( i|ip)|hs\-c|ht(c(\-| |_|a|g|p|s|t)|tp)|hu(aw|tc)|i\-(20|go|ma)|i230|iac( |\-|\/)|ibro|idea|ig01|ikom|im1k|inno|ipaq|iris|ja(t|v)a|jbro|jemu|jigs|kddi|keji|kgt( |\/)|klon|kpt |kwc\-|kyo(c|k)|le(no|xi)|lg( g|\/(k|l|u)|50|54|\-[a-w])|libw|lynx|m1\-w|m3ga|m50\/|ma(te|ui|xo)|mc(01|21|ca)|m\-cr|me(rc|ri)|mi(o8|oa|ts)|mmef|mo(01|02|bi|de|do|t(\-| |o|v)|zz)|mt(50|p1|v )|mwbp|mywa|n10[0-2]|n20[2-3]|n30(0|2)|n50(0|2|5)|n7(0(0|1)|10)|ne((c|m)\-|on|tf|wf|wg|wt)|nok(6|i)|nzph|o2im|op(ti|wv)|oran|owg1|p800|pan(a|d|t)|pdxg|pg(13|\-([1-8]|c))|phil|pire|pl(ay|uc)|pn\-2|po(ck|rt|se)|prox|psio|pt\-g|qa\-a|qc(07|12|21|32|60|\-[2-7]|i\-)|qtek|r380|r600|raks|rim9|ro(ve|zo)|s55\/|sa(ge|ma|mm|ms|ny|va)|sc(01|h\-|oo|p\-)|sdk\/|se(c(\-|0|1)|47|mc|nd|ri)|sgh\-|shar|sie(\-|m)|sk\-0|sl(45|id)|sm(al|ar|b3|it|t5)|so(ft|ny)|sp(01|h\-|v\-|v )|sy(01|mb)|t2(18|50)|t6(00|10|18)|ta(gt|lk)|tcl\-|tdg\-|tel(i|m)|tim\-|t\-mo|to(pl|sh)|ts(70|m\-|m3|m5)|tx\-9|up(\.b|g1|si)|utst|v400|v750|veri|vi(rg|te)|vk(40|5[0-3]|\-v)|vm40|voda|vulc|vx(52|53|60|61|70|80|81|83|85|98)|w3c(\-| )|webc|whit|wi(g |nc|nw)|wmlb|wonu|x700|yas\-|your|zeto|zte\-/i.test(navigator.userAgent.substr(0,4))) {
            mobile_device = true;
            used_device = "mobile"
        }else{
            mobile_device = false;
            used_device = "desktop"
            }

        //use keys for desktop and touch for mobile device
        cond_key = !mobile_device;
        cond_touch = mobile_device;


        //Function for the random selection of an item from an item list using probabilities from a weights list
        //input: items (list), weights (list)
        //output: randomly selected item
        // ----------------------------------------------------------------------------------------------------------

        function weighted_random(items, weights) {
            var i;
            for (i = 1; i < weights.length; i++)
                weights[i] += weights[i - 1];
            var random = Math.random() * weights[weights.length - 1];
            for (i = 0; i < weights.length; i++)
                if (weights[i] > random)
                    break;
            return items[i];
        }

        //Function for using Box-Muller transform to generate a pair of normally distributed random numbers
        //output: pair of normally distributed random numbers
        // ----------------------------------------------------------------------------------------------------------

        function boxMullerTransform() {
            const u1 = Math.random();
            const u2 = Math.random();
            const z0 = Math.sqrt(-2.0 * Math.log(u1)) * Math.cos(2.0 * Math.PI * u2);
            const z1 = Math.sqrt(-2.0 * Math.log(u1)) * Math.sin(2.0 * Math.PI * u2);
            return { z0, z1 };
        }

        //Function to generate a normally distributed random number from mean and std using Box-Muller transform
        //input: mean and standarddeviation
        //output: normally distributed random number
        // ----------------------------------------------------------------------------------------------------------

        function getNormallyDistributedRandomNumber(mean, stddev) {
            const { z0, _ } = boxMullerTransform();
            return z0 * stddev + mean;
        }
      Begin JS Experiment:
        //Accessing participant information from Pavlovia shelf
        // ----------------------------------------------------------------------------------------------------------

        //get a list of all currently existing participants in the Pavlovia shelf
        //designer shelf using the key: "Influenca_session_tracker"
        existing_participants = await psychoJS.shelf.getDictionaryFieldNames({key: ["Influenca_session_tracker", "@designer"], defaultValue:[]});


        //participant is playing for the first time --> start at level 1, score = 0, show instructions
        if(!existing_participants.includes(expInfo['participant'])){

            //show instructions and skip the alternative introduction screen
            neverPlayed = 1;
            alreadyPlayed = 0;

            session_n = 1;
            score_n = 0;

            }else{ //participant has already played before, load saved data, skip instructions

                alreadyPlayed = 1;
                neverPlayed = 0;

                //access players' data from shelf and store in global variables
                session_data = await psychoJS.shelf.getDictionaryFieldValue({key: ["Influenca_session_tracker", "@designer"], fieldName: expInfo['participant'], defaultValue:'no sessions detected'})

                session_n = session_data[0] + 1; //raise session_n by 1 to start new level
                score_n = session_data[1];
                languageChoice = session_data[2];
                lastDayPlayed = session_data[3];
                lastTimePlayed = session_data[4];
                timesPlayed = session_data[5];
            }

        round_n = 1; //always start with round 1



        //Reset all participant data at session 5 --> start over from the beginning
        // ----------------------------------------------------------------------------------------------------------
        session_number = expInfo['session number'];

        if (session_number == 5){
            alreadyPlayed = 0;
            neverPlayed = 1;
            session_n = 1;
            score_n = 0;
            }


        //Assigning different sizes for all assets based on the current session and used device
        // ----------------------------------------------------------------------------------------------------------

        //force full screen on mobile devices
        if (mobile_device === true){
            psychoJS.window.fullscr = true;
            psychoJS.window.adjustScreenSize();
            }

        //declare standard sizes for all assets
        scoreboardAdjustingSizeX = 1;
        scoreboardAdjustingSizeY = 1;
        scoreboardAdjustingX = 0;
        scoreboardAdjustingY = 0;
        notepadAdjustingX = 0;

        //choose which level to play based on the current session_n, and adjust all asset sizes
        //each level consists of 6 distinct scenes

        if (session_n <= 6){
            level_n = 1;
            notepad_xy_ratio = 400/438;
            scoreboardAdjustingSizeY = 0.8;
            scoreboardAdjustingSizeX = 0.9;
            scoreboardAdjustingX = 0.008;
            scoreboardAdjustingY = 0;
        }
        if (session_n > 6 && session_n <= 12){
            level_n = 2;
            notepad_xy_ratio = 400/533;
            notepadAdjustingX = -0.01;
            scoreboardAdjustingSizeY = 0.8;
            scoreboardAdjustingSizeX = 0.9;
            scoreboardAdjustingX = 0.008;
        }
        if (session_n > 12 && session_n <= 18){
            level_n = 3;
            notepad_xy_ratio = 400/595;
            notepadAdjustingX = -0.01;
            scoreboardAdjustingSizeY = 0.85;
            scoreboardAdjustingSizeX = 0.95;
            scoreboardAdjustingX = 0.007;
        }
        if (session_n > 18 && session_n <= 24){
            level_n = 4;
            notepad_xy_ratio = 400/580;
            notepadAdjustingX = -0.007;
            scoreboardAdjustingSizeX = 0.9;
            scoreboardAdjustingX = 0.008;
        }
        if (session_n > 24){
            level_n = 5;
            notepad_xy_ratio = 400/581;
            notepadAdjustingX = -0.01;
            scoreboardAdjustingSizeY = 0.8;
            scoreboardAdjustingSizeX = 0.9;
            scoreboardAdjustingX = 0.008;
        }

        //Calculation of probabilities for the session
        // ----------------------------------------------------------------------------------------------------------

        nTrials = 150; //number of trials for each session

        //declare all-zero arrays for probabilities, antiprobabilities, and probability differences
        allProbabilities = new Array(nTrials).fill(0);
        antiProbabilities = new Array(nTrials).fill(0);
        differences = new Array(nTrials).fill(0);

        goodRun = false; //boolean to decide whether or not probabilities were created successfully
        totalCount = 0; //tracker to not get stuck in while loop
        var i;
        var d;

        while (((goodRun === false) && (totalCount < 100))) { //try until probabilities are satisfactory
            totalDifferences = 0; //reset total differences to zero for each new calculation
            for (i = 0; i < nTrials; i++) { //for all trials

                if(i === 0){ //initial probabilities
                    allProbabilities[i] = weighted_random([0.2, 0.8], [0.5, 0.5]); //set randomly to 0.2 or 0.8

                }else{
                    step = getNormallyDistributedRandomNumber(0, 1) * 0.1; //generate a step from a normally distributed random number, multiplied by 0.1 to decrease step size

                    count = 0; //tracker to avoid getting stuck in while loop

                    //recalculate step size if probabilities would get out of bounds
                    while (allProbabilities[i-1] + step - 0.03 * (allProbabilities[i-1] - 0.5) < 0 || allProbabilities[i-1] + step - 0.03 * (allProbabilities[i-1] - 0.5) > 1 && count < 100){
                        step = getNormallyDistributedRandomNumber(0, 1) * 0.1;
                        count = count + 1;
                    }

                //calculate and round probabilities
                allProbabilities[i] = Math.round((allProbabilities[i-1] + step - 0.03 * (allProbabilities[i-1] - 0.5))*100)/100;
                }
                //calculate and round anti probabilities (1 - probabilities)
                antiProbabilities[i] = Math.round((1 - allProbabilities[i])*100)/100;
                //calculate absolute differences between probabilities and anti probabilities
                differences[i] = Math.round((Math.abs(allProbabilities[i] - antiProbabilities[i]))*100)/100;
            }

            for(d = 0; d < nTrials; d++){ //for all trials
                totalDifferences = totalDifferences + differences[d]; //calculate the sum of all differences
            }

            meanDifferences = totalDifferences/nTrials //calculate mean of all differences

            if (meanDifferences >= 0.44 && meanDifferences <= 0.46){ //if mean of differences lies within 0.44 and 0.46
                goodRun = true; //probabilities are satisfactory --> will be accepted, otherwise: redo entire calculation
            }

            totalCount = totalCount + 1;
        }


        //Get the current date and time
        // ----------------------------------------------------------------------------------------------------------

        currentDate = new Date();
        currentDay = [parseInt(String(currentDate.getDate()).padStart(2, '0')), currentDate.getMonth()+1, currentDate.getFullYear()];
        currentTime = [currentDate.getHours(), currentDate.getMinutes()];

        //save level and score in shelf
        //psychoJS.shelf.setDictionaryFieldValue({key: ["Influenca_session_tracker", "@designer"], fieldName: expInfo['participant'], fieldValue: [session_n, score_n, languageChoice, currentDay, currentTime, timesPlayed]});


        experimenter_mode = expInfo['experimenter mode'];

        if(experimenter_mode == 1){
            timeToWait = 0.1;
            }
        else if (experimenter_mode == 0){
            timeToWait = 1;
            }



        if (timesPlayed >= 2 && lastDayPlayed[0] == currentDay[0] && lastDayPlayed[1] == currentDay[1] && lastDayPlayed[2] == currentDay[2]){ //if they have already played three times today
            canPlay = 0; //they cannot play again
            cantPlay = 1;
            cantPlayReason = "day";
            }

        else if(timesPlayed >= 2 && lastDayPlayed[0] != currentDay[0]){ //if they played more than twice but on another day, they can play again today
            timesPlayed = 0; //reset number of times played
            canPlay = 1;
            cantPlay = 0;
            }

        if (canPlay != 0){ //if they haven't played three times yet, check if they've played at all today
            if (lastDayPlayed[0] == currentDay[0] && lastDayPlayed[1] == currentDay[1] && lastDayPlayed[2] == currentDay[2]){
                timesPlayed = timesPlayed + 1; //increase times played today

                //check time difference between current time and last time played
                var timeDifference = (currentTime[0] + currentTime[1]/60) - (lastTimePlayed[0] + lastTimePlayed[1]/60);

                if (timeDifference < timeToWait){ //has it been long enough?
                    canPlay = 0;
                    cantPlay = 1;
                    cantPlayReason = "time";
                    }
                }
            }
  Routine generalLoaderLoop
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    CodeComponent generalLoaderLoopScript
      Code Type = JS
      Begin JS Experiment:
        //declare empty lists for all relevant images and the variable sheets for the scene setup
        scenes_list = [];
        notepadImage_list = [];
        scoreboardImage_list = [];
        syringeTypeSheet_list = [];
      Begin JS Routine:
        //fill lists with all images/excel sheets
        scenes_list.push(scenes);
        notepadImage_list.push(notepads);
        scoreboardImage_list.push(scoreboards);
        syringeTypeSheet_list.push(syringeTypeSheet);
  Routine generalLoader
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    CodeComponent generalLoaderScript
      Code Type = JS
      Begin JS Routine:
        //choose current images/sheets for scene setup based on your current level
        currentNotepadImage = notepadImage_list[(level_n - 1)].toString();
        currentScoreboardImage = scoreboardImage_list[(level_n - 1)].toString();
        currentSyringeTypeSheetPath = syringeTypeSheet_list[(level_n - 1)].toString();
  Routine syringeLoaderLoop
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    CodeComponent syringeLoaderLoopScript
      Code Type = JS
      Begin JS Experiment:
        //declare empty lists for syringe images
        emptySyringes_list = [];
        fullSyringes_list = [];
        syringeColor_list = [];
      Begin JS Routine:
        //fill lists with images for empty/full syringes, and the matched syringe colors
        emptySyringes_list.push(syringeEmpty);
        fullSyringes_list.push(syringeFull);
        syringeColor_list.push(syringeColor);
  Routine syringeLoader
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    CodeComponent syringeLoaderScript
      Code Type = JS
      Begin JS Routine:
        //get number of syringes for your current level
        nSyringes = emptySyringes_list.length;

        //randomly choose left and right syringe
        leftSyringeIndex = Number.parseInt(Math.random() * (nSyringes - 0) + 0);
        rightSyringeIndex = Number.parseInt(Math.random() * (nSyringes - 0) + 0);
        count = 0; //tracker to avoid getting stuck in while loop
        //when left and right syringe are the same
        while (((leftSyringeIndex === rightSyringeIndex) && (count <= 100))) {
            rightSyringeIndex = Number.parseInt(Math.random() * (nSyringes - 0) + 0); //choose a new syringe for the right side
            count = (count + 1);
        }

        //set all image paths
        leftFullSyringeImage = fullSyringes_list[leftSyringeIndex].toString();
        rightFullSyringeImage = fullSyringes_list[rightSyringeIndex].toString();
        leftEmptySyringeImage = emptySyringes_list[leftSyringeIndex].toString();
        rightEmptySyringeImage = emptySyringes_list[rightSyringeIndex].toString();
        leftSyringeColor = syringeColor_list[leftSyringeIndex].toString();
        rightSyringeColor = syringeColor_list[rightSyringeIndex].toString();
  Routine Introduction
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    ImageComponent titleScreen
      color = 0.0000, 0.0000, 0.0000
      image = resources/Introduction_English/TitleScreen.png
      saveStartStop = False
      size = (1.88, 0.94)
      startVal [time (s)] = 0.0
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    ImageComponent playButton
      image = resources/Introduction_English/info_button_normal.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.36, 0.12)
      startVal [time (s)] = 0.0
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    TextboxComponent playTextBlock
      autoLog = False
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      pos = (0.02, -0.4)
      saveStartStop = False
      size = (0.3, 0.06*yrange)
      startVal [time (s)] = 0.0
      text [set every repeat] = $playText
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    MouseComponent playClick
      clickable = playButton
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine SetupTheScene
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    CodeComponent LabSceneSetupCode
      Code Type = JS
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      Begin JS Routine:
        //set background image path for the current session
        backgroundPath = ("resources/lab_background_" + session_n + ".png").toString();
      End JS Routine:
        //automatically renew scene images at the start of each routine
        backgroundImage.setAutoDraw(true);
        leftNotepad.setAutoDraw(true);
        rightNotepad.setAutoDraw(true);
        scoreboardImage.setAutoDraw(true);
    ImageComponent backgroundImage
      color = 0.0000, 0.0000, 0.0000
      image [set every repeat] = $backgroundPath
      saveStartStop = False
      size = (1.92, 0.96)
      startVal [time (s)] = 0
      stopVal [time (s)] = 0
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    ImageComponent leftNotepad
      color = 0.0000, 0.0000, 0.0000
      image [set every repeat] = $currentNotepadImage
      pos [set every repeat] = (-.4-notepadAdjustingX, 0)
      saveStartStop = False
      size [set every repeat] = (0.35*notepad_xy_ratio, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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    ImageComponent rightNotepad
      color = 0.0000, 0.0000, 0.0000
      image [set every repeat] = $currentNotepadImage
      pos [set every repeat] = (0.4-notepadAdjustingX*2, 0)
      saveStartStop = False
      size [set every repeat] = (0.35*notepad_xy_ratio, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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    ImageComponent scoreboardImage
      anchor = top-left
      color = 0.0000, 0.0000, 0.0000
      image [set every repeat] = $currentScoreboardImage
      pos = (-0.711-scoreboardAdjustingX, 0.335+scoreboardAdjustingY)
      saveStartStop = False
      size = (0.5*scoreboardAdjustingSizeX, 0.3*scoreboardAdjustingSizeY)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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  Routine trialFeedback
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    CodeComponent fullOrEmptySyringe
      Code Type = JS
      Begin JS Routine:
        // Get reaction "left" or "right"
        if(mobile_device){
            if ((syringeChoice.clicked_name.slice((- 1))[0] === "leftSyringe")) {
                choice_name = "left";
            } else if (syringeChoice.clicked_name.slice((- 1))[0] === "rightSyringe") {
                choice_name = "right";
            }
        } else {
            choice_name = keyChoice.keys;
        }

        if (choice_name === "left") {
            leftSyringe_clicked = leftEmptySyringeImage;
            rightSyringe_clicked = rightFullSyringeImage;
        } else if (choice_name === "right") {
            leftSyringe_clicked = leftFullSyringeImage;
            rightSyringe_clicked = rightEmptySyringeImage;
        }

        console.log(choice_name);

        //if ((syringeChoice.clicked_name.slice((- 1))[0] === "leftSyringe")) { //if player chose the correct syringe
        //    leftSyringe_clicked = leftEmptySyringeImage;
        //    rightSyringe_clicked = rightFullSyringeImage;
        //} else if (syringeChoice.clicked_name.slice((- 1))[0] === "rightSyringe") {
        //    leftSyringe_clicked = leftFullSyringeImage;
        //    rightSyringe_clicked = rightEmptySyringeImage;
        //}
    PolygonComponent rewardBackgroundCircle_2
      fillColor [set every repeat] = $rewardBgColor
      lineColor = black
      lineWidth = 5
      saveStartStop = False
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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    ImageComponent leftSyringe_2
      image [set every repeat] = $leftSyringe_clicked
      pos = (-0.4, -0.2)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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    ImageComponent rightSyringe_2
      image [set every repeat] = $rightSyringe_clicked
      pos = (0.4, -0.2)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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    TextboxComponent leftNoteText_2
      autoLog = False
      bold = False
      color = black
      editable = False
      letterHeight = 0.07
      pos = (-0.386, 0.05)
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text [set every repeat] = $leftCuredNum
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    TextboxComponent rightNoteText_2
      autoLog = False
      bold = False
      color = black
      editable = False
      letterHeight = 0.07
      pos = (0.42, 0.05)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text [set every repeat] = $rightCuredNum
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    TextboxComponent scoreBoardTextbox_2
      alignment = top-left
      anchor = top-left
      autoLog = False
      bold = False
      color = black
      editable = False
      letterHeight = 0.042
      lineSpacing = 1
      pos = (-0.88, 0.405)
      saveStartStop = False
      size = (0.5, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text [set every repeat] = $scoreBoardText
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    ImageComponent leftLabFeedback_2
      image [set every repeat] = $leftFeedbackImage
      pos = (-0.386, -.03)
      saveStartStop = False
      size = (0.09, 0.09)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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    ImageComponent rightLabFeedback_2
      image [set every repeat] = $rightFeedbackImage
      pos = (0.42, -.03)
      saveStartStop = False
      size = (0.09, 0.09)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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    CodeComponent getFeedback
      Code Type = JS
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      End JS Routine:
        if ((choice_name == correctCure)) { //if player chose the correct syringe
            correctlyDone = 1; //set to 1
            rewardImageSize = (0.1, 0.13);
            coinCircleSize = 0.129;
            circleColor = "white";
        } else {
            correctlyDone = 0; //or 0 if wrong
            rewardImageSize = (0, 0);
            coinCircleSize = 0;
            circleColor = rewardBgColor;
        }

        console.log(correctCure);
        console.log(correctlyDone);

        //automatically redraw all scene images
        //leftNotepad.setAutoDraw(false);
        //rightNotepad.setAutoDraw(false);
        leftLabFeedback_2.setAutoDraw(true);
        rightLabFeedback_2.setAutoDraw(true);
  Routine trialSetup
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    CodeComponent TrialSetupCode
      Code Type = JS
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      Begin JS Experiment:
        //declare empty list for all correct choices
        correctChoicesList = [];
        currentTrial = 0; //start with first trial = 0
      Begin JS Routine:
        if ((currentTrial === 0)) { //for the very first trial
            rewardBgColor = "white"; //background color in circle is white
        } else { //for all other trials
            if ((correctCure == "left")) { //if left syringe is correct
                rewardBgColor = leftSyringeColor; //set background color to color of left syringe
            }else{
                if ((correctCure == "right")) { //if right syringe is correct
                    rewardBgColor = rightSyringeColor; //set background color to color of right syringe
                }
            }
        }
        //choose random numbers for how many people would be cured on either side
        leftCuredInt = Number.parseInt(Math.random() * (99 - 1) + 1); //min 1, max 99
        rightCuredInt = Number.parseInt((100 - leftCuredInt)); //set right side based on left side, together = 100
        //generate strings to display the numbers on the notepads
        leftCuredNum = leftCuredInt.toString();
        rightCuredNum = (100 - leftCuredInt).toString();

        //choose the correct cure based on the calculated probabilities
        correctCure = weighted_random(["left", "right"], [allProbabilities[currentTrial], antiProbabilities[currentTrial]]);
        if ((correctCure === "left")) { //if the left syringe is correct
            //set feedback images accordingly
            leftFeedbackImage = "resources/correct.png";
            rightFeedbackImage = "resources/wrong.png";
        } else { //vice versa
            leftFeedbackImage = "resources/wrong.png";
            rightFeedbackImage = "resources/correct.png";
            correctColor = rightSyringeColor;
        }
        correctChoicesList.push(correctCure); //add the current correct choice
        currentCorrectCure = correctChoicesList[currentTrial];
        if ((currentTrial !== 0)) { //for all trials except the first one
            previousCorrectCure = correctChoicesList[(currentTrial - 1)]; //take previous correct cure from list
        }

        leftProbability = util.round(allProbabilities[currentTrial], 2);
        rightProbability = util.round(antiProbabilities[currentTrial], 2);

        currentTrial = (currentTrial + 1); //increase trial number for next trial
        //set scoreboard text based on level, round, and score
        scoreBoardText = (score_text + score_n.toString() + "\n" + round_text1 + round_n.toString() + round_text2 + "\n" + level_text + session_n.toString()).toString();
      End JS Routine:
        //automatically renew background circle and reward images
        rewardBackgroundCircle.setAutoDraw(true);
    PolygonComponent rewardBackgroundCircle
      fillColor [set every repeat] = $rewardBgColor
      lineColor = black
      lineWidth = 5
      saveStartStop = False
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent leftSyringe
      image [set every repeat] = $leftFullSyringeImage
      pos = (-0.4, -0.2)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent rightSyringe
      image [set every repeat] = $rightFullSyringeImage
      pos = (0.4, -0.2)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextboxComponent leftNoteText
      autoLog = False
      bold = False
      color = black
      editable = False
      letterHeight = 0.07
      pos = (-0.386, 0.05)
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $leftCuredNum
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    TextboxComponent rightNoteText
      autoLog = False
      bold = False
      color = black
      editable = False
      letterHeight = 0.07
      pos = (0.42, 0.05)
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rightCuredNum
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    TextboxComponent scoreBoardTextbox
      alignment = top-left
      anchor = top-left
      autoLog = False
      bold = False
      color = black
      editable = False
      letterHeight = 0.042
      lineSpacing = 1
      pos = (-0.88, 0.405)
      saveStartStop = False
      size = (0.5, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $scoreBoardText
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    MouseComponent syringeChoice
      clickable = leftSyringe, rightSyringe
      correctAns = correctCure,
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [condition] = cond_touch
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    KeyboardComponent keyChoice
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [condition] = cond_key
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  Routine trialOutput
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    CodeComponent feedbackColors_saveData
      Code Type = JS
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      Begin JS Routine:
        if ((correctCure === "left")) { //if left syringe was correct
            if ((correctlyDone === 1)) { //and player chose correctly
                leftFeedbackColor = "green"; //set text color of chosen side to green
                rightFeedbackColor = "black"; //right remains black
                score_n = Number.parseInt((score_n + leftCuredInt)); //add number of cured people to score
            } else { //if play chose wrong syringe
                leftFeedbackColor = "black";
                rightFeedbackColor = "red"; //set text color of chosen side to red
                score_n = Number.parseInt((score_n - rightCuredInt)); //substract number of people from score
            }
        } else { //vice verso for the right side
            if ((correctlyDone === 1)) {
                leftFeedbackColor = "black";
                rightFeedbackColor = "green";
                score_n = Number.parseInt((score_n + rightCuredInt));
            } else {
                leftFeedbackColor = "red";
                rightFeedbackColor = "black";
                score_n = Number.parseInt((score_n - leftCuredInt));
            }
        }

        scoreBoardText = score_text + score_n.toString() + "\n" + round_text1 + round_n.toString() + round_text2 + "\n" + level_text + session_n.toString();

        round_n = (round_n + 1); //increase round number for the next round

        //automatically draw notepad images
        //leftNotepad.setAutoDraw(true);
        //rightNotepad.setAutoDraw(true);
        leftSyringe_2.setAutoDraw(true);
        rightSyringe_2.setAutoDraw(true);
        //rewardBackgroundCircle.setAutoDraw(true);
    ImageComponent leftNotepad_2
      color = 0.0000, 0.0000, 0.0000
      image [set every repeat] = $currentNotepadImage
      pos [set every repeat] = (-.4-notepadAdjustingX, 0)
      saveStartStop = False
      size [set every repeat] = (0.35*notepad_xy_ratio, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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    ImageComponent rightNotepad_2
      color = 0.0000, 0.0000, 0.0000
      image [set every repeat] = $currentNotepadImage
      pos [set every repeat] = (0.4-notepadAdjustingX*2, 0)
      saveStartStop = False
      size [set every repeat] = (0.35*notepad_xy_ratio, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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    ImageComponent leftSyringe_3
      image [set every repeat] = $leftSyringe_clicked
      pos = (-0.4, -0.2)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent rightSyringe_3
      image [set every repeat] = $rightSyringe_clicked
      pos = (0.4, -0.2)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent coinCircle
      fillColor [set every repeat] = $circleColor
      lineColor [set every repeat] = $circleColor
      saveStartStop = False
      shape = circle
      size [set every repeat] = (coinCircleSize, 0.14)
      startVal [time (s)] = 0.0
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    ImageComponent rewardImage
      image = resources/coin.png
      pos = (-0.0035, 0)
      saveStartStop = False
      size [set every repeat] = rewardImageSize
      startVal [time (s)] = 0.0
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    TextboxComponent leftNoteText_1
      autoLog = False
      bold = False
      color [set every repeat] = $leftFeedbackColor
      editable = False
      letterHeight = 0.07
      pos = (-0.386, 0.05)
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $leftCuredNum
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    TextboxComponent rightNoteText_1
      autoLog = False
      bold = False
      color [set every repeat] = $rightFeedbackColor
      editable = False
      letterHeight = 0.07
      pos = (0.42, 0.05)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rightCuredNum
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    ImageComponent continueButtonBackground
      image = resources/Introduction_English/info_button_normal.png
      pos = (0, -0.35)
      saveStartStop = False
      size = (0.36, 0.12)
      startVal [time (s)] = 0.4
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    TextboxComponent continueButtonText
      autoLog = False
      bold = False
      color = black
      editable = False
      letterHeight = 0.03
      pos = (0.02, -0.35)
      saveStartStop = False
      size = (0.35, 0.1)
      startVal [time (s)] = 0.4
      text [set every repeat] = $continueText
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    TextboxComponent scoreBoardTextbox_3
      alignment = top-left
      anchor = top-left
      autoLog = False
      bold = False
      color = black
      editable = False
      letterHeight = 0.042
      lineSpacing = 1
      pos = (-0.88, 0.405)
      saveStartStop = False
      size = (0.5, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $scoreBoardText
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    MouseComponent continueClick
      clickable = continueButtonBackground
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine deleteTheScene
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    ImageComponent gallery
      image [set every repeat] = $galleryPath
      saveStartStop = False
      size = (1.88, 0.94)
      startVal [time (s)] = 0.0
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    TextboxComponent galleryTextBox
      autoLog = False
      bold = False
      editable = False
      letterHeight = 0.04
      pos = (0, .4)
      saveStartStop = False
      size = (.6, .3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $galleryText
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    ImageComponent endGameButton
      image = resources/Introduction_English/info_button_normal.png
      pos = (0.6, -0.3)
      saveStartStop = False
      size = (0.36, 0.12)
      startVal [time (s)] = 0.0
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    TextboxComponent endGameTextBox
      autoLog = False
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      pos = (0.62, -0.3)
      saveStartStop = False
      size = (0.3, 0.07*yrange)
      startVal [time (s)] = 0.0
      text [set every repeat] = $endGameText
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    MouseComponent lastClickofGame
      clickable = endGameButton
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Rules1
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    ImageComponent introductionScreen
      color = 0.0000, 0.0000, 0.0000
      image [set every repeat] = $intro1
      saveStartStop = False
      size = (1.88, 0.94)
      startVal [time (s)] = 0.0
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    ImageComponent continueButton1
      image = resources/Introduction_English/info_button_normal.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.36, 0.12)
      startVal [time (s)] = 0.0
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    TextboxComponent continueTextBlock
      autoLog = False
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      pos = (0.02, -0.4)
      saveStartStop = False
      size = (0.3, 0.06*yrange)
      startVal [time (s)] = 0.0
      text [set every repeat] = $continueText
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    MouseComponent continueClick_1
      clickable = continueButton1
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Rules2
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    ImageComponent introductionScreen_2
      color = 0.0000, 0.0000, 0.0000
      image [set every repeat] = $intro2
      saveStartStop = False
      size = (1.88, 0.94)
      startVal [time (s)] = 0.0
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    ImageComponent continueButton2
      image = resources/Introduction_English/info_button_normal.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.36, 0.12)
      startVal [time (s)] = 0.0
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    TextboxComponent continueTextBlock_2
      autoLog = False
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      pos = (0.02, -0.4)
      saveStartStop = False
      size = (0.3, 0.06*yrange)
      startVal [time (s)] = 0.0
      text [set every repeat] = $continueText
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    MouseComponent continueClick_2
      clickable = continueButton2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Rules3
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    ImageComponent introductionScreen_3
      color = 0.0000, 0.0000, 0.0000
      image [set every repeat] = $intro3
      saveStartStop = False
      size = (1.88, 0.94)
      startVal [time (s)] = 0.0
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    ImageComponent continueButton3
      image = resources/Introduction_English/info_button_normal.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.36, 0.12)
      startVal [time (s)] = 0.0
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    TextboxComponent continueTextBlock_3
      autoLog = False
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      pos = (0.02, -0.4)
      saveStartStop = False
      size = (0.3, 0.06*yrange)
      startVal [time (s)] = 0.0
      text [set every repeat] = $continueText
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    MouseComponent continueClick_3
      clickable = continueButton3
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Rules4
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    ImageComponent introductionScreen_4
      color = 0.0000, 0.0000, 0.0000
      image [set every repeat] = $intro4
      saveStartStop = False
      size = (1.88, 0.94)
      startVal [time (s)] = 0.0
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    ImageComponent continueButton4
      image = resources/Introduction_English/info_button_normal.png
      pos = (0.4, -0.4)
      saveStartStop = False
      size = (0.36, 0.12)
      startVal [time (s)] = 0.0
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    TextboxComponent continueTextBlock_4
      autoLog = False
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      pos = (0.42, -0.4)
      saveStartStop = False
      size = (0.3, 0.06*yrange)
      startVal [time (s)] = 0.0
      text [set every repeat] = $continueText
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    MouseComponent continueClick_4
      clickable = continueButton4
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Rules5
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    ImageComponent introductionScreen_5
      color = 0.0000, 0.0000, 0.0000
      image [set every repeat] = $intro5
      saveStartStop = False
      size = (1.88, 0.94)
      startVal [time (s)] = 0.0
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    ImageComponent continueButton5
      image = resources/Introduction_English/info_button_normal.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.36, 0.12)
      startVal [time (s)] = 0.0
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    TextboxComponent continueTextBlock_5
      autoLog = False
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      pos = (0.02, -0.4)
      saveStartStop = False
      size = (0.3, 0.06*yrange)
      startVal [time (s)] = 0.0
      text [set every repeat] = $continueText
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    MouseComponent continueClick_5
      clickable = continueButton5
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Rules6
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  Routine Rules7
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  Routine Rules8
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    ImageComponent introductionScreen_8
      color = 0.0000, 0.0000, 0.0000
      image [set every repeat] = $intro8
      saveStartStop = False
      size = (1.88, 0.94)
      startVal [time (s)] = 0.0
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    ImageComponent continueButton8
      image = resources/Introduction_English/info_button_normal.png
      pos = (.6, -0.4)
      saveStartStop = False
      size = (0.36, 0.12)
      startVal [time (s)] = 0.0
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    TextboxComponent continueTextBlock_8
      autoLog = False
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      pos = (0.62, -0.4)
      saveStartStop = False
      size = (0.3, 0.06*yrange)
      startVal [time (s)] = 0.0
      text [set every repeat] = $continueText
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    MouseComponent continueClick_8
      clickable = continueButton8
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Rules9
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  Routine Rules10
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    ImageComponent introductionScreen_10
      color = 0.0000, 0.0000, 0.0000
      image [set every repeat] = $intro10
      saveStartStop = False
      size = (1.88, 0.94)
      startVal [time (s)] = 0.0
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    ImageComponent continueButton10
      image = resources/Introduction_English/info_button_normal.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.36, 0.12)
      startVal [time (s)] = 0.0
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    TextboxComponent continueTextBlock_10
      autoLog = False
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      pos = (0.02, -0.4)
      saveStartStop = False
      size = (0.3, 0.06*yrange)
      startVal [time (s)] = 0.0
      text [set every repeat] = $playText
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    MouseComponent continueClick_10
      clickable = continueButton10
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine chooseLanguage
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    ImageComponent emptyBackground
      color = 0.0000, 0.0000, 0.0000
      image [set every repeat] = resources/alternative_screen2.png
      saveStartStop = False
      size = (2, 1)
      startVal [time (s)] = 0.0
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    ImageComponent germanFlag
      image = resources/Language_Images/germany_flag.png
      pos = (-.4, -.15)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent englishFlag
      image = resources/Language_Images/uk_flag.png
      pos = (.4, -.15)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent languageText
      color = black
      letterHeight = 0.07
      pos = (0, .15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Wähle eine Sprache aus -
        Choose a language
    MouseComponent languageChoiceClick
      clickable = germanFlag, englishFlag
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine clickedLanguage
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    CodeComponent languageChoiceScript
      Code Type = JS
      Begin JS Routine:
        if ((languageChoiceClick.clicked_name.slice((- 1))[0] === "germanFlag")) { //if player chose German
            languageChoice = "de"; //set to "de" = Deutsch
            circleCoordinates = (-.4, -.15);
        } else {
            languageChoice = "en"; //set to "en" = English
            circleCoordinates = (.4, -.15);
        }
      End JS Routine:
        session_data = await psychoJS.shelf.getDictionaryFieldValue({key: ["session_tracker"], fieldName: expInfo['participant'], defaultValue:'no sessions detected'})
        //update participants' data in shelf
        session_data = [session_n, score_n, languageChoice];
        psychoJS.shelf.setDictionaryFieldValue({key: ["session_tracker"], fieldName: expInfo['participant'], fieldValue: session_data});
  Routine textAssignment
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    CodeComponent translatingAllTexts
      Code Type = JS
      Begin JS Routine:
        if (lastTimePlayed[1] < 10){
            minutes_formatFixed = "0" + lastTimePlayed[1].toString();
            }
        else{
            minutes_formatFixed = lastTimePlayed[1].toString();
            }

        if (languageChoice == "de"){
            intro1 = "resources/Introduction_German/Intro_Deutsch_1.png";
            intro2 = "resources/Introduction_German/Intro_Deutsch_2.png";
            intro3 = "resources/Introduction_German/Intro_Deutsch_3.png";
            intro4 = "resources/Introduction_German/Intro_Deutsch_4.png";
            intro5 = "resources/Introduction_German/Intro_Deutsch_5.png";
            intro6 = "resources/Introduction_German/Intro_Deutsch_6.png";
            intro7 = "resources/Introduction_German/Intro_Deutsch_7.png";
            intro8 = "resources/Introduction_German/Intro_Deutsch_8.png";
            intro9 = "resources/Introduction_German/Intro_Deutsch_9.png";
            intro10 = "resources/Introduction_German/Intro_Deutsch_10.png";

            continueText = "Weiter";
            playText = "Spielen";
            score_text = "Score: ";
            score_endText = "Gesamtscore: ";
            round_text1 = "Runde ";
            round_text2 = " von 150";
            level_text = "Level: ";
            endGameText = "Spiel beenden";
            endingStatement = "Das Level ist nun zu Ende.";
            beginningStatement = "Level " + session_n.toString();

            if (cantPlayReason == "time"){
                cantPlayReasonText = "Sie haben heute um " + lastTimePlayed[0].toString() + ":" + minutes_formatFixed.toString() + " Uhr bereits gespielt." + "\n" + "Sie dürfen eine Stunde nach Ihrem letzten Spiel nochmal spielen!"
            }else if (cantPlayReason == "day"){
                cantPlayReasonText = "Es dürfen maximal drei Spiele am Tag gespielt werden. Morgen dürfen Sie wieder spielen.";
                }


        }else if (languageChoice == "en"){
            intro1 = "resources/Introduction_English/Intro_English_1.png";
            intro2 = "resources/Introduction_English/Intro_English_2.png";
            intro3 = "resources/Introduction_English/Intro_English_3.png";
            intro4 = "resources/Introduction_English/Intro_English_4.jpg";
            intro5 = "resources/Introduction_English/Intro_English_5.jpg";
            intro6 = "resources/Introduction_English/Intro_English_6.jpg";
            intro7 = "resources/Introduction_English/Intro_English_7.jpg";
            intro8 = "resources/Introduction_English/Intro_English_8.png";
            intro9 = "resources/Introduction_English/Intro_English_9.png";
            intro10 = "resources/Introduction_English/Intro_English_10.png";

            continueText = "Continue";
            playText = "Play";
            score_text = "Score: ";
            score_endText = "Total Score: ";
            round_text1 = "Round ";
            round_text2 = " of 150";
            level_text = "Level: ";
            endGameText = "End game";
            endingStatement = "The level is now over.";
            beginningStatement = "Level " + session_n.toString();

            if (cantPlayReason == "time"){
                cantPlayReasonText = "You've already played at " + lastTimePlayed[0].toString() + ":" + minutes_formatFixed.toString() + " today." + "\n" + "You can play again one hour after your last game!"
            }else if (cantPlayReason == "day"){
                cantPlayReasonText = "You can only play three games a day. Try again tomorrow.";
                }
        }
  Routine pathogenLoaderLoop
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    CodeComponent pathogenLoaderLoopCode
      Code Type = JS
      Begin JS Experiment:
        //declare empty lists for pathogen images
        pathogen_list = [];
      Begin JS Routine:
        //fill list with pathogen images
        pathogen_list.push(pathogens);
  Routine pathogenLoader
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  Routine buttonPressedTrial
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    ImageComponent leftSyringe_4
      image [set every repeat] = $leftSyringe_clicked
      pos = (-0.4, -0.2)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.15
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    ImageComponent rightSyringe_4
      image [set every repeat] = $rightSyringe_clicked
      pos = (0.4, -0.2)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.15
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    PolygonComponent coinCircle_2
      fillColor [set every repeat] = $circleColor
      lineColor [set every repeat] = $circleColor
      saveStartStop = False
      shape = circle
      size [set every repeat] = (coinCircleSize, 0.14)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.15
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    ImageComponent rewardImage_2
      image = resources/coin.png
      pos = (-0.0035, 0)
      saveStartStop = False
      size [set every repeat] = rewardImageSize
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.15
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    TextboxComponent leftNoteText_3
      autoLog = False
      bold = False
      color [set every repeat] = $leftFeedbackColor
      editable = False
      letterHeight = 0.07
      pos = (-0.386, 0.05)
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.15
      text [set every repeat] = $leftCuredNum
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    TextboxComponent rightNoteText_3
      autoLog = False
      bold = False
      color [set every repeat] = $rightFeedbackColor
      editable = False
      letterHeight = 0.07
      pos = (0.42, 0.05)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.15
      text [set every repeat] = $rightCuredNum
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    ImageComponent continueButtonBackground_2
      image = resources/Introduction_English/info_button_pressed.png
      pos = (0, -0.35)
      saveStartStop = False
      size = (0.36, 0.12)
      startVal [time (s)] = 0
      stopVal [time (s)] = 0.15
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    TextboxComponent continueButtonText_2
      autoLog = False
      bold = False
      color = black
      editable = False
      letterHeight = 0.03
      pos = (0.02, -0.35)
      saveStartStop = False
      size = (0.35, 0.1)
      startVal [time (s)] = 0
      stopVal [time (s)] = 0.15
      text [set every repeat] = $continueText
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    TextboxComponent scoreBoardTextbox_4
      alignment = top-left
      anchor = top-left
      autoLog = False
      bold = False
      color = black
      editable = False
      letterHeight = 0.042
      lineSpacing = 1
      pos = (-0.88, 0.405)
      saveStartStop = False
      size = (0.5, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.15
      text [set every repeat] = $scoreBoardText
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    CodeComponent stabileBackgroundSceneCode
      Code Type = JS
      End JS Routine:
        //stop automatically drawing feedback images
        leftLabFeedback_2.setAutoDraw(false);
        rightLabFeedback_2.setAutoDraw(false);
        leftSyringe_2.setAutoDraw(false);
        rightSyringe_2.setAutoDraw(false);
        rewardImage.setAutoDraw(false);
        backgroundImage.setAutoDraw(true);
        leftNotepad.setAutoDraw(true);
        rightNotepad.setAutoDraw(true);
        scoreboardImage.setAutoDraw(true);

        //add all relevant parameters to output data
        LabTrials.addData("LeftProbability", leftProbability.toString());
        LabTrials.addData("RightProbability", rightProbability.toString());
        LabTrials.addData("LeftCured", leftCuredNum.toString());
        LabTrials.addData("RightCured", rightCuredNum.toString());
        LabTrials.addData("Level", session_n.toString());
        LabTrials.addData("Round", (round_n-1).toString());
        LabTrials.addData("Score", score_n.toString());
        LabTrials.addData("correct Choice", correctCure.toString());
        LabTrials.addData("correctly done", correctlyDone.toString());
        LabTrials.addData("Left Color", leftSyringeColor.toString());
        LabTrials.addData("Right Color", rightSyringeColor.toString());
        LabTrials.addData("Device", used_device.toString());
  Routine IntroductionButtonPressed
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    ImageComponent titleScreen_2
      color = 0.0000, 0.0000, 0.0000
      image = resources/Introduction_English/TitleScreen.png
      size = (1.88, 0.94)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.15
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    ImageComponent playButton_2
      image = resources/Introduction_English/info_button_pressed.png
      pos = (0, -0.4)
      size = (0.36, 0.12)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.15
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    TextboxComponent playTextBlock_2
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      pos = (0.02, -0.4)
      saveStartStop = False
      size = (0.3, 0.06*yrange)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.15
      text [set every repeat] = $playText
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  Routine languageClickedButton
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    CodeComponent languageChoiceScript_2
      Code Type = JS
      Begin JS Routine:
        //Assignment of language preference
        // ----------------------------------------------------------------------------------------------------------

        if ((languageChoiceClick.clicked_name.slice((- 1))[0] === "germanFlag")) { //if player chose German
            languageChoice = "de"; //set to "de" = Deutsch
            flagCircleSizeLeft = (0.32, 0.32);
            flagCircleSizeRight = (0, 0);

            } else {
            languageChoice = "en"; //set to "en" = English
            flagCircleSizeRight = (0.32, 0.32);
            flagCircleSizeLeft = (0, 0);

        }
    ImageComponent emptyBackground_2
      image [set every repeat] = resources/alternative_screen2.png
      saveStartStop = False
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.12
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    PolygonComponent circleFlag
      fillColor = limegreen
      lineColor = limegreen
      pos [set every repeat] = (-.4, -.15)
      saveStartStop = False
      shape = circle
      size [set every repeat] = flagCircleSizeLeft
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.12
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    PolygonComponent circleFlag_2
      fillColor = limegreen
      lineColor = limegreen
      pos [set every repeat] = (.4, -.15)
      saveStartStop = False
      shape = circle
      size [set every repeat] = flagCircleSizeRight
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.12
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    ImageComponent germanFlag_2
      image = resources/Language_Images/germany_flag.png
      pos = (-.4, -.15)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.12
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    ImageComponent englishFlag_2
      image = resources/Language_Images/uk_flag.png
      pos = (.4, -.15)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.12
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    TextComponent languageText_2
      color = black
      letterHeight = 0.07
      pos = (0, .15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.12
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      text:
        Wähle eine Sprache aus -
        Choose a language
  Routine transitionScreen
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  Routine endingScreen
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    CodeComponent endingScript_2
      Code Type = JS
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      Begin JS Routine:
        //stop all autodraws
        backgroundImage.setAutoDraw(false);
        leftNotepad.setAutoDraw(false);
        rightNotepad.setAutoDraw(false);
        scoreboardImage.setAutoDraw(false);
        leftSyringe.setAutoDraw(false);
        rightSyringe.setAutoDraw(false);
        rewardBackgroundCircle.setAutoDraw(false);
        rewardImage.setAutoDraw(false);

        galleryText = (score_endText + score_n.toString()).toString();
        galleryPath = ("resources/Gallerie/Score_" + session_n.toString() + ".png").toString();

        //save level and score in shelf
        //if(canPlay == 1){
        //    psychoJS.shelf.setDictionaryFieldValue({key: ["Influenca_session_tracker", "@designer"], fieldName: expInfo['participant'], fieldValue: [session_n, score_n, languageChoice, currentDay, currentTime, timesPlayed]});
        //    }
    ImageComponent emptyBackground_3
      color = 0.0000, 0.0000, 0.0000
      image [set every repeat] = resources/alternative_screen2.png
      saveStartStop = False
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent languageText_3
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $endingStatement
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  Routine beginningScreen
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    ImageComponent emptyBackground_4
      color = 0.0000, 0.0000, 0.0000
      image [set every repeat] = resources/alternative_screen2.png
      saveStartStop = False
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent languageText_4
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $beginningStatement
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  Routine timingIssue
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    ImageComponent emptyBackground_5
      color = 0.0000, 0.0000, 0.0000
      image [set every repeat] = resources/alternative_screen2.png
      saveStartStop = False
      size = (2, 1)
      startVal [time (s)] = 0.0
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    ImageComponent okayButton
      image = resources/Introduction_English/info_button_normal.png
      pos = (0, -0.25)
      saveStartStop = False
      size = (0.36, 0.12)
      startVal [time (s)] = 0.0
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    TextboxComponent buttonTextBlock
      autoLog = False
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      pos = (0.02, -0.25)
      saveStartStop = False
      size = (0.3, 0.065*yrange)
      startVal [time (s)] = 0.0
      text = okay
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    MouseComponent okayClick
      clickable = okayButton
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextboxComponent informationTextbox
      autoLog = False
      bold = False
      color = black
      editable = False
      letterHeight = 0.065
      pos = (0, 0.1)
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $cantPlayReasonText
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  Routine savingData
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    CodeComponent code
      Code Type = JS
      End JS Experiment:
        //save level and score in shelf
        if(canPlay == 1){
            psychoJS.shelf.setDictionaryFieldValue({key: ["Influenca_session_tracker", "@designer"], fieldName: expInfo['participant'], fieldValue: [session_n, score_n, languageChoice, currentDay, currentTime, timesPlayed]});
            }

        if(canPlay == 0){
            psychoJS.shelf.setDictionaryFieldValue({key: ["Influenca_session_tracker", "@designer"], fieldName: expInfo['participant'], fieldValue: [session_n-1, score_n, languageChoice, lastDayPlayed, lastTimePlayed, timesPlayed-1]});
            }
Flow
  Routine initializing
  LoopInitiator choosingTheLanguage loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = neverPlayed
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    Routine chooseLanguage
    Routine languageClickedButton
  LoopTerminator choosingTheLanguage
  Routine textAssignment
  LoopInitiator sendingMessage loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = cantPlay
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    Routine timingIssue
  LoopTerminator sendingMessage
  LoopInitiator gameplay loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = canPlay
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    LoopInitiator allSetups loopType="TrialHandler"
      conditionsFile = resources/variable_sheets/general_setup_sheet.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [{'scenes': 1, 'notepads': 'resources/notepad_1.png', 'scoreboards': 'resources/scoreboard_lab_1.png', 'syringeTypeSheet': 'resources/variable_sheets/lab1_syringes.xlsx'},
        {'scenes': 2, 'notepads': 'resources/notepad_2.png', 'scoreboards': 'resources/scoreboard_lab_2.png', 'syringeTypeSheet': 'resources/variable_sheets/lab2_syringes.xlsx'},
        {'scenes': 3, 'notepads': 'resources/notepad_3.png', 'scoreboards': 'resources/scoreboard_lab_3.png', 'syringeTypeSheet': 'resources/variable_sheets/lab3_syringes.xlsx'},
        {'scenes': 4, 'notepads': 'resources/notepad_4.png', 'scoreboards': 'resources/scoreboard_lab_4.png', 'syringeTypeSheet': 'resources/variable_sheets/lab4_syringes.xlsx'},
        {'scenes': 5, 'notepads': 'resources/notepad_5.png', 'scoreboards': 'resources/scoreboard_lab_5.png', 'syringeTypeSheet': 'resources/variable_sheets/lab5_syringes.xlsx'}]
      Routine generalLoaderLoop
    LoopTerminator allSetups
    Routine generalLoader
    LoopInitiator syringes_n loopType="TrialHandler"
      conditionsFile = $currentSyringeTypeSheetPath
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine syringeLoaderLoop
    LoopTerminator syringes_n
    Routine syringeLoader
    LoopInitiator firstTime loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = neverPlayed
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      Routine Rules1
      Routine Rules2
      Routine Rules3
      Routine Rules4
      Routine Rules5
      Routine Rules6
      Routine Rules7
      Routine Rules8
      Routine Rules9
      Routine Rules10
    LoopTerminator firstTime
    LoopInitiator oldPlayer loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = alreadyPlayed
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      Routine Introduction
      Routine IntroductionButtonPressed
    LoopTerminator oldPlayer
    Routine beginningScreen
    Routine SetupTheScene
    LoopInitiator LabTrials loopType="TrialHandler"
      conditionsFile = resources/variable_sheets/outputSheet.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'nTrials': 1},
        {'nTrials': 2},
        {'nTrials': 3},
        {'nTrials': 4},
        {'nTrials': 5},
        {'nTrials': 6},
        {'nTrials': 7},
        {'nTrials': 8},
        {'nTrials': 9},
        {'nTrials': 10},
        {'nTrials': 11},
        {'nTrials': 12},
        {'nTrials': 13},
        {'nTrials': 14},
        {'nTrials': 15},
        {'nTrials': 16},
        {'nTrials': 17},
        {'nTrials': 18},
        {'nTrials': 19},
        {'nTrials': 20},
        {'nTrials': 21},
        {'nTrials': 22},
        {'nTrials': 23},
        {'nTrials': 24},
        {'nTrials': 25},
        {'nTrials': 26},
        {'nTrials': 27},
        {'nTrials': 28},
        {'nTrials': 29},
        {'nTrials': 30},
        {'nTrials': 31},
        {'nTrials': 32},
        {'nTrials': 33},
        {'nTrials': 34},
        {'nTrials': 35},
        {'nTrials': 36},
        {'nTrials': 37},
        {'nTrials': 38},
        {'nTrials': 39},
        {'nTrials': 40},
        {'nTrials': 41},
        {'nTrials': 42},
        {'nTrials': 43},
        {'nTrials': 44},
        {'nTrials': 45},
        {'nTrials': 46},
        {'nTrials': 47},
        {'nTrials': 48},
        {'nTrials': 49},
        {'nTrials': 50},
        {'nTrials': 51},
        {'nTrials': 52},
        {'nTrials': 53},
        {'nTrials': 54},
        {'nTrials': 55},
        {'nTrials': 56},
        {'nTrials': 57},
        {'nTrials': 58},
        {'nTrials': 59},
        {'nTrials': 60},
        {'nTrials': 61},
        {'nTrials': 62},
        {'nTrials': 63},
        {'nTrials': 64},
        {'nTrials': 65},
        {'nTrials': 66},
        {'nTrials': 67},
        {'nTrials': 68},
        {'nTrials': 69},
        {'nTrials': 70},
        {'nTrials': 71},
        {'nTrials': 72},
        {'nTrials': 73},
        {'nTrials': 74},
        {'nTrials': 75},
        {'nTrials': 76},
        {'nTrials': 77},
        {'nTrials': 78},
        {'nTrials': 79},
        {'nTrials': 80},
        {'nTrials': 81},
        {'nTrials': 82},
        {'nTrials': 83},
        {'nTrials': 84},
        {'nTrials': 85},
        {'nTrials': 86},
        {'nTrials': 87},
        {'nTrials': 88},
        {'nTrials': 89},
        {'nTrials': 90},
        {'nTrials': 91},
        {'nTrials': 92},
        {'nTrials': 93},
        {'nTrials': 94},
        {'nTrials': 95},
        {'nTrials': 96},
        {'nTrials': 97},
        {'nTrials': 98},
        {'nTrials': 99},
        {'nTrials': 100}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
      Routine trialSetup
      Routine trialFeedback
      Routine trialOutput
      Routine buttonPressedTrial
    LoopTerminator LabTrials
    Routine endingScreen
    Routine deleteTheScene
  LoopTerminator gameplay
  Routine savingData
