PsychoPy2experiment version="2023.2.3"
Settings
  Data filename = u'data/%s_%s_%s' % ("VASsocialrating", expInfo['studyID'], expInfo['participantID'])
  Enable Escape = False
  Experiment info = {'participantID': '', 'studyID': 'BON001', 'session number': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['DelayJitter/DelayJitter.csv', 'buttons/tilt_phone.png', 'buttons/germany_flag.png', 'buttons/uk_flag.png', 'stimuli/activities.csv']
  Save log file = False
  Screen = 1
  Show mouse = True
  Units = height
  Use version = 2022.2.3
  Window size (pixels) = [1707, 1067]
  color = 1.0000, 1.0000, 1.0000
  expName = activity_rating_task
  keyboardBackend = ioHub
  logging level = error
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Routines
  Routine language_choice
    RoutineSettingsComponent language_choice
      saveStartStop = False
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    CodeComponent code_languagechoice
      Code Type = JS
      Begin JS Routine:
        // Set variable size elements
        window_height = window.innerHeight;
        window_width = window.innerWidth;
        xrange = (window_width / window_height);
        yrange = (window_height / window_width);
        last_xrange = xrange;
        pos_sourcetext = [0.3*Math.max(1,xrange), -0.48*Math.max(1,yrange)];
      Each JS Frame:
        // Hovereffect for both countryflag-images
        if (!mobile_device){
            if (image_ukflag.contains(mouse_languagechoice)) {
                image_ukflag_opacity = opacity2;
            } else {
                image_ukflag_opacity = opacity1;
            }
            if (image_germanyflag.contains(mouse_languagechoice)) {
                image_germanyflag_opacity = opacity2;
            } else {
                image_germanyflag_opacity = opacity1;
            }
        }

        // Set variable size elements
        window_height = window.innerHeight;
        window_width = window.innerWidth;
        xrange = (window_width / window_height);
        if(xrange != last_xrange){
            // Size changed
            last_xrange = xrange;
            yrange = (window_height / window_width);
            pos_sourcetext = [0.3*Math.max(1,xrange), -0.48*Math.max(1,yrange)];
        }
      End JS Routine:
        // If clicked on the german (uk) flag, the languagechoice is set to german (english)
        if ((mouse_languagechoice.clicked_name[0] === "image_germanyflag")) {
            languagechoice = "ger";
        } else {
            languagechoice = "uk";
        }
        // Store chosen language
        expInfo["language"] = languagechoice;
        // Set texts according to languagechoice
        if ((languagechoice === "ger")) {
            // mobile_instructions routine
            mobile_instructions_text = "Falls Sie das Experiment an einem Mobilger\u00e4t durchf\u00fchren, verwenden Sie bitte das Querformat und bleiben Sie bitte im Vollbildmodus. Andernfalls kann es zu Darstellungsfehlern kommen.\nSie k\u00f6nnen fortfahren, wenn Ihr Mobiltelefon im Querformat ist.";
            // instructions routine
            instructions_text = "Willkommen! \n\nIm Folgenden bitten wir Sie, einige Freizeitaktivitäten zu bewerten. Bitte geben Sie jeweils an, wie gern Sie die angezeigte Freizeitaktivität im Vergleich zu allen Ihnen vorstellbaren Freizeitaktivitäten mögen. Sollten Sie die angezeigte Aktivität noch nie gemacht haben, schätzen Sie bitte, wie sehr Sie die Aktivität mögen würden. \n\nUm Ihre Antworten einzugeben, können Sie einen Regler über eine Skala verschieben. Danach können Sie Ihre Eingabe bestätigen.";
            continuebutton_text = "Klicken Sie hier, wenn Sie die Instruktionen gelesen haben";
            // stimulus_rating routine
            stimulus_text = "Bitte bewerten Sie wie gern Sie die folgende Freizeitaktivit\u00e4t im Vergleich zu allen Ihnen vorstellbaren Freizeitaktivit\u00e4ten m\u00f6gen: ";
            l01 = "am allerst\u00e4rksten \ngemochte Aktivit\u00e4t, \ndie vorstellbar ist";
            l02 = "extrem gern";
            l03 = "sehr gern";
            l04 = "gern";
            l05 = "ein bisschen gern";
            l06 = "neutral";
            l07 = "ein bisschen ungern";
            l08 = "ungern";
            l09 = "sehr ungern";
            l10 = "extrem ungern";
            l11 = "am allerst\u00e4rksten \nzuwidere Aktivit\u00e4t, \ndie vorstellbar ist";
            reminder_text_liking = 'Bitte geben Sie \u00fcber den Slider eine Reaktion ab, um fortfahren zu k\u00f6nnen!';
            submitbutton_text = "Weiter";
            enforceLandscape_text = "Bitte wechseln Sie ins Querformat.";
            // end routine
            end_text = "Das Experiment ist nun beendet.\nVielen Dank f\u00fcr Ihre Teilnahme.";
            end_text2 = "Bitte schliessen Sie das Experiment nicht bevor das Fenster mit der Nachricht 'Thank you for your patience.' erscheint. \nDies kann einen Moment dauern.";
        } else {
            // mobile_instructions routine
            mobile_instructions_text = "If you are conducting the experiment on a mobile device, please use landscape format and stay in full screen mode. Otherwise, display problems may occur.\nYou can continue if your device is in landscape format.";
            // instructions routine
            instructions_text =  "Welcome! \n\nWe will now ask you to rate some free time activities. Please indicate how much you like the displayed free time activity in comparison with all of the imaginable free time activities. In case you have never done the displayed activity, please estimate how much you would like the activity. \n\nTo answer the questions, you can move the point on the scale. After this you can confirm your selection.";
            continuebutton_text = "Click here when you have read the instructions";
            // stimulus_rating routine
            stimulus_text = "Please rate how much you like the following free time activity in comparison with all of the imaginable free time activities: ";
            l01 = "most liked activity \nimaginable";
            l02 = "like extremely";
            l03 = "like very much";
            l04 = "like moderately";
            l05 = "like slightly";
            l06 = "neutral";
            l07 = "slightly dislike";
            l08 = "moderately dislike";
            l09 = "dislike very much";
            l10 = "extremely dislike";
            l11 = "most disliked activity \nimaginable";
            reminder_text_liking = 'Please give a reaction via the slider to be able to continue!';
            submitbutton_text = "Submit";
            enforceLandscape_text = "Please change to landscape format.";
            // end routine
            end_text = "The experiment is over.\nThank you for your participation.";
            end_text2 = "Please do not close the experiment before the window with the message 'Thank you for your patience.' appears. \nThis may take a moment.";
        }
    ImageComponent image_germanyflag
      image = buttons/germany_flag.png
      opacity [set every frame] = image_germanyflag_opacity 
      pos = (-0.3, -0.22)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_ukflag
      image = buttons/uk_flag.png
      opacity [set every frame] = image_ukflag_opacity 
      pos = (0.3, -0.22)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_languagechoice
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.95, 0.5)
      startVal [time (s)] = 0.0
      text = Choose your preferred language
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    MouseComponent mouse_languagechoice
      clickable = image_germanyflag, image_ukflag,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveParamsClickable = name
      saveStartStop = False
      startVal [time (s)] = 0.5
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    TextboxComponent textbox_sourceflag
      bold = False
      color = 0.6549, 0.6549, 0.6549
      editable = False
      letterHeight = 0.015
      pos [set every frame] = pos_sourcetext
      saveStartStop = False
      size = (0.3, 0.04)
      startVal [time (s)] = 0.0
      text = Icons from https://www.countryflags.com/
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  Routine picture_choice
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    CodeComponent code_picturechoice
      Code Type = JS
      Each JS Frame:
        // Hovereffect for picturechoice-images
        if (!mobile_device){
            if (image_picturechoice1.contains(mouse_picturechoice)) {
                image_picturechoice1_opacity = opacity2;
            } else {
                image_picturechoice1_opacity = opacity1;
            }

            if (image_picturechoice2.contains(mouse_picturechoice)) {
                image_picturechoice2_opacity = opacity2;
            } else {
                image_picturechoice2_opacity = opacity1;
            }

            if (image_picturechoice3.contains(mouse_picturechoice)) {
                image_picturechoice3_opacity = opacity2;
            } else {
                image_picturechoice3_opacity = opacity1;
            }
        }
      End JS Routine:
        // Save which kind of images the participant wants & choose csv stimuli file
        if ((mouse_picturechoice.clicked_name[0] === "image_picturechoice1")) {
            picturechoice = "Male";
            stimuli_file_name = "stimuli/stimuli_male.csv";
        } else {
            if ((mouse_picturechoice.clicked_name[0] === "image_picturechoice2")) {
                picturechoice = "Female";
                stimuli_file_name = "stimuli/stimuli_female.csv";
            } else {
                picturechoice = "Both";
                stimuli_file_name = "stimuli/stimuli_both.csv";
            }
        }
        // Store picturechoice
        expInfo["erotic_choice"] = picturechoice;
    TextComponent text_picturechoice
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.06
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $picturechoice_text
      wrapWidth = 0.95
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    ImageComponent image_picturechoice1
      image = buttons/one.png
      opacity [set every frame] = image_picturechoice1_opacity
      pos = (-0.3, -0.25)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent image_picturechoice2
      image = buttons/two.png
      opacity [set every frame] = image_picturechoice2_opacity
      pos = (0, -0.25)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent image_picturechoice3
      image = buttons/three.png
      opacity [set every frame] = image_picturechoice3_opacity
      pos = (0.3,-0.25)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_picturechoice
      clickable = image_picturechoice1, image_picturechoice2, image_picturechoice3
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveParamsClickable = name
      saveStartStop = False
      startVal [time (s)] = 0.5
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    TextComponent text_sourceicons
      color = $(0.6549, 0.6549, 0.6549)
      letterHeight = 0.015
      pos = (0.35, -0.48)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Icons from https://icons8.com
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    TextComponent text_enforceLandscape2
      color = black
      letterHeight = 0.05
      opacity = 0
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $enforceLandscape_text
      wrapWidth = 0.5
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    ImageComponent image_tiltphone3
      image = buttons/tilt_phone.png
      opacity = 0
      pos = (0, -0.1)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent text_sourceicon4
      color = $(0.6549, 0.6549, 0.6549)
      letterHeight = 0.015
      opacity = 0
      pos = (0.35, -0.48)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Icon from https://icons8.com
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    CodeComponent code_enforceLandscapemode2
      Code Type = JS
      Begin JS Routine:
        if (mobile_device){
            window_height = window.innerHeight;
            window_width = window.innerWidth;
            xrange = window_width/window_height;

            if (xrange<1){
                text_picturechoice.setOpacity(0);
                //image_picturechoice1.setOpacity(0);
                //image_picturechoice2.setOpacity(0);
                //image_picturechoice3.setOpacity(0);
                image_picturechoice1_opacity = 0;
                image_picturechoice2_opacity = 0;
                image_picturechoice3_opacity = 0;
                text_sourceicons.setOpacity(0);

                text_enforceLandscape2.setOpacity(1);
                image_tiltphone3.setOpacity(1);
                text_sourceicon4.setOpacity(1);
            }
        }
      Each JS Frame:
        if (mobile_device && (window_height != window.innerHeight || window_width != window.innerWidth)){
            window_height = window.innerHeight;
            window_width = window.innerWidth;
            xrange = window_width/window_height;
            if (xrange<1){
                text_picturechoice.setOpacity(0);
                //image_picturechoice1.setOpacity(0);
                //image_picturechoice2.setOpacity(0);
                //image_picturechoice3.setOpacity(0);
                image_picturechoice1_opacity = 0;
                image_picturechoice2_opacity = 0;
                image_picturechoice3_opacity = 0;
                text_sourceicons.setOpacity(0);

                text_enforceLandscape2.setOpacity(1);
                image_tiltphone3.setOpacity(1);
                text_sourceicon4.setOpacity(1);
            } else {
                text_picturechoice.setOpacity(1);
                //image_picturechoice1.setOpacity(1);
                //image_picturechoice2.setOpacity(1);
                //image_picturechoice3.setOpacity(1);
                image_picturechoice1_opacity = 1;
                image_picturechoice2_opacity = 1;
                image_picturechoice3_opacity = 1;
                text_sourceicons.setOpacity(1);

                text_enforceLandscape2.setOpacity(0);
                image_tiltphone3.setOpacity(0);
                text_sourceicon4.setOpacity(0);
            }
        }
  Routine instructions
    RoutineSettingsComponent instructions
      saveStartStop = False
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    CodeComponent code_instructions
      Code Type = JS
      Begin JS Routine:
        // Set variable size elements
        window_height = window.innerHeight;
        window_width = window.innerWidth;
        xrange = window_width/window_height;
        last_xrange = xrange;
        yrange = window_height/window_width;
        continuebutton_xy = [0,-0.3*Math.max(1,Math.sqrt(yrange))];
      Each JS Frame:
        // Hovereffect for continuebutton
        if (!mobile_device){
            if (polygon_continuebutton.contains(mouse_instructions)) {
                continuebutton_opacity = opacity2;
            } else {
                continuebutton_opacity = opacity1;
            }
        }

        // Set variable size elements
        window_height = window.innerHeight;
        window_width = window.innerWidth;
        xrange = window_width/window_height;
        if (xrange != last_xrange){
            // Size changed
            last_xrange = xrange;
            yrange = window_height/window_width;
            continuebutton_xy = [0,-0.3*Math.max(1,Math.sqrt(yrange))];
        }
    TextboxComponent textbox_instructions
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.035
      pos = (0, 0.1)
      saveStartStop = False
      size = (0.9, 0.7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions_text
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    MouseComponent mouse_instructions
      clickable = polygon_continuebutton,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.5
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    PolygonComponent polygon_continuebutton
      fillColor = $continuebutton_fillcolor
      lineColor = $continuebutton_bordercolor
      lineWidth = continuebutton_edgethickness
      opacity [set every frame] = continuebutton_opacity
      pos [set every frame] = continuebutton_xy
      saveStartStop = False
      shape = rectangle
      size = continuebutton_size
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_continuebutton
      bold = False
      color = black
      editable = False
      letterHeight = 0.04
      pos [set every frame] = continuebutton_xy
      saveStartStop = False
      size = continuebutton_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $continuebutton_text
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  Routine stimulus_rating
    RoutineSettingsComponent stimulus_rating
      saveStartStop = False
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    CodeComponent code_updateState
      Code Type = JS
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      Begin JS Routine:
        ratingGiven = false //track if ratings have been given to slider

        // Set variable size elements
        window_height = window.innerHeight;
        window_width = window.innerWidth;
        xrange = window_width/window_height;
        last_xrange = xrange;
        yrange = window_height/window_width;

        slidertext_xy = [-0.45*Math.max(1,Math.sqrt(xrange)), 0.35*Math.max(1,Math.sqrt(yrange))];
        activitytext_xy = [-0.45*Math.max(1,Math.sqrt(xrange)), 0.15*Math.max(1,Math.sqrt(yrange))];
        submitbutton_xy = [-0.2*Math.max(1,Math.sqrt(xrange)), -0.3*Math.max(1,Math.sqrt(yrange))];
        reminder_xy = [-0.2*Math.max(1,Math.sqrt(xrange)), -0.15*Math.max(1,Math.sqrt(yrange))];

        slider_liking_center_x = 0.17*Math.max(1,Math.sqrt(xrange));
        slider_liking_center_y = 0;
        slider_liking_w = 0.04*Math.max(1,Math.sqrt(xrange));
        slider_liking_h = 0.8*Math.max(1,Math.sqrt(yrange));
        slider_size = [slider_liking_w,slider_liking_h];
        slider_xy = [slider_liking_center_x,slider_liking_center_y];
        label_xpos = slider_liking_center_x + slider_liking_w/2 + tick_size[0]/2 + 0.01;//(slider_liking_center_x + slider_liking_w + 0.25);
        l01_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[10]) / 100));
        l02_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[9]) / 100));
        l03_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[8]) / 100));
        l04_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[7]) / 100));
        l05_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[6]) / 100));
        l06_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[5]) / 100));
        l07_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[4]) / 100));
        l08_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[3]) / 100));
        l09_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[2]) / 100));
        l10_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[1]) / 100));
        l11_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[0]) / 100));
        l01_pos = [label_xpos, l01_ypos];
        l02_pos = [label_xpos, l02_ypos];
        l03_pos = [label_xpos, l03_ypos];
        l04_pos = [label_xpos, l04_ypos];
        l05_pos = [label_xpos, l05_ypos];
        l06_pos = [slider_liking_center_x - (slider_liking_w/2 + tick_size[0]/2 + 0.01),l06_ypos];// label "neutral" on the left of the slider
        l07_pos = [label_xpos, l07_ypos];
        l08_pos = [label_xpos, l08_ypos];
        l09_pos = [label_xpos, l09_ypos];
        l10_pos = [label_xpos, l10_ypos];
        l11_pos = [label_xpos, l11_ypos];
        tick_shift = slider_liking_w/2;
        tick01_pos = [slider_liking_center_x + tick_shift, l01_ypos];
        tick02_pos = [slider_liking_center_x + tick_shift, l02_ypos];
        tick03_pos = [slider_liking_center_x + tick_shift, l03_ypos];
        tick04_pos = [slider_liking_center_x + tick_shift, l04_ypos];
        tick05_pos = [slider_liking_center_x + tick_shift, l05_ypos];
        tick06_pos = [slider_liking_center_x - tick_shift, l06_ypos];
        tick07_pos = [slider_liking_center_x + tick_shift, l07_ypos];
        tick08_pos = [slider_liking_center_x + tick_shift, l08_ypos];
        tick09_pos = [slider_liking_center_x + tick_shift, l09_ypos];
        tick10_pos = [slider_liking_center_x + tick_shift, l10_ypos];
        tick11_pos = [slider_liking_center_x + tick_shift, l11_ypos];
      Each JS Frame:
        // check if rating has been given before allowing the participant to press submit
        if (slider.getRating() != null){
            ratingGiven = true;
        }

        // Continuebutton display conditions
        cond_submitbutton = ratingGiven;
        // Remindertext appearance condition
        cond_reaction_reminder_text = ((! ratingGiven) && (t >= 10));

        // Hovereffect for submitbutton
        if (!mobile_device){
            if (polygon_submitbutton.contains(mouse_nextTrial)) {
                submitbutton_opacity = opacity2;
            } else {
                submitbutton_opacity = opacity1;
            }
        }

        // Set variable size elements
        window_height = window.innerHeight;
        window_width = window.innerWidth;
        xrange = window_width/window_height;
        if (xrange != last_xrange){
            // Size changed
            last_xrange = xrange;
            yrange = window_height/window_width;

            slidertext_xy = [-0.45*Math.max(1,Math.sqrt(xrange)), 0.35*Math.max(1,Math.sqrt(yrange))];
            activitytext_xy = [-0.45*Math.max(1,Math.sqrt(xrange)), 0.15*Math.max(1,Math.sqrt(yrange))];
            submitbutton_xy = [-0.2*Math.max(1,Math.sqrt(xrange)), -0.3*Math.max(1,Math.sqrt(yrange))];
            reminder_xy = [-0.2*Math.max(1,Math.sqrt(xrange)), -0.15*Math.max(1,Math.sqrt(yrange))];

            slider_liking_center_x = 0.17*Math.max(1,Math.sqrt(xrange));
            slider_liking_center_y = 0;
            slider_liking_w = 0.04*Math.max(1,Math.sqrt(xrange));
            slider_liking_h = 0.8*Math.max(1,Math.sqrt(yrange));
            slider_size = [slider_liking_w,slider_liking_h];
            slider_xy = [slider_liking_center_x,slider_liking_center_y];
            label_xpos = slider_liking_center_x + slider_liking_w/2 + tick_size[0]/2 + 0.01;//(slider_liking_center_x + slider_liking_w + 0.25);
            l01_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[10]) / 100));
            l02_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[9]) / 100));
            l03_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[8]) / 100));
            l04_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[7]) / 100));
            l05_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[6]) / 100));
            l06_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[5]) / 100));
            l07_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[4]) / 100));
            l08_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[3]) / 100));
            l09_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[2]) / 100));
            l10_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[1]) / 100));
            l11_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[0]) / 100));
            l01_pos = [label_xpos, l01_ypos];
            l02_pos = [label_xpos, l02_ypos];
            l03_pos = [label_xpos, l03_ypos];
            l04_pos = [label_xpos, l04_ypos];
            l05_pos = [label_xpos, l05_ypos];
            l06_pos = [slider_liking_center_x - (slider_liking_w/2 + tick_size[0]/2 + 0.01),l06_ypos];//[(slider_liking_center_x - 2*slider_liking_w), l06_ypos]; // label "neutral" on the left of the slider
            l07_pos = [label_xpos, l07_ypos];
            l08_pos = [label_xpos, l08_ypos];
            l09_pos = [label_xpos, l09_ypos];
            l10_pos = [label_xpos, l10_ypos];
            l11_pos = [label_xpos, l11_ypos];
            tick_shift = slider_liking_w/2;
            tick01_pos = [slider_liking_center_x + tick_shift, l01_ypos];
            tick02_pos = [slider_liking_center_x + tick_shift, l02_ypos];
            tick03_pos = [slider_liking_center_x + tick_shift, l03_ypos];
            tick04_pos = [slider_liking_center_x + tick_shift, l04_ypos];
            tick05_pos = [slider_liking_center_x + tick_shift, l05_ypos];
            tick06_pos = [slider_liking_center_x - tick_shift, l06_ypos];
            tick07_pos = [slider_liking_center_x + tick_shift, l07_ypos];
            tick08_pos = [slider_liking_center_x + tick_shift, l08_ypos];
            tick09_pos = [slider_liking_center_x + tick_shift, l09_ypos];
            tick10_pos = [slider_liking_center_x + tick_shift, l10_ypos];
            tick11_pos = [slider_liking_center_x + tick_shift, l11_ypos];
        }
      End JS Routine:
        // Save rating+RT
        rating = Math.round(slider.getRating());
        trials.addData("rating", rating);
        trials.addData("Trial_RT", t);

        // For Shelf:
        activity_ratings.push([activityID, rating]);
    TextboxComponent textbox_slidertext
      alignment = top-left
      anchor = top-left
      bold = False
      color = black
      editable = False
      letterHeight = slidertext_letter_height
      pos [set every frame] = slidertext_xy
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $stimulus_text
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    TextboxComponent textbox_activitytext
      alignment = top-left
      anchor = top-left
      bold = False
      color = black
      editable = False
      letterHeight = activitytext_letter_height
      pos [set every frame] = activitytext_xy
      saveStartStop = False
      size = (0.65,0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $activity_text
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    TextboxComponent textbox_l01
      alignment = center-left
      anchor = center-left
      bold = False
      color = black
      editable = False
      italic = True
      letterHeight = label_letter_height
      pos [set every frame] = l01_pos
      saveStartStop = False
      size = label_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $l01
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    TextboxComponent textbox_l02
      alignment = center-left
      anchor = center-left
      bold = False
      color = black
      editable = False
      italic = True
      letterHeight = label_letter_height
      pos [set every frame] = l02_pos
      saveStartStop = False
      size = label_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $l02
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    TextboxComponent textbox_l03
      alignment = center-left
      anchor = center-left
      bold = False
      color = black
      editable = False
      italic = True
      letterHeight = label_letter_height
      pos [set every frame] = l03_pos
      saveStartStop = False
      size = label_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $l03
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    TextboxComponent textbox_l04
      alignment = center-left
      anchor = center-left
      bold = False
      color = black
      editable = False
      italic = True
      letterHeight = label_letter_height
      pos [set every frame] = l04_pos
      saveStartStop = False
      size = label_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $l04
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    TextboxComponent textbox_l05
      alignment = center-left
      anchor = center-left
      bold = False
      color = black
      editable = False
      italic = True
      letterHeight = label_letter_height
      pos [set every frame] = l05_pos
      saveStartStop = False
      size = label_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $l05
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    TextboxComponent textbox_l06
      alignment = center-right
      anchor = center-right
      bold = False
      color = black
      editable = False
      italic = True
      letterHeight = label_letter_height
      pos [set every frame] = l06_pos
      saveStartStop = False
      size = label_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $l06
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    TextboxComponent textbox_l07
      alignment = center-left
      anchor = center-left
      bold = False
      color = black
      editable = False
      italic = True
      letterHeight = label_letter_height
      pos [set every frame] = l07_pos
      saveStartStop = False
      size = label_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $l07
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    TextboxComponent textbox_l08
      alignment = center-left
      anchor = center-left
      bold = False
      color = black
      editable = False
      italic = True
      letterHeight = label_letter_height
      pos [set every frame] = l08_pos
      saveStartStop = False
      size = label_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $l08
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    TextboxComponent textbox_l09
      alignment = center-left
      anchor = center-left
      bold = False
      color = black
      editable = False
      italic = True
      letterHeight = label_letter_height
      pos [set every frame] = l09_pos
      saveStartStop = False
      size = label_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $l09
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    TextboxComponent textbox_l10
      alignment = center-left
      anchor = center-left
      bold = False
      color = black
      editable = False
      italic = True
      letterHeight = label_letter_height
      pos [set every frame] = l10_pos
      saveStartStop = False
      size = label_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $l10
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    TextboxComponent textbox_l11
      alignment = center-left
      anchor = center-left
      bold = False
      color = black
      editable = False
      italic = True
      letterHeight = label_letter_height
      pos [set every frame] = l11_pos
      saveStartStop = False
      size = label_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $l11
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    PolygonComponent t01
      fillColor = black
      lineColor = black
      pos [set every frame] = tick01_pos
      saveStartStop = False
      shape = line
      size = tick_size
      startVal [time (s)] = 0.0
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    PolygonComponent t02
      fillColor = black
      lineColor = black
      pos [set every frame] = tick02_pos
      saveStartStop = False
      shape = line
      size = tick_size
      startVal [time (s)] = 0.0
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    PolygonComponent t03
      fillColor = black
      lineColor = black
      pos [set every frame] = tick03_pos
      saveStartStop = False
      shape = line
      size = tick_size
      startVal [time (s)] = 0.0
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    PolygonComponent t04
      fillColor = black
      lineColor = black
      pos [set every frame] = tick04_pos
      saveStartStop = False
      shape = line
      size = tick_size
      startVal [time (s)] = 0.0
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    PolygonComponent t05
      fillColor = black
      lineColor = black
      pos [set every frame] = tick05_pos
      saveStartStop = False
      shape = line
      size = tick_size
      startVal [time (s)] = 0.0
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    PolygonComponent t06
      fillColor = black
      lineColor = black
      pos [set every frame] = tick06_pos
      saveStartStop = False
      shape = line
      size = tick_size
      startVal [time (s)] = 0.0
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    PolygonComponent t07
      fillColor = black
      lineColor = black
      pos [set every frame] = tick07_pos
      saveStartStop = False
      shape = line
      size = tick_size
      startVal [time (s)] = 0.0
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    PolygonComponent t08
      fillColor = black
      lineColor = black
      pos [set every frame] = tick08_pos
      saveStartStop = False
      shape = line
      size = tick_size
      startVal [time (s)] = 0.0
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    PolygonComponent t09
      fillColor = black
      lineColor = black
      pos [set every frame] = tick09_pos
      saveStartStop = False
      shape = line
      size = tick_size
      startVal [time (s)] = 0.0
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    PolygonComponent t10
      fillColor = black
      lineColor = black
      pos [set every frame] = tick10_pos
      saveStartStop = False
      shape = line
      size = tick_size
      startVal [time (s)] = 0.0
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    PolygonComponent t11
      fillColor = black
      lineColor = black
      pos [set every frame] = tick11_pos
      saveStartStop = False
      shape = line
      size = tick_size
      startVal [time (s)] = 0.0
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    SliderComponent slider
      borderColor = 0.9000, 0.9000, 0.9000
      color = 0.9000, 0.9000, 0.9000
      fillColor = -1.0000, -1.0000, 0.0902
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      ori = 180
      pos [set every frame] = slider_xy
      saveStartStop = False
      size [set every frame] = slider_size
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (0,100)
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    TextboxComponent textbox_reaction_reminder
      bold = False
      color = 0.0902, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      pos [set every frame] = reminder_xy
      saveStartStop = False
      size = (0.5, 0.3)
      startVal [condition] = cond_reaction_reminder_text
      text [set every frame] = $reminder_text_liking
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    PolygonComponent polygon_submitbutton
      fillColor = $submitbutton_fillcolor
      lineColor = $submitbutton_bordercolor
      lineWidth = submitbutton_edgethickness
      opacity [set every frame] = submitbutton_opacity
      pos [set every frame] = submitbutton_xy
      saveStartStop = False
      shape = rectangle
      size = submitbutton_size
      startVal [condition] = cond_submitbutton
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    TextboxComponent textbox_submitbutton
      bold = False
      color = black
      editable = False
      letterHeight = 0.075
      pos [set every frame] = submitbutton_xy
      saveStartStop = False
      size = submitbutton_size
      startVal [condition] = cond_submitbutton
      text [set every repeat] = $submitbutton_text
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    MouseComponent mouse_nextTrial
      clickable = polygon_submitbutton,
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [condition] = cond_submitbutton
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  Routine end
    RoutineSettingsComponent end
      saveStartStop = False
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    TextboxComponent textbox_end
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      size = (0.8, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text [set every repeat] = $end_text
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    TextboxComponent textbox_wait
      bold = False
      color = black
      editable = False
      letterHeight = 0.03
      pos = (0, -0.1)
      saveStartStop = False
      size = (0.7, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text [set every repeat] = $end_text2
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    CodeComponent code_shelfUpload
      Code Type = JS
      Begin JS Routine:
        // Write activity ratings to shelf "activity_ratings"
        // Since the field is globally visible (Shelf->Scope->Designer) we have to specify that
        psychoJS.shelf.setDictionaryFieldValue({key: ["activity_ratings", "@designer"], fieldName: expInfo['participantID'], fieldValue : activity_ratings});
  Routine stimulus_randomizer
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    CodeComponent code_randomizer
      Code Type = JS
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  Routine trial_settings
    RoutineSettingsComponent trial_settings
      saveStartStop = False
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    CodeComponent code_trialsettings
      Code Type = JS
      Begin JS Routine:
        // Set fixation duration
        fixation_duration = ISI + jitter[idx];

        // Define trial content
        if ((languagechoice === "ger")) {
            activityCol = "activityGer";
        } else {
            activityCol = "activityUK";
        }
        activity = trials.trialList[idx][activityCol];
        activityID = trials.trialList[idx]["activityID"];
        activity_text = activity;
      End JS Routine:
        // Increment trial index
        idx += 1;

        // Save trial data
        expInfo['activityID'] = activityID
        expInfo['fixation_dur'] = fixation_duration;
  Routine global_trial_settings
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    CodeComponent code_global_trial_settings
      Code Type = Both
      Begin Experiment:
        ### Global (static) trial settings
        ISI = 0.1 # inter stimulus interval in s
        # Slider settings
        slider_wanting_center_x = 0
        slider_wanting_center_y = -0.3
        slider_wanting_w = 0.8
        slider_wanting_h = 0.05
        slider_wanting_label1_pos = [0,0] #init
        slider_wanting_label2_pos = [0,0] #init
        window_width = 0 #init
        window_height = 0 #init
        slider_liking_center_x = 0.17
        slider_liking_center_y = 0
        slider_liking_w = 0.03
        slider_liking_h = 0.65
        # Vertical (liking) slider label setting
        # (normal labels are bugged for vertical sliders...)
        slider_liking_ticks = (-100, -62.8, -41.6, -17.6, -6, 0, 6.2, 17.8, 44.4, 65.8, 100)
        label_letter_height = 0.035
        label_delta_x = 0.52 # !!! Different in js
        label_xpos = slider_liking_center_x + label_delta_x
        l01_ypos = slider_liking_center_y + slider_liking_h/2 * slider_liking_ticks[10]/100
        l02_ypos = slider_liking_center_y + slider_liking_h/2 * slider_liking_ticks[9]/100
        l03_ypos = slider_liking_center_y + slider_liking_h/2 * slider_liking_ticks[8]/100
        l04_ypos = slider_liking_center_y + slider_liking_h/2 * slider_liking_ticks[7]/100
        l05_ypos = slider_liking_center_y + slider_liking_h/2 * slider_liking_ticks[6]/100
        l06_ypos = slider_liking_center_y + slider_liking_h/2 * slider_liking_ticks[5]/100
        l07_ypos = slider_liking_center_y + slider_liking_h/2 * slider_liking_ticks[4]/100
        l08_ypos = slider_liking_center_y + slider_liking_h/2 * slider_liking_ticks[3]/100
        l09_ypos = slider_liking_center_y + slider_liking_h/2 * slider_liking_ticks[2]/100
        l10_ypos = slider_liking_center_y + slider_liking_h/2 * slider_liking_ticks[1]/100
        l11_ypos = slider_liking_center_y + slider_liking_h/2 * slider_liking_ticks[0]/100
      Begin JS Experiment:
        ISI = 0.1;
        opacity1 = 0.7;
        opacity2 = 1;
        slider_wanting_center_x = 0;
        slider_wanting_center_y = (- 0.3);
        slider_wanting_w = 0.8;
        slider_wanting_h = 0.05;
        slider_wanting_label1_pos = (0,0);
        slider_wanting_label2_pos = (0,0);
        window_width = 0;
        window_height = 0;
        slider_liking_center_x = 0.17;
        slider_liking_center_y = 0;
        slider_liking_w = 0.03;
        slider_liking_h = 0.65;
        // If opened on a mobile device the liking scala is stretched because of precision issues with the default range
        // Also the slider is slightly more to the right such that there is more distance to the continue button
        if( /Android|webOS|iPhone|iPod|BlackBerry|IEMobile|Opera Mini/i.test(navigator.userAgent) ) {
            slider_liking_h = 0.9;
            slider_liking_center_x = 0.3;
        }
        slider_liking_ticks = [(- 100), (- 62.8), (- 41.6), (- 17.6), (- 6), 0, 6.2, 17.8, 44.4, 65.8, 100];
        label_letter_height = 0.035;
        label_delta_x = 0.03;
        label_xpos = (slider_liking_center_x + label_delta_x);
        l01_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[10]) / 100));
        l02_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[9]) / 100));
        l03_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[8]) / 100));
        l04_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[7]) / 100));
        l05_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[6]) / 100));
        l06_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[5]) / 100));
        l07_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[4]) / 100));
        l08_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[3]) / 100));
        l09_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[2]) / 100));
        l10_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[1]) / 100));
        l11_ypos = (slider_liking_center_y + (((slider_liking_h / 2) * slider_liking_ticks[0]) / 100));
  Routine audio_check
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    TextComponent text_audiorequest
      color = black
      letterHeight = 0.035
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $audiorequest_text
      wrapWidth = 0.65
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    ImageComponent image_replaybutton
      image = buttons/replay.png
      opacity [set every frame] = image_replaybutton_opacity
      pos = (0, -0.1)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_audiosample
      clickable = image_replaybutton,
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name
      saveStartStop = False
      startVal [time (s)] = 0.5
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    SoundComponent sound_audiosample
      saveStartStop = False
      sound [set every repeat] = stimuli/Musik_Stimuli/Music_Samples_cut_wav/Sample_01.wav
      syncScreenRefresh = False
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    CodeComponent code_playSound
      Code Type = Both
      Begin JS Routine:
        click_counter = 0;
        audio_duration = (sound_audiosample.getDuration() * 1000); // sec --> ms
        var d = new Date();
        current_time = d.getTime();
        audio_onset = ((current_time - audio_duration) + 1);
      Begin Routine:
        # Initializing variables
        click_counter = 0
        audio_duration = sound_audiosample.getDuration()
        current_time = win.getFutureFlipTime(clock=None)
        audio_onset = current_time - audio_duration + 1 # first frame-condition initially true
      Each Frame:
        ### Settings to make the Audio-Replay-Button work
        current_time = win.getFutureFlipTime(clock=None)
        # While audio is played and a new click comes in, let second condition become false so that audio does not play directly two times in a row
        if current_time-audio_onset  < audio_duration and len(mouse_audiosample.clicked_name) > click_counter:
            click_counter = len(mouse_audiosample.clicked_name)
        # Play sample every time a new click is registered and the duration of the audiosample has passed
        if current_time-audio_onset  > audio_duration and len(mouse_audiosample.clicked_name) > click_counter:
            audio_onset = win.getFutureFlipTime(clock=None)
            click_counter = len(mouse_audiosample.clicked_name)
            sound_audiosample.play()
        # reset button state, otherwise both mouse reponses interfere (2nd does not work)
        prevButtonState = [0,0,0]
      Each JS Frame:
        // Settings to make the Audio-Replay-Button work
        d = new Date();
        current_time = d.getTime();
        // While audio is played and a new click comes in, let second condition become false so that audio does not play directly two times in a row
        if ((((current_time-audio_onset)  < audio_duration) && (mouse_audiosample.clicked_name.length > click_counter))) {
            click_counter = mouse_audiosample.clicked_name.length;
            }
        // Play sample every time a new click is registered and the duration of the audiosample has passed
        if ((((current_time - audio_onset) > audio_duration) && (mouse_audiosample.clicked_name.length > click_counter))) {

            sound_audiosample = new sound.Sound({
                win: psychoJS.window,
                value: 'stimuli/Musik_Stimuli/Music_Samples_cut_wav/Sample_01.wav',
                secs: (- 1),
            });
            sound_audiosample.setVolume(1.0);
            audio_onset = d.getTime();
            click_counter = mouse_audiosample.clicked_name.length;
            sound_audiosample.play();
        }
        // reset button state, otherwise both mouse reponses interfere (2nd does not work)
        prevButtonState = [0, 0, 0];

        // Hovereffect for replaybutton
        if (!mobile_device){
            if (image_replaybutton.contains(mouse_audiosample)) {
                image_replaybutton_opacity = opacity2;
            } else {
                image_replaybutton_opacity = opacity1;
            }
        }

        // Hovereffect for startbutton
        if (!mobile_device){
            if (polygon_startbutton.contains(mouse_startExp)) {
                startbutton_opacity = opacity2;
            } else {
                startbutton_opacity = opacity1;
            }
        }
    PolygonComponent polygon_startbutton
      fillColor = $startbutton_fillcolor
      lineColor = $startbutton_bordercolor
      lineWidth = startbutton_edgethickness
      opacity [set every frame] = startbutton_opacity
      pos = startbutton_xy
      saveStartStop = False
      shape = rectangle
      size = startbutton_size
      startVal [time (s)] = 0.0
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    TextComponent text_startbutton
      color [set every frame] = black
      letterHeight = 0.03
      opacity [set every frame] = startbutton_opacity
      pos = startbutton_xy
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $startbutton_text
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    MouseComponent mouse_startExp
      clickable = polygon_startbutton,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name
      saveStartStop = False
      startVal [time (s)] = 0.5
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    TextComponent text_sourceicon2
      color = $(0.6549, 0.6549, 0.6549)
      letterHeight = 0.015
      pos = (0.35, -0.48)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Icon from https://icons8.com
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    TextComponent text_enforceLandscape4
      color = black
      letterHeight = 0.05
      opacity = 0
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $enforceLandscape_text
      wrapWidth = 0.5
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    ImageComponent image_tiltphone5
      image = buttons/tilt_phone.png
      opacity = 0
      pos = (0, -0.1)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent text_sourceicon6
      color = $(0.6549, 0.6549, 0.6549)
      letterHeight = 0.015
      opacity = 0
      pos = (0.35, -0.48)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Icon from https://icons8.com
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    CodeComponent code_enforceLandscapemode4
      Code Type = JS
      Begin JS Routine:
        window_height = window.innerHeight;
        window_width = window.innerWidth;
        xrange = window_width/window_height;

        if (mobile_device){
            if (xrange<1){
                text_audiorequest.setOpacity(0);
                //image_replaybutton.setOpacity(0);
                //polygon_startbutton.setOpacity(0);
                //text_startbutton.setOpacity(0);
                startbutton_opacity = 0;
                image_replaybutton_opacity = 0;

                text_enforceLandscape4.setOpacity(1);
                image_tiltphone5.setOpacity(1);
                text_sourceicon6.setOpacity(1);
            } else {
                text_audiorequest.setOpacity(1);
                //image_replaybutton.setOpacity(1);
                //polygon_startbutton.setOpacity(1);
                //text_startbutton.setOpacity(1);
                startbutton_opacity = 1;
                image_replaybutton_opacity = 1;

                text_enforceLandscape4.setOpacity(0);
                image_tiltphone5.setOpacity(0);
                text_sourceicon6.setOpacity(0);
            }
        }
      Each JS Frame:
        if (mobile_device && (window_height != window.innerHeight || window_width != window.innerWidth)){
            window_height = window.innerHeight;
            window_width = window.innerWidth;
            xrange = window_width/window_height;
            if (xrange<1){
                text_audiorequest.setOpacity(0);
                //image_replaybutton.setOpacity(0);
                //polygon_startbutton.setOpacity(0);
                //text_startbutton.setOpacity(0);
                startbutton_opacity = 0;
                image_replaybutton_opacity = 0;

                text_enforceLandscape4.setOpacity(1);
                image_tiltphone5.setOpacity(1);
                text_sourceicon6.setOpacity(1);
            } else {
                text_audiorequest.setOpacity(1);
                //image_replaybutton.setOpacity(1);
                //polygon_startbutton.setOpacity(1);
                //text_startbutton.setOpacity(1);
                startbutton_opacity = 1;
                image_replaybutton_opacity = 1;

                text_enforceLandscape4.setOpacity(0);
                image_tiltphone5.setOpacity(0);
                text_sourceicon6.setOpacity(0);
            }
        }
  Routine jitter_settings
    RoutineSettingsComponent jitter_settings
      saveStartStop = False
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    CodeComponent code_jitter
      Code Type = JS
      Begin JS Experiment:
        //// Load, Shuffle & Store jitter times
        // Load jitter file
        jitterList = new TrialHandler({
            psychoJS: psychoJS,
            nReps: 1, method: TrialHandler.Method.SEQUENTIAL,
            extraInfo: expInfo, originPath: undefined,
            trialList: "DelayJitter/DelayJitter.csv",
            seed: undefined, name: 'jitterList'
        });
        // Shuffle jitter
        rand_i = 0;
        jitter = [];
        N_jitter = jitterList.trialList.length;
        n = jitterList.trialList.length;
        for (var i = 0, _pj_a = N_jitter; (i < _pj_a); i += 1) {
            rand_i = Number.parseInt((n * Math.random()));
            jitter.push(jitterList.trialList[rand_i]['delay']);
            jitterList.trialList.splice(rand_i, 1);
            n -= 1;
        }
  Routine fixation
    RoutineSettingsComponent fixation
      saveStartStop = False
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    PolygonComponent fixation_cross
      fillColor = black
      saveStartStop = False
      shape = cross
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = fixation_duration
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  Routine global_experiment_settings
    RoutineSettingsComponent global_experiment_settings
      saveStartStop = False
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    CodeComponent code_global_settings
      Code Type = JS
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      Begin JS Experiment:
        // Detect if mobile device is used
        mobile_device = false;
        if(/(android|bb\d+|meego).+mobile|avantgo|bada\/|blackberry|blazer|compal|elaine|fennec|hiptop|iemobile|ip(hone|od)|ipad|iris|kindle|Android|Silk|lge |maemo|midp|mmp|netfront|opera m(ob|in)i|palm( os)?|phone|p(ixi|re)\/|plucker|pocket|psp|series(4|6)0|symbian|treo|up\.(browser|link)|vodafone|wap|windows (ce|phone)|xda|xiino/i.test(navigator.userAgent)
            || /1207|6310|6590|3gso|4thp|50[1-6]i|770s|802s|a wa|abac|ac(er|oo|s\-)|ai(ko|rn)|al(av|ca|co)|amoi|an(ex|ny|yw)|aptu|ar(ch|go)|as(te|us)|attw|au(di|\-m|r |s )|avan|be(ck|ll|nq)|bi(lb|rd)|bl(ac|az)|br(e|v)w|bumb|bw\-(n|u)|c55\/|capi|ccwa|cdm\-|cell|chtm|cldc|cmd\-|co(mp|nd)|craw|da(it|ll|ng)|dbte|dc\-s|devi|dica|dmob|do(c|p)o|ds(12|\-d)|el(49|ai)|em(l2|ul)|er(ic|k0)|esl8|ez([4-7]0|os|wa|ze)|fetc|fly(\-|_)|g1 u|g560|gene|gf\-5|g\-mo|go(\.w|od)|gr(ad|un)|haie|hcit|hd\-(m|p|t)|hei\-|hi(pt|ta)|hp( i|ip)|hs\-c|ht(c(\-| |_|a|g|p|s|t)|tp)|hu(aw|tc)|i\-(20|go|ma)|i230|iac( |\-|\/)|ibro|idea|ig01|ikom|im1k|inno|ipaq|iris|ja(t|v)a|jbro|jemu|jigs|kddi|keji|kgt( |\/)|klon|kpt |kwc\-|kyo(c|k)|le(no|xi)|lg( g|\/(k|l|u)|50|54|\-[a-w])|libw|lynx|m1\-w|m3ga|m50\/|ma(te|ui|xo)|mc(01|21|ca)|m\-cr|me(rc|ri)|mi(o8|oa|ts)|mmef|mo(01|02|bi|de|do|t(\-| |o|v)|zz)|mt(50|p1|v )|mwbp|mywa|n10[0-2]|n20[2-3]|n30(0|2)|n50(0|2|5)|n7(0(0|1)|10)|ne((c|m)\-|on|tf|wf|wg|wt)|nok(6|i)|nzph|o2im|op(ti|wv)|oran|owg1|p800|pan(a|d|t)|pdxg|pg(13|\-([1-8]|c))|phil|pire|pl(ay|uc)|pn\-2|po(ck|rt|se)|prox|psio|pt\-g|qa\-a|qc(07|12|21|32|60|\-[2-7]|i\-)|qtek|r380|r600|raks|rim9|ro(ve|zo)|s55\/|sa(ge|ma|mm|ms|ny|va)|sc(01|h\-|oo|p\-)|sdk\/|se(c(\-|0|1)|47|mc|nd|ri)|sgh\-|shar|sie(\-|m)|sk\-0|sl(45|id)|sm(al|ar|b3|it|t5)|so(ft|ny)|sp(01|h\-|v\-|v )|sy(01|mb)|t2(18|50)|t6(00|10|18)|ta(gt|lk)|tcl\-|tdg\-|tel(i|m)|tim\-|t\-mo|to(pl|sh)|ts(70|m\-|m3|m5)|tx\-9|up(\.b|g1|si)|utst|v400|v750|veri|vi(rg|te)|vk(40|5[0-3]|\-v)|vm40|voda|vulc|vx(52|53|60|61|70|80|81|83|85|98)|w3c(\-| )|webc|whit|wi(g |nc|nw)|wmlb|wonu|x700|yas\-|your|zeto|zte\-/i.test(navigator.userAgent.substr(0,4))) {
            // Detect mobile phones (and tablets? --> Does not seem like it - at least for iPads)
            mobile_device = true;
        }

        opacity1 = 0.75; // default opacity of buttons
        opacity2 = 1; // opacity if hovered over button
        ISI = 0.1; // inter stimulus interval in s (lower bound)

        // Vertical (liking) slider label setting
        slider_liking_ticks = [(- 100), (- 62.8), (- 41.6), (- 17.6), (- 6), 0, 6.2, 17.8, 44.4, 65.8, 100];
        label_letter_height = 0.03;
        label_size = (0.3, 0.2);

        // List for shelf: [(activityID,rating),...]
        activity_ratings = []

        // Text buttons settings
        continuebutton_size = [0.6, 0.1];
        continuebutton_edgethickness = 2;
        continuebutton_fillcolor = [0.9,0.9,0.9];
        continuebutton_bordercolor = [-1,-1,-1];
        submitbutton_size = [0.35, 0.12]
        submitbutton_edgethickness = 2;
        submitbutton_fillcolor = [0.9,0.9,0.9];
        submitbutton_bordercolor = [-1,-1,-1];

        // initial variables: language_choice
        languagechoice = "no_choice_yet";

        // initial opacities
        if (mobile_device){
            opacity1 = 1; // no hovereffect for touchscreen
        }
        image_ukflag_opacity = opacity1;
        image_germanyflag_opacity = opacity1;
        submitbutton_opacity = opacity1;

        // current trial index
        idx = 0;
        // initial length of 'fixation' routine
        fixation_duration = 0;
        // Slidertext settings (Texts which explains what participant has to do)
        slidertext_letter_height = 0.035;
        // Activitytext settings (Current activity to be rated)
        activitytext_letter_height = 0.08;
        //Custom slider ticks
        tick_size = [0.02,0.01];
  Routine test_loop
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    TextComponent text_test
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $stimuli_resources[trials_2.thisRepN]["name"]
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  Routine define_erotic_stimuli
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    CodeComponent code_imageload
      Code Type = Both
      Begin Experiment:
        idx_load = 0
        erotic_stimuli = []
      Begin JS Experiment:
        idx_load = 0;
        erotic_stimuli = [];
      Begin JS Routine:
        if ((idx_load >= index_boundary_food) && (idx_load < index_boundary_erotic)) {
            image_path = ((('stimuli/Erotic_Stimuli/GlucoseRPE_Erotic/' + picturechoice) + '/') + file);
            erotic_stimuli.push({'name': image_path, 'path': image_path});
        }
      Begin Routine:
        # add file of current loop iteration to image_resources if it contains a erotic stimuli
        if idx_load >= index_boundary_food and idx_load < index_boundary_erotic:
            image_path = 'stimuli/Erotic_Stimuli/GlucoseRPE_Erotic/' + picturechoice + '/' + file
            erotic_stimuli.append({'name': image_path, 'path': image_path})
      End JS Routine:
        idx_load += 1;
      End Routine:
        idx_load +=1
  Routine mobile_instructions
    RoutineSettingsComponent mobile_instructions
      saveStartStop = False
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    CodeComponent code_mobile_instructions
      Code Type = JS
      Begin JS Routine:
        // Since tablet detection does not work properly, we at least want to include
        // people in the mobile-device-group who hold their device in portrait format
        // (likely not using a PC or notebook)
        if(!mobile_device){
            window_height = window.innerHeight;
            window_width = window.innerWidth;
            if (window_height > window_width){
                mobile_device = true;
            }
        }
        // Skip if no mobile device was detected
        if (!mobile_device){
            continueRoutine = false;
        }
        // Set variable size elements
        window_height = window.innerHeight;
        window_width = window.innerWidth;
        xrange = window_width/window_height;
        last_xrange = xrange;
        yrange = window_height/window_width;
        continuebutton_xy = [0,-0.3*Math.max(1,Math.sqrt(yrange))];
        pos_sourcetext = [0.3*Math.max(1,xrange), -0.48*Math.max(1,yrange)];
      Each JS Frame:
        // Set variable size elements
        window_height = window.innerHeight;
        window_width = window.innerWidth;
        xrange = window_width/window_height;
        if (xrange != last_xrange){
            // Size changed
            last_xrange = xrange;
            yrange = window_height/window_width;
            continuebutton_xy = [0,-0.3*Math.max(1,Math.sqrt(yrange))];
            pos_sourcetext = [0.3*Math.max(1,xrange), -0.48*Math.max(1,yrange)];
        }
    TextboxComponent textbox_mobile_instructions
      bold = False
      color = black
      editable = False
      letterHeight = 0.035
      pos = (0, 0.15)
      saveStartStop = False
      size = (0.95, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $mobile_instructions_text
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    ImageComponent image_tiltphone
      image = buttons/tilt_phone.png
      pos = (0, -0.1)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_mobilephone
      clickable = polygon_continuebutton1,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0
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    PolygonComponent polygon_continuebutton1
      fillColor = $continuebutton_fillcolor
      lineColor = $continuebutton_bordercolor
      lineWidth = continuebutton_edgethickness
      pos [set every frame] = continuebutton_xy
      saveStartStop = False
      shape = rectangle
      size = continuebutton_size
      startVal [time (s)] = 0
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    TextboxComponent textbox_continuebutton1
      bold = False
      color = black
      editable = False
      letterHeight = 0.03
      pos [set every frame] = continuebutton_xy
      saveStartStop = False
      size = continuebutton_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $continuebutton_text
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    TextboxComponent textbox_sourceicon
      bold = False
      color = 0.6549, 0.6549, 0.6549
      editable = False
      letterHeight = 0.015
      pos [set every frame] = pos_sourcetext
      saveStartStop = False
      size = (0.2, 0.03)
      startVal [time (s)] = 0.0
      text = Icon from https://icons8.com
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  Routine instructions_wanting
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    TextComponent text_instructions_wanting
      color = black
      letterHeight = 0.035
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $instructions_wanting_text
      wrapWidth = 0.95
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    CodeComponent code_slider_wanting
      Code Type = JS
      Begin JS Routine:
        window_height = window.innerHeight;
        window_width = window.innerWidth;
        xrange = window_width/window_height;

        iframeReady = false
        ratingGiven = false //track if ratings have been given to all sliders


        src_vert = ('slider_vert.html?xRes='+window_width+'&yRes='+window_height);

        let src = src_vert;
        $(document).ready(function() {
                // Add custom contents from html file using an iframe
                // Embed iFrame: iframe-o top/left defines position of embedded frame relative to absolute frame (inner window of browser); iframe width/height defines frame size
                top = (window_height*((1/2) - (slider_liking_center_y + (slider_liking_h/2))*Math.min(1,xrange)));
                left = (window_width*((1/2) + (slider_liking_center_x - (slider_liking_w/2))*Math.min(1,1/xrange)));
                width = (slider_liking_w*window_width*Math.min(1,1/xrange));
                height = (slider_liking_h*window_height*Math.min(1,xrange));
                //$('body').append('<div id="iframe-o" style="visibility: hidden; position: absolute; top:'+top+'px; left:'+left+'px;"><iframe id="iframe" src="'+src+'" frameborder="0" width='+width+' height='+height+'></iframe></div>');
                $('body').append('<div id="iframe-o" style="visibility: hidden; position: absolute; top:'+top+'px; left:'+left+'px; width: ' + width + 'px; height: ' + height + 'px; overflow: hidden;"><iframe id="iframe" src="' + src + '" frameborder="0" width="100%" height="100%"></iframe></div>');
                $('#iframe').on('load',function(iframe){

                    //remove horizontal scrollbar
                    $(this).contents().find('html').css({ 'display': 'table', 'width': '100%', 'overflow': 'hidden'});
                    $('#iframe-o').css('visibility','visible');

                    // If iframe contains sliders get their outputs.
                    var iframe = $('#iframe');
                    window.iframe = iframe;//expose the iframe to the window
                    iframeReady = true;// state that the iframe has been created
                });
        });
      Each JS Frame:
        // check if rating has been given before allowing the participant to press submit
        if (iframeReady) {
            if (iframe[0].contentWindow.document.getElementById("sliderscore").moved) {
                ratingGiven = true;
            }
        }
      End JS Routine:
        // check if submit button got pressed and if so save score, remove embedding and end routine
        if (iframeReady){
            if (ratingGiven && t>5){
                $('#iframe-o').remove()
            }
        }
  Routine instructions_liking
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    TextComponent text_instructions_liking
      color = black
      letterHeight = 0.035
      pos = (-0.2, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions_liking_text
      wrapWidth = 0.7
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    TextComponent text_l01_instr
      color = black
      letterHeight = label_letter_height
      pos = (label_xpos, l01_ypos)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $l01
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    TextComponent text_l02_instr
      color = black
      letterHeight = label_letter_height
      pos = (label_xpos, l02_ypos)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $l02
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    TextComponent text_l03_instr
      color = black
      letterHeight = label_letter_height
      pos = (label_xpos, l03_ypos)
      startVal [time (s)] = 0.0
      text [set every repeat] = $l03
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    TextComponent text_l04_instr
      color = black
      letterHeight = label_letter_height
      pos = (label_xpos, l04_ypos)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $l04
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    TextComponent text_l05_instr
      color = black
      letterHeight = label_letter_height
      pos = (label_xpos, l05_ypos)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $l05
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    TextComponent text_l06_instr
      color = black
      letterHeight = label_letter_height
      pos = (label_xpos, l06_ypos)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $l06
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    TextComponent text_l07_instr
      color = black
      letterHeight = label_letter_height
      pos = (label_xpos, l07_ypos)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $l07
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    TextComponent text_l08_instr
      color = black
      letterHeight = label_letter_height
      pos = (label_xpos, l08_ypos)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $l08
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    TextComponent text_l09_instr
      color = black
      letterHeight = label_letter_height
      pos = (label_xpos, l09_ypos)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $l09
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    TextComponent text_l10_instr
      color = black
      letterHeight = label_letter_height
      pos = (label_xpos, l10_ypos)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $l10
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    TextComponent text_l11_instr
      color = black
      letterHeight = label_letter_height
      pos = (label_xpos, l11_ypos)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $l11
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    CodeComponent code_instr_liking
      Code Type = JS
      Begin JS Experiment:
        text_l01_instr.alignHoriz = "left";
        text_l02_instr.alignHoriz = "left";
        text_l03_instr.alignHoriz = "left";
        text_l04_instr.alignHoriz = "left";
        text_l05_instr.alignHoriz = "left";
        text_l06_instr.alignHoriz = "left";
        text_l07_instr.alignHoriz = "left";
        text_l08_instr.alignHoriz = "left";
        text_l09_instr.alignHoriz = "left";
        text_l10_instr.alignHoriz = "left";
        text_l11_instr.alignHoriz = "left";
      Begin JS Routine:
        window_height = window.innerHeight;
        window_width = window.innerWidth;
        xrange = window_width/window_height;

        label_letter_height = 0.025*Math.min(1,Math.max(xrange,0.75));


        // Slider
        iframeReady = false
        ratingGiven = false //track if ratings have been given to all sliders

        src_vert = ('slider_vert.html?xRes='+window_width+'&yRes='+window_height);

        let src = src_vert;
        $(document).ready(function() {
                // Add custom contents from html file using an iframe
                // Embed iFrame: iframe-o top/left defines position of embedded frame relative to absolute frame (inner window of browser); iframe width/height defines frame size
                top = (window_height*((1/2) - (slider_liking_center_y + (slider_liking_h/2))*Math.min(1,xrange)));
                left = (window_width*((1/2) + (slider_liking_center_x - (slider_liking_w/2))*Math.min(1,1/xrange)));
                width = (slider_liking_w*window_width*Math.min(1,1/xrange));
                height = (slider_liking_h*window_height*Math.min(1,xrange));
                //$('body').append('<div id="iframe-o" style="visibility: hidden; position: absolute; top:'+top+'px; left:'+left+'px;"><iframe id="iframe" src="'+src+'" frameborder="0" width='+width+' height='+height+'></iframe></div>');
                $('body').append('<div id="iframe-o" style="visibility: hidden; position: absolute; top:'+top+'px; left:'+left+'px; width: ' + width + 'px; height: ' + height + 'px; overflow: hidden;"><iframe id="iframe" src="' + src + '" frameborder="0" width="100%" height="100%"></iframe></div>');
                $('#iframe').on('load',function(iframe){

                    //remove horizontal scrollbar
                    $(this).contents().find('html').css({ 'display': 'table', 'width': '100%', 'overflow': 'hidden'});
                    $('#iframe-o').css('visibility','visible');

                    // If iframe contains sliders get their outputs.
                    var iframe = $('#iframe');
                    window.iframe = iframe;//expose the iframe to the window
                    iframeReady = true;// state that the iframe has been created
                });
        });
      Each JS Frame:
        // check if rating has been given before allowing the participant to press submit
        if (iframeReady) {
            if (iframe[0].contentWindow.document.getElementById("sliderscore").moved) {
                ratingGiven = true;
            }
        }

        // size changed?
        if (iframeReady && (window_height != window.innerHeight || window_width != window.innerWidth)) {
            window_height = window.innerHeight;
            window_width = window.innerWidth;
            xrange = window_width/window_height;
            top = (window_height*((1/2) - (slider_liking_center_y + (slider_liking_h/2))*Math.min(1,xrange)));
            left = (window_width*((1/2) + (slider_liking_center_x -(slider_liking_w/2))*Math.min(1,1/xrange)));
            width = (slider_liking_w*window_width*Math.min(1,1/xrange));
            height = (slider_liking_h*window_height*Math.min(1,xrange));
            document.getElementById('iframe').height = height;
            document.getElementById('iframe').width = width;
            document.getElementById('iframe-o').style.setProperty("top", top +"px");
            document.getElementById('iframe-o').style.setProperty("left", left +"px");
            label_letter_height = 0.025*Math.min(1,Math.max(xrange,0.75));
        }
      End JS Routine:
        // check if submit button got pressed and if so remove embedding and end routine
        if (iframeReady){
            if (ratingGiven){
                if(gotValidClick){
                    $('#iframe-o').remove()
                    continueRoutine = false;// ratings have been given - end the routine
                }
            }
        }
    PolygonComponent polygon_submitbutton_liking
      fillColor = $submitbutton_fillcolor
      lineColor = $submitbutton_bordercolor
      lineWidth = submitbutton_edgethickness
      pos = submitbutton_xy
      saveStartStop = False
      shape = rectangle
      size = submitbutton_size
      startVal [condition] = ratingGiven
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    MouseComponent mouse_instructions_liking
      clickable = polygon_submitbutton_liking,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [condition] = ratingGiven
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    TextComponent text_test3
      color = black
      letterHeight = 0.03
      pos = (-0.2, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $t
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  Routine test_routine
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    TextComponent text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $trials.trialList[0]['activityUK']
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Flow
  Routine global_experiment_settings
  Routine jitter_settings
  Routine language_choice
  Routine mobile_instructions
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli/activities.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('activityID', 1), ('activityUK', 'Cinema'), ('activityGer', 'Kino'), ('monetaryValue', 10)]),
      OrderedDict([('activityID', 2), ('activityUK', 'Trampoline park'), ('activityGer', 'Jumphouse'), ('monetaryValue', 16)]),
      OrderedDict([('activityID', 3), ('activityUK', 'Indoor glow golf'), ('activityGer', 'Schwarzlicht Minigolf'), ('monetaryValue', 13)]),
      OrderedDict([('activityID', 4), ('activityUK', 'Escape room'), ('activityGer', 'Escape room'), ('monetaryValue', 54)]),
      OrderedDict([('activityID', 5), ('activityUK', 'Wellness'), ('activityGer', 'Wellness'), ('monetaryValue', 25)]),
      OrderedDict([('activityID', 6), ('activityUK', 'Rock wall climbing'), ('activityGer', 'Kletterhalle'), ('monetaryValue', 12)]),
      OrderedDict([('activityID', 7), ('activityUK', 'Zoo'), ('activityGer', 'Zoo'), ('monetaryValue', 23)]),
      OrderedDict([('activityID', 8), ('activityUK', 'Cooking course'), ('activityGer', 'Kochkurs'), ('monetaryValue', 90)]),
      OrderedDict([('activityID', 9), ('activityUK', 'Theatre'), ('activityGer', 'Theater'), ('monetaryValue', 25)]),
      OrderedDict([('activityID', 10), ('activityUK', 'Pottery'), ('activityGer', 'Töpferkurs'), ('monetaryValue', 20)]),
      OrderedDict([('activityID', 11), ('activityUK', 'Lasertag'), ('activityGer', 'Lasertag'), ('monetaryValue', 10)]),
      OrderedDict([('activityID', 12), ('activityUK', 'Museum'), ('activityGer', 'Museum'), ('monetaryValue', 10)]),
      OrderedDict([('activityID', 13), ('activityUK', 'Gym'), ('activityGer', 'Fitnessstudio'), ('monetaryValue', 45)])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
    Routine trial_settings
    Routine fixation
    Routine stimulus_rating
  LoopTerminator trials
  Routine end
