PsychoPy2experiment version="2023.2.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['participantID'], expName, expInfo['date'])
  Enable Escape = False
  Experiment info = {'participantID': '', 'studyID': 'BON001', 'session number': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['stimuli/friends-icon.png', 'stimuli/single-icon.png', 'DelayJitter/DelayJitter.csv', 'buttons/tilt_phone.png', 'buttons/germany_flag.png', 'buttons/uk_flag.png', 'stimuli/activities.csv']
  Save log file = False
  Screen = 1
  Show mouse = True
  Units = height
  Use version = 2022.2.3
  Window size (pixels) = [1707, 1067]
  color = 1.0000, 1.0000, 1.0000
  expName = willingness2pay
  keyboardBackend = ioHub
  logging level = error
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Routines
  Routine language_choice
    RoutineSettingsComponent language_choice
      saveStartStop = False
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    CodeComponent code_languagechoice
      Code Type = JS
      Begin JS Routine:
        // Window size
        window_height = window.innerHeight;
        window_width = window.innerWidth;
        xrange = (window_width / window_height);
        yrange = (window_height / window_width);
        last_xrange = xrange;

        // Positional arguments
        sourcetext_xy = [0.3*Math.max(1,xrange), -0.48*Math.max(1,yrange)];
      Each JS Frame:
        // Hovereffect for both countryflag-images
        if (!mobile_device){
            if (image_ukflag.contains(mouse_languagechoice)) {
                image_ukflag_opacity = opacity2;
            } else {
                image_ukflag_opacity = opacity1;
            }
            if (image_germanyflag.contains(mouse_languagechoice)) {
                image_germanyflag_opacity = opacity2;
            } else {
                image_germanyflag_opacity = opacity1;
            }
        }

        // Window size
        window_height = window.innerHeight;
        window_width = window.innerWidth;
        xrange = (window_width / window_height);
        if(xrange != last_xrange){
            // Size changed
            last_xrange = xrange;
            yrange = (window_height / window_width);
            sourcetext_xy = [0.3*Math.max(1,xrange), -0.48*Math.max(1,yrange)];
        }
      End JS Routine:
        // If clicked on the german (uk) flag, the languagechoice is set to german (english)
        if ((mouse_languagechoice.clicked_name[0] === "image_germanyflag")) {
            languagechoice = "ger";
        } else {
            languagechoice = "uk";
        }
        // Store chosen language
        expInfo["language"] = languagechoice;
        // Set texts according to languagechoice
        if ((languagechoice === "ger")) {
            // instructions routine
            instructions_text = "Im Folgenden werden Sie einige Fragen zu Freizeitaktivit\u00e4ten beantworten. Wir bitten Sie anzugeben, wie viel Sie bereit sind für die jeweils pr\u00e4sentierte Freizeitaktivit\u00e4t auszugeben, wenn Sie diese alleine unternehmen bzw. wie viel Sie bereit sind auszugeben, wenn Sie die Aktivität mit jemand anderem zusammen unternehmen.\nDie jeweilige Frage wird zusätzlich durch eins der hier auf der rechten Seite dargestellten Icons gekennzeichnet.\n\nUm Ihre Antworten einzugeben k\u00f6nnen Sie einen Regler \u00fcber eine Skala verschieben. Danach können Sie Ihre Eingabe bestätigen.";
            continuebutton_text = "Klicken Sie hier, wenn Sie die Instruktionen gelesen haben";
            // stimulus_rating routine
            stimulus_text = "Wie viel sind Sie bereit, für die folgende Freizeitaktivit\u00e4t auszugeben:";
            alone_text = "alleine";
            together_text = "zusammen";
            submitbutton_text = "Weiter";
            // end routine
            end_text = "Das Experiment ist nun beendet.\nVielen Dank f\u00fcr Ihre Teilnahme.";
            end_text2 = "Bitte schliessen Sie das Experiment nicht bevor das Fenster mit der Nachricht 'Thank you for your patience.' erscheint. \nDies kann einen Moment dauern.";
        } else {
            // instructions routine
            instructions_text =  "We will now ask you a few questions about free time activities. We will ask you to indicate how much you are willing to spend on the free time activity presented if you undertake it alone or how much you are willing to spend if you undertake the activity together with someone else.\nThe respective question is also indicated by one oft he icons shown here on the right.\n\nTo answer the questions, you can move the point on the scale. After this you can confirm your selection.";
            continuebutton_text = "Click here when you have read the instructions";
            // stimulus_rating routine
            stimulus_text = "How much are you willing to spend on the following free time activity:";
            alone_text = "alone";
            together_text = "together";
            submitbutton_text = "Submit";
            // end routine
            end_text = "The experiment is over.\nThank you for your participation.";
            end_text2 = "Please do not close the experiment before the window with the message 'Thank you for your patience.' appears. \nThis may take a moment.";
        }
    ImageComponent image_germanyflag
      image = buttons/germany_flag.png
      opacity [set every frame] = image_germanyflag_opacity 
      pos = (-0.3, -0.22)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_ukflag
      image = buttons/uk_flag.png
      opacity [set every frame] = image_ukflag_opacity 
      pos = (0.3, -0.22)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_languagechoice
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.95, 0.5)
      startVal [time (s)] = 0.0
      text = Choose your preferred language
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    MouseComponent mouse_languagechoice
      clickable = image_germanyflag, image_ukflag,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveParamsClickable = name
      saveStartStop = False
      startVal [time (s)] = 0.5
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    TextboxComponent textbox_sourceflag
      bold = False
      color = 0.6549, 0.6549, 0.6549
      editable = False
      letterHeight = 0.015
      pos [set every frame] = sourcetext_xy
      saveStartStop = False
      size = (0.3, 0.04)
      startVal [time (s)] = 0.0
      text = Icons from https://www.countryflags.com/
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  Routine instructions
    RoutineSettingsComponent instructions
      saveStartStop = False
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    CodeComponent code_instructions
      Code Type = JS
      Begin JS Routine:
        // Window size
        window_height = window.innerHeight;
        window_width = window.innerWidth;
        xrange = (window_width / window_height);
        yrange = (window_height / window_width);
        last_xrange = xrange;

        // Positional + size arguments
        button_instructions_xy = [0, (- 0.3)*Math.max(1,yrange)];
        button_instructions_size  = [0.5*Math.max(1,Math.sqrt(Math.sqrt(xrange))), 0.1*Math.max(1,yrange)];
        instructions_size = [0.6*Math.max(1,Math.sqrt(xrange)), 0.6*Math.max(1,Math.sqrt(yrange))];
        img_xy_alone = [0.325*Math.max(1,Math.sqrt(xrange)),0.2];
        img_xy_together = [0.325*Math.max(1,Math.sqrt(xrange)),0];
      Each JS Frame:
        // Hovereffect for continuebutton
        if (!mobile_device){
            if (polygon_continuebutton.contains(mouse_instructions)) {
                continuebutton_opacity = opacity2;
            } else {
                continuebutton_opacity = opacity1;
            }
        }

        // Window size
        window_height = window.innerHeight;
        window_width = window.innerWidth;
        xrange = (window_width / window_height);
        if(xrange != last_xrange){
            // Size changed
            last_xrange = xrange;
            yrange = (window_height / window_width);
            button_instructions_xy = [0, (- 0.3)*Math.max(1,yrange)];
            button_instructions_size  = [0.5*Math.max(1,Math.sqrt(Math.sqrt(xrange))), 0.1*Math.max(1,yrange)];
            instructions_size = [0.6*Math.max(1,Math.sqrt(xrange)), 0.6*Math.max(1,Math.sqrt(yrange))];
            img_xy_alone = [0.325*Math.max(1,Math.sqrt(xrange)),0.2];
            img_xy_together = [0.325*Math.max(1,Math.sqrt(xrange)),0];
        }
    TextboxComponent textbox_instructions
      alignment = center-left
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.035
      pos = (-0.15, 0.1)
      saveStartStop = False
      size [set every frame] = instructions_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions_text
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    ImageComponent image_icon_alone
      image [set every repeat] = $img_source_alone
      pos [set every frame] = img_xy_alone
      saveStartStop = False
      size [set every repeat] = img_size_alone
      startVal [time (s)] = 0.0
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    ImageComponent image_icon_together
      image [set every repeat] = $img_source_together
      pos [set every frame] = img_xy_together
      saveStartStop = False
      size [set every repeat] = img_size_together
      startVal [time (s)] = 0.0
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    MouseComponent mouse_instructions
      clickable = polygon_continuebutton,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.5
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    PolygonComponent polygon_continuebutton
      fillColor = $continuebutton_fillcolor
      lineColor = $continuebutton_bordercolor
      lineWidth = continuebutton_edgethickness
      opacity [set every frame] = continuebutton_opacity
      pos [set every frame] = button_instructions_xy
      saveStartStop = False
      shape = rectangle
      size [set every frame] = button_instructions_size
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_continuebutton
      bold = False
      color = black
      editable = False
      letterHeight = 0.04
      pos [set every frame] = button_instructions_xy
      saveStartStop = False
      size [set every frame] = button_instructions_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $continuebutton_text
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  Routine stimulus_rating
    RoutineSettingsComponent stimulus_rating
      saveStartStop = False
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    CodeComponent code_updateState
      Code Type = JS
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      Begin JS Routine:
        var ratingGiven = false //track if ratings have been given to all sliders
        var mousePos = [0,0];

        var value_text = "";

        // Window size
        window_height = window.innerHeight;
        window_width = window.innerWidth;
        xrange = (window_width / window_height);
        yrange = (window_height / window_width);
        last_xrange = xrange;

        // Positional and size arguments
        slidertext_size = [0.8*Math.max(1,Math.sqrt(xrange)), 0.2];
        slidertext_xy = [0, 0.35*Math.max(1,Math.sqrt(yrange))];
        activitytext_size = [0.8*Math.max(1,Math.sqrt(xrange)), 0.2];
        activitytext_xy = [0, 0.25*Math.max(1,Math.sqrt(yrange))];
        currentvalue_xy = [0, -0.15*Math.max(1,Math.sqrt(Math.sqrt(yrange)))];
        img_xy = [0, 0.1*Math.max(1,Math.sqrt(yrange))];
        slider_w = 0.75*Math.max(1,Math.sqrt(xrange));
        slider_h = 0.08;
        slider_size = [slider_w, slider_h];
        low_x = slider_center_x-slider_w/2;
        up_x = slider_center_x+slider_w/2;
        slider_label1_xy = [slider_xy[0] - (slider_size[0] / 2) - 0.05, slider_xy[1] - (slider_size[1]/2) - 0.04];
        slider_label2_xy = [slider_xy[0] + (slider_size[0] / 2) + 0.05, slider_xy[1] - (slider_size[1]/2) - 0.04];
        submitbutton_xy = [0, (- 0.3)*Math.max(1,yrange)];
      Each JS Frame:
        //// Continuebutton display condition
        cond_submitbutton = ratingGiven;

        // Calculate rating by mouse position
        // (needed to get real-time-feedback; slider.getRating()
        //  only updates after marker was dragged)
        if(slider.isMarkerDragging()){
            mousePos = mouse.getPos();
            xval = mousePos[0];
            if(xval>up_x){ // xpos of mouse > upper slider limit
                rating = up_tick;
            }else{
            if(xval<low_x){ // xpos of mouse < lower slider limit
                rating = low_tick;
            }else{
                // interpolate rating from mouse pos
                rating = (xval-low_x)*(up_tick-low_tick)/(up_x-low_x);
            }}
            value_text = getNiceValue(rating,languagechoice) + "€";
        }
        // check if rating has been given before allowing the participant to press submit
        // use "slider.getRating();" since it only changes if dragging process is done
        rating_done = slider.getRating();
        if (rating_done != null){
            ratingGiven = true;
        }

        // Hovereffect for submitbutton
        if (!mobile_device && cond_submitbutton){
            if (polygon_submitbutton.contains(mouse)) {
                submitbutton_opacity = opacity2;
            } else {
                submitbutton_opacity = opacity1;
            }
        }

        // Check if continuebutton was pressed and end routine if true
        if(ratingGiven && polygon_submitbutton.contains(mouse)){
            button_pressed = mouse.getPressed()[0];
            if(button_pressed == 1){
                continueRoutine = false;
            }
        }

        // Window size
        window_height = window.innerHeight;
        window_width = window.innerWidth;
        xrange = (window_width / window_height);
        if(xrange != last_xrange){
            // Size changed
            last_xrange = xrange;
            yrange = (window_height / window_width);
            slidertext_size = [0.8*Math.max(1,Math.sqrt(xrange)), 0.2];
            slidertext_xy = [0, 0.35*Math.max(1,Math.sqrt(yrange))];
            activitytext_size = [0.8*Math.max(1,Math.sqrt(xrange)), 0.2];
            activitytext_xy = [0, 0.25*Math.max(1,Math.sqrt(yrange))];
            currentvalue_xy = [0, -0.15*Math.max(1,Math.sqrt(Math.sqrt(yrange)))];
            img_xy = [0, 0.1*Math.max(1,Math.sqrt(yrange))];
            slider_w = 0.75*Math.max(1,Math.sqrt(xrange));
            slider_h = 0.08;
            slider_size = [slider_w, slider_h];
            low_x = slider_center_x-slider_w/2;
            up_x = slider_center_x+slider_w/2;
            slider_label1_xy = [slider_xy[0] - (slider_size[0] / 2) - 0.05, slider_xy[1] - (slider_size[1]/2) - 0.04];
            slider_label2_xy = [slider_xy[0] + (slider_size[0] / 2) + 0.05, slider_xy[1] - (slider_size[1]/2) - 0.04];
            submitbutton_xy = [0, (- 0.3)*Math.max(1,yrange)];
        }
      End JS Routine:
        // Save rating+RT
        rating = Number(getNiceValue(slider.getRating(),"uk"));
        expInfo['willi2pay'] = rating;
        expInfo['Trial_RT'] = t;

        // Reset
        value_text = "";
        ratingGiven = false;
    TextboxComponent textbox_slidertext
      bold = False
      color = black
      editable = False
      letterHeight = 0.035
      pos [set every frame] = slidertext_xy
      saveStartStop = False
      size [set every frame] = slidertext_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $stimulus_text
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    TextboxComponent textbox_activitytext
      bold = False
      color = black
      editable = False
      letterHeight = 0.065
      pos [set every frame] = activitytext_xy
      saveStartStop = False
      size [set every frame] = activitytext_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $activity_text
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    ImageComponent image_icon
      image [set every repeat] = $img_source
      pos [set every frame] = img_xy
      saveStartStop = False
      size [set every repeat] = img_size
      startVal [time (s)] = 0.0
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    SliderComponent slider
      borderColor = 0.7804, 0.8118, 0.8118
      color = 0.7804, 0.8118, 0.8118
      fillColor = -1.0000, -1.0000, 0.0902
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = slider_xy
      saveStartStop = False
      size [set every frame] = slider_size
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = slider
      ticks = slider_ticks
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    TextboxComponent textbox_l01
      alignment = center-left
      anchor = center-left
      bold = False
      color = black
      editable = False
      italic = True
      letterHeight = 0.05
      pos [set every frame] = slider_label1_xy
      saveStartStop = False
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
      text = $l01_text
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    TextboxComponent textbox_l02
      alignment = center-right
      anchor = center-right
      bold = False
      color = black
      editable = False
      italic = True
      letterHeight = 0.05
      pos [set every frame] = slider_label2_xy
      saveStartStop = False
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
      text = $l02_text
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    TextboxComponent textbox_currentValue
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos [set every frame] = currentvalue_xy
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
      text [set every frame] = $value_text
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    PolygonComponent polygon_submitbutton
      fillColor = $submitbutton_fillcolor
      lineColor = $submitbutton_bordercolor
      lineWidth = submitbutton_edgethickness
      opacity [set every frame] = submitbutton_opacity
      pos [set every frame] = submitbutton_xy
      saveStartStop = False
      shape = rectangle
      size = submitbutton_size
      startVal [condition] = cond_submitbutton
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    TextboxComponent textbox_submitbutton
      bold = False
      color = black
      editable = False
      letterHeight = 0.075
      pos [set every frame] = submitbutton_xy
      saveStartStop = False
      size = submitbutton_size
      startVal [condition] = cond_submitbutton
      text [set every repeat] = $submitbutton_text
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    MouseComponent mouse
      clickable = polygon_submitbutton,
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      saveStartStop = False
      startVal [time (s)] = 0
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  Routine end
    RoutineSettingsComponent end
      saveStartStop = False
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    TextboxComponent textbox_end
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      size = (0.9, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text [set every repeat] = $end_text
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    TextboxComponent textbox_wait
      bold = False
      color = black
      editable = False
      letterHeight = 0.03
      pos = (0, -0.1)
      saveStartStop = False
      size = (0.7, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text [set every repeat] = $end_text2
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  Routine trial_settings
    RoutineSettingsComponent trial_settings
      saveStartStop = False
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    CodeComponent code_trialsettings
      Code Type = JS
      Begin JS Routine:
        //// Set fixation duration
        fixation_duration = ISI + jitter[idx];

        //// Define trial content
        // get random index
        rand_i = RANDIS[idx];
        // get activity + condition
        activityID = ActivityIDs[rand_i];
        activity = Activities[rand_i];
        condition = Conditions[rand_i];
        // Set texts + icons
        if (condition == "alone"){
            activity_text = activity + " - " + alone_text;
            img_source = img_source_alone;
            img_size = img_size_alone;
        } else {
            activity_text = activity + " - " + together_text;
            img_source = img_source_together;
            img_size = img_size_together;
        }
      End JS Routine:
        // Increment trial index
        idx += 1;

        //// Save trial data
        expInfo['fixation_dur'] = fixation_duration;
        expInfo['activityID'] = activityID;
        expInfo['condition'] = condition;
  Routine jitter_settings
    RoutineSettingsComponent jitter_settings
      saveStartStop = False
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    CodeComponent code_jitter
      Code Type = JS
      Begin JS Experiment:
        // Load jitter file
        jitterList = new TrialHandler({
            psychoJS: psychoJS,
            nReps: 1, method: TrialHandler.Method.SEQUENTIAL,
            extraInfo: expInfo, originPath: undefined,
            trialList: "DelayJitter/DelayJitter.csv",
            seed: undefined, name: 'jitterList'
        });

        // Init jitter shuffle variables
        jitter = []; // Storage for shuffled jitter
        const N_jitter = jitterList.trialList.length; // Number of jitter entries
        var n = jitterList.trialList.length; // Number of unshuffled jitter entries
        var rand_i = 0; // random sampled index

        // Shuffle jitter
        for (var i = 0; (i < N_jitter); i += 1) {
            rand_i = Number.parseInt((n * Math.random()));
            jitter.push(jitterList.trialList[rand_i]['delay']);
            jitterList.trialList.splice(rand_i, 1);
            n -= 1;
        }
  Routine fixation
    RoutineSettingsComponent fixation
      saveStartStop = False
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    PolygonComponent fixation_cross
      fillColor = black
      saveStartStop = False
      shape = cross
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = fixation_duration
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  Routine global_experiment_settings
    RoutineSettingsComponent global_experiment_settings
      saveStartStop = False
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    CodeComponent code_global_settings
      Code Type = JS
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      Before JS Experiment:
        // Function takes number n and translates it to a string with ","
        // for german (lng_ch=languagechoice="ger) and "." for english presentation;
        // Rounded to .50
        var getNiceValue = function (n, lng_ch) {
            let dot = ".";
            let stringRep = n.toString();
            let stringRep_new = "";
            let cutout = 0;
            let rest = "";
            let breaked = false;
            if (lng_ch === "ger"){
                dot = ",";
            }
            for (let i = 0; i < stringRep.length; i++) {
                if(stringRep[i] === "."){
                    stringRep_new = stringRep_new + dot;
                    rest = stringRep.slice((i+1)); // everything behind decimal point
                    // two or more digits behind decimal point
                    if(rest.length >= 2){
                        cutout = Number(rest.slice(0,2));
                        if(cutout > 25 && cutout < 75){
                            stringRep_new = stringRep_new + "50";
                        } else {
                            stringRep_new = Math.round(n).toString() + dot + "00";
                        }
                    // one digit behind decimal point
                    } else {
                        cutout = Number(rest.slice(0,1));
                        if(cutout > 2.5 && cutout < 7.5){
                            stringRep_new = stringRep_new + "50";
                        } else {
                            stringRep_new = Math.round(n).toString() + dot + "00";
                        }
                    }
                    breaked = true;
                    break
                }
                stringRep_new = stringRep_new + stringRep[i];
            }
            // no digit after decimal point (no decimal point found)
            if(!breaked){
                stringRep_new = stringRep_new + dot + "00";
            }
            return stringRep_new;
        }
      Begin JS Experiment:
        // Read in activities file
        ActivityList = new TrialHandler({
          psychoJS: psychoJS,
          nReps: 1, method: TrialHandler.Method.SEQUENTIAL,
          extraInfo: expInfo, originPath: undefined,
          trialList: "stimuli/activities.csv",
          seed: undefined, name: 'ActivityList'
        });

        // Define number of trials
        N = ActivityList.trialList.length;
        N_TRIALS = 2*N; // Each activity presented in alone- and in together condition

        // Detect if mobile device is used
        // (only works reliable for mobile phones, not for tablets)
        mobile_device = false;
        if(/(android|bb\d+|meego).+mobile|avantgo|bada\/|blackberry|blazer|compal|elaine|fennec|hiptop|iemobile|ip(hone|od)|ipad|iris|kindle|Android|Silk|lge |maemo|midp|mmp|netfront|opera m(ob|in)i|palm( os)?|phone|p(ixi|re)\/|plucker|pocket|psp|series(4|6)0|symbian|treo|up\.(browser|link)|vodafone|wap|windows (ce|phone)|xda|xiino/i.test(navigator.userAgent)
            || /1207|6310|6590|3gso|4thp|50[1-6]i|770s|802s|a wa|abac|ac(er|oo|s\-)|ai(ko|rn)|al(av|ca|co)|amoi|an(ex|ny|yw)|aptu|ar(ch|go)|as(te|us)|attw|au(di|\-m|r |s )|avan|be(ck|ll|nq)|bi(lb|rd)|bl(ac|az)|br(e|v)w|bumb|bw\-(n|u)|c55\/|capi|ccwa|cdm\-|cell|chtm|cldc|cmd\-|co(mp|nd)|craw|da(it|ll|ng)|dbte|dc\-s|devi|dica|dmob|do(c|p)o|ds(12|\-d)|el(49|ai)|em(l2|ul)|er(ic|k0)|esl8|ez([4-7]0|os|wa|ze)|fetc|fly(\-|_)|g1 u|g560|gene|gf\-5|g\-mo|go(\.w|od)|gr(ad|un)|haie|hcit|hd\-(m|p|t)|hei\-|hi(pt|ta)|hp( i|ip)|hs\-c|ht(c(\-| |_|a|g|p|s|t)|tp)|hu(aw|tc)|i\-(20|go|ma)|i230|iac( |\-|\/)|ibro|idea|ig01|ikom|im1k|inno|ipaq|iris|ja(t|v)a|jbro|jemu|jigs|kddi|keji|kgt( |\/)|klon|kpt |kwc\-|kyo(c|k)|le(no|xi)|lg( g|\/(k|l|u)|50|54|\-[a-w])|libw|lynx|m1\-w|m3ga|m50\/|ma(te|ui|xo)|mc(01|21|ca)|m\-cr|me(rc|ri)|mi(o8|oa|ts)|mmef|mo(01|02|bi|de|do|t(\-| |o|v)|zz)|mt(50|p1|v )|mwbp|mywa|n10[0-2]|n20[2-3]|n30(0|2)|n50(0|2|5)|n7(0(0|1)|10)|ne((c|m)\-|on|tf|wf|wg|wt)|nok(6|i)|nzph|o2im|op(ti|wv)|oran|owg1|p800|pan(a|d|t)|pdxg|pg(13|\-([1-8]|c))|phil|pire|pl(ay|uc)|pn\-2|po(ck|rt|se)|prox|psio|pt\-g|qa\-a|qc(07|12|21|32|60|\-[2-7]|i\-)|qtek|r380|r600|raks|rim9|ro(ve|zo)|s55\/|sa(ge|ma|mm|ms|ny|va)|sc(01|h\-|oo|p\-)|sdk\/|se(c(\-|0|1)|47|mc|nd|ri)|sgh\-|shar|sie(\-|m)|sk\-0|sl(45|id)|sm(al|ar|b3|it|t5)|so(ft|ny)|sp(01|h\-|v\-|v )|sy(01|mb)|t2(18|50)|t6(00|10|18)|ta(gt|lk)|tcl\-|tdg\-|tel(i|m)|tim\-|t\-mo|to(pl|sh)|ts(70|m\-|m3|m5)|tx\-9|up(\.b|g1|si)|utst|v400|v750|veri|vi(rg|te)|vk(40|5[0-3]|\-v)|vm40|voda|vulc|vx(52|53|60|61|70|80|81|83|85|98)|w3c(\-| )|webc|whit|wi(g |nc|nw)|wmlb|wonu|x700|yas\-|your|zeto|zte\-/i.test(navigator.userAgent.substr(0,4))) {
            mobile_device = true;
        }

        // Define opacities
        opacity1 = 0.75; // default opacity of buttons
        opacity2 = 1; // opacity if hovered over button

        // inter stimulus interval in s (lower bound)
        ISI = 0.1;

        // Slider settings
        low_tick = 0;
        up_tick = 100;
        slider_center_x = 0;
        slider_center_y = -0.05;
        slider_xy = [slider_center_x,slider_center_y];
        slider_ticks = [low_tick,up_tick];
        l01_text = low_tick.toString() + "€";
        l02_text = up_tick.toString() + "€";

        // Buttons settings
        continuebutton_edgethickness = 2;
        continuebutton_fillcolor = [0.9,0.9,0.9];
        continuebutton_bordercolor = [-1,-1,-1];
        submitbutton_size = [0.35, 0.12];
        submitbutton_edgethickness = 2;
        submitbutton_fillcolor = [0.9,0.9,0.9];
        submitbutton_bordercolor = [-1,-1,-1];

        // Trial icons
        img_source_alone = "stimuli/single-icon.png";
        img_source_together = "stimuli/friends-icon.png";
        img_size_alone = [0.0645,0.15];
        img_size_together = [0.15,0.1125];

        // initial opacities
        if (mobile_device){
            opacity1 = 1; // no hovereffect for touchscreen
        }
        image_ukflag_opacity = opacity1;
        image_germanyflag_opacity = opacity1;
        submitbutton_opacity = opacity1;

        // current trial index
        idx = 0;
  Routine trial_definer
    RoutineSettingsComponent trial_definer
      saveStartStop = False
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    CodeComponent code_trial_randomizer
      Code Type = JS
      Begin JS Routine:
        //// Helper functions:
        // Repeat each element count times
        function repeatArray(arr, count) {
          return arr.flatMap(item => Array(count).fill(item));
        }
        // Shuffle array with Fisher–Yates shuffle
        function shuffleArray(arr) {
          for (let i = arr.length - 1; i > 0; i--) {
            const j = Math.floor(Math.random() * (i + 1));
            [arr[i], arr[j]] = [arr[j], arr[i]];
          }
          return arr;
        }
        // Create random array with values 0 to n
        function createRandomArray(n) {
          const initialArray = Array.from({ length: n }, (_, index) => index);
          return shuffleArray(initialArray);
        }

        //// Load relevant items
        if ((languagechoice === "ger")) {
            activityCol = "activityGer";
        } else {
            activityCol = "activityUK";
        }
        ActivityIDs = [];
        Activities = [];
        for (var i = 0; (i < N_TRIALS); i += 1) {
            ActivityIDs.push(ActivityList.trialList[(i%N)]['activityID']);
            Activities.push(ActivityList.trialList[(i%N)][activityCol]);
        }
        Conditions = repeatArray(["alone", "together"], N);

        //// Create random index list
        RANDIS = createRandomArray(N_TRIALS);
Flow
  Routine global_experiment_settings
  Routine jitter_settings
  Routine language_choice
  Routine trial_definer
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = N_TRIALS
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    conditions:
      [OrderedDict([('activityID', 1), ('activityUK', 'Cinema'), ('activityGer', 'Kino'), ('monetaryValue', 10)]),
      OrderedDict([('activityID', 2), ('activityUK', 'Jumphouse'), ('activityGer', 'Jumphouse'), ('monetaryValue', 16)]),
      OrderedDict([('activityID', 3), ('activityUK', 'Black light minigolf'), ('activityGer', 'Schwarzlicht Minigolf'), ('monetaryValue', 13)]),
      OrderedDict([('activityID', 4), ('activityUK', 'Escape room'), ('activityGer', 'Escape room'), ('monetaryValue', 54)]),
      OrderedDict([('activityID', 5), ('activityUK', 'Wellness'), ('activityGer', 'Wellness'), ('monetaryValue', 25)]),
      OrderedDict([('activityID', 6), ('activityUK', 'Climbing hall'), ('activityGer', 'Kletterhalle'), ('monetaryValue', 12)]),
      OrderedDict([('activityID', 7), ('activityUK', 'Zoo'), ('activityGer', 'Zoo'), ('monetaryValue', 23)]),
      OrderedDict([('activityID', 8), ('activityUK', 'Cooking course'), ('activityGer', 'Kochkurs'), ('monetaryValue', 90)]),
      OrderedDict([('activityID', 9), ('activityUK', 'Theatre'), ('activityGer', 'Theater'), ('monetaryValue', 25)]),
      OrderedDict([('activityID', 10), ('activityUK', 'Pottery'), ('activityGer', 'Töpferkurs'), ('monetaryValue', 20)]),
      OrderedDict([('activityID', 11), ('activityUK', 'Lasertag'), ('activityGer', 'Lasertag'), ('monetaryValue', 10)]),
      OrderedDict([('activityID', 12), ('activityUK', 'Museum'), ('activityGer', 'Museum'), ('monetaryValue', 10)]),
      OrderedDict([('activityID', 13), ('activityUK', 'Gym'), ('activityGer', 'Fitnessstudio'), ('monetaryValue', 45)])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
    Routine trial_settings
    Routine fixation
    Routine stimulus_rating
  LoopTerminator trials
  Routine end
