PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s_S%s_%s' % (expName, studyID, expInfo['participantID'], expInfo['sessionID'], expInfo['date'])
  Experiment info = {'participantID': 'pilot1', 'sessionID': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['buttons/germany_flag.png', 'buttons/uk_flag.png', 'stimuli/Food_Stimuli/1.jpg', 'stimuli/Food_Stimuli/3.jpg', 'stimuli/Food_Stimuli/4.jpg', 'stimuli/Food_Stimuli/8.jpg', 'stimuli/Food_Stimuli/12.jpg', 'stimuli/Food_Stimuli/14.jpg', 'stimuli/Food_Stimuli/20.jpg', 'stimuli/Food_Stimuli/24.jpg', 'stimuli/Food_Stimuli/26.jpg', 'stimuli/Food_Stimuli/30.jpg', 'stimuli/Food_Stimuli/33.jpg', 'stimuli/Food_Stimuli/34.jpg', 'stimuli/Food_Stimuli/36.jpg', 'stimuli/Food_Stimuli/38.jpg', 'stimuli/Food_Stimuli/52.jpg', 'stimuli/Food_Stimuli/58.jpg', 'stimuli/Food_Stimuli/61.jpg', 'stimuli/Food_Stimuli/62.jpg', 'stimuli/Food_Stimuli/72.jpg', 'stimuli/Food_Stimuli/76.jpg', 'stimuli/Food_Stimuli/81.jpg', 'stimuli/Food_Stimuli/103.jpg', 'stimuli/Food_Stimuli/104.jpg', 'stimuli/Food_Stimuli/114.jpg', 'stimuli/Food_Stimuli/115.jpg', 'stimuli/Food_Stimuli/121.jpg', 'stimuli/Food_Stimuli/131.jpg', 'stimuli/Food_Stimuli/136.jpg', 'stimuli/Food_Stimuli/138.jpg', 'stimuli/Food_Stimuli/141.jpg', 'stimuli/Food_Stimuli/142.jpg', 'stimuli/Food_Stimuli/144.jpg', 'stimuli/Food_Stimuli/157.jpg', 'stimuli/Food_Stimuli/167.jpg', 'stimuli/Food_Stimuli/170.jpg', 'stimuli/Food_Stimuli/171.jpg', 'stimuli/Food_Stimuli/180.jpg', 'stimuli/Food_Stimuli/181.jpg', 'stimuli/Food_Stimuli/183.jpg', 'stimuli/Food_Stimuli/189.jpg', 'stimuli/Food_Stimuli/190.jpg', 'stimuli/Food_Stimuli/192.jpg', 'stimuli/Food_Stimuli/199.jpg', 'stimuli/Food_Stimuli/202.jpg', 'stimuli/Food_Stimuli/203.jpg', 'stimuli/Food_Stimuli/224.jpg', 'stimuli/Food_Stimuli/228.jpg', 'stimuli/Food_Stimuli/241.jpg', 'stimuli/Food_Stimuli/256.jpg', 'stimuli/Food_Stimuli/259.jpg', 'stimuli/Food_Stimuli/263.jpg', 'stimuli/Food_Stimuli/272.jpg', 'stimuli/Food_Stimuli/300.jpg', 'stimuli/Food_Stimuli/321.jpg', 'stimuli/Food_Stimuli/322.jpg', 'stimuli/Food_Stimuli/323.jpg', 'stimuli/Food_Stimuli/326.jpg', 'stimuli/Food_Stimuli/328.jpg', 'stimuli/Food_Stimuli/331.jpg', 'stimuli/Food_Stimuli/337.jpg', 'stimuli/imageList.xlsx', 'stimuli/instructions.xlsx']
  Screen = 1
  Show mouse = True
  Units = height
  Use version = 2024.2.4
  Window size (pixels) = [2048, 1152]
  color = 1.0000, 1.0000, 1.0000
  expName = food_rating_v2
  frameRateMsg = Attempting to measure frame rate of screen, please hold your breath...
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine fixation
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    CodeComponent code_fixation
      Code Type = Auto->JS
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      Begin Routine:
        myStart = globalClock.getTime()
      End Routine:
        myEnd = globalClock.getTime()
        myDur = myEnd - myStart
        thisExp.addData('isiDur', myDur)
    PolygonComponent fixation_cross
      fillColor = black
      saveStartStop = False
      shape = cross
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine language_choice
    RoutineSettingsComponent language_choice
      saveStartStop = False
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    CodeComponent code_languagechoice
      Code Type = JS
      Begin JS Experiment:
        languagechoice = null;
      Begin JS Routine:
        // Window size
        // in js: 1=height; 0=width
        window_height = psychoJS.window.size[1];
        window_width = psychoJS.window.size[0];

        xrange = (window_width / window_height);
        yrange = (window_height / window_width);
        last_xrange = xrange;

        // Positional arguments
        sourcetext_xy = [(0.3 * Math.max(1, xrange)), ((- 0.48) * Math.max(1, yrange))];
      Each JS Frame:
        // Hovereffect for both countryflag-images
        if ((! mobile_device)) {
            if (image_ukflag.contains(mouse_languagechoice)) {
                image_ukflag_opacity = opacity2;
            } else {
                image_ukflag_opacity = opacity1;
            }
            if (image_germanyflag.contains(mouse_languagechoice)) {
                image_germanyflag_opacity = opacity2;
            } else {
                image_germanyflag_opacity = opacity1;
            }
        }

        // Window size
        window_height = psychoJS.window.size[1];
        window_width = psychoJS.window.size[0];
        xrange = (window_width / window_height);

        if ((xrange !== last_xrange)) {
            // Size changed
            last_xrange = xrange;
            yrange = (window_height / window_width);
            sourcetext_xy = [(0.3 * Math.max(1, xrange)), ((- 0.48) * Math.max(1, yrange))];
        }
      End JS Routine:
        // If clicked on the german (uk) flag, the language choice is set
        // to german (english)
        if ((mouse_languagechoice.clicked_name[0] === "image_germanyflag")) {
            languagechoice = "ger";
        } else {
            languagechoice = "uk";
        }

        // Store chosen language
        expInfo["language"] = languagechoice;

        // set some widely used text-options
        if ((languagechoice === "ger")) {
            submitbutton_text = "Weiter";
            reminder_text = "Bitte geben Sie \u00fcber den Slider eine Reaktion ab, um fortfahren zu k\u00f6nnen!";
            // text & labels for conditions
            text_wanting = "Wie sehr wollen Sie das in diesem Durchgang Gezeigte essen?";
            labels_wanting = ["\u00dcberhaupt nicht", "Sehr stark"];
            categoryWanting = "Verlangen";
            text_healthiness = "Wie gesund sch\u00e4tzen Sie dieses Essen ein ?";
            labels_healthiness = ["\u00dcberhaupt nicht", "Sehr"];
            categoryHealthiness = "Gesundheit";
            text_sustainability = "Wie \u00f6kologisch nachhaltig sch\u00e4tzen Sie dieses Essen ein?";
            labels_sustainability = ["\u00dcberhaupt nicht", "Sehr"];
            categorySustainability = "\u00f6kologische Nachhaltigkeit";
            text_liking = "Bitte bewerten Sie das Pr\u00e4sentierte im Vergleich zu allen bisher in ihrem Leben erfahrenen Empfindungen.";
            labels_liking = ["am allerst\u00e4rksten gemochte \nEmpfindung, die vorstellbar ist",
            "extrem gern", "sehr gern", "gern", "ein bisschen gern", "neutral",
            "ein bisschen ungern", "ungern", "sehr ungern", "extrem ungern",
            "am allerst\u00e4rksten zuwidere \nEmpfindung, die vorstellbar ist"];
            categoryLiking = "Geschmack";
        } else {
            submitbutton_text = "Submit";
            reminder_text = "Please give a reaction via the slider to be able to continue!";
            // text & labels for conditions
            text_wanting = "How much do you want to eat the item in this trial?";
            labels_wanting = ["Not at all", "Very much"];
            categoryWanting = "wanting";
            text_healthiness = "How healthy do you think this food is?";
            labels_healthiness = ["Not at all", "Very"];
            categoryHealthiness = "healthiness";
            text_sustainability = "How environmentally sustainable do you think this food is?";
            labels_sustainability = ["Not at all", "Very"];
            categorySustainability = "environmental sustainability";
            text_liking = "Please rate the reward in comparison with all of the sensations you have experienced in your life.";
            labels_liking = ["most liked sensation imaginable", "like extremely",
            "like very much", "like moderately", "like slightly", "neutral",
            "slightly dislike", "moderately dislike", "dislike very much",
            "extremely dislike", "most disliked sensation imaginable"];
            categoryLiking = "liking";
        }
    ImageComponent image_germanyflag
      image = buttons/germany_flag.png
      opacity [set every frame] = image_germanyflag_opacity 
      pos = (-0.3, -0.22)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_ukflag
      image = buttons/uk_flag.png
      opacity [set every frame] = image_ukflag_opacity 
      pos = (0.3, -0.22)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_languagechoice
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.95, 0.5)
      startVal [time (s)] = 0.0
      text = Choose your preferred language
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    MouseComponent mouse_languagechoice
      clickable = image_germanyflag, image_ukflag,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveParamsClickable = name
      saveStartStop = False
      startVal [time (s)] = 0.5
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    TextboxComponent textbox_sourceflag
      bold = False
      color = 0.6549, 0.6549, 0.6549
      editable = False
      letterHeight = 0.015
      pos [set every frame] = sourcetext_xy
      saveStartStop = False
      size = (0.3, 0.04)
      startVal [time (s)] = 0.0
      text = Icons from https://www.countryflags.com/
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  Routine end
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    CodeComponent code_end
      Code Type = Auto->JS
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      Begin Routine:
        if languagechoice == "ger":
            # end routine
            end_text = "Das Experiment ist nun beendet.\nVielen Dank f\u00fcr Ihre Teilnahme."
            end_text2 = "Bitte schliessen Sie das Experiment nicht bevor das Fenster mit der Nachricht 'Thank you for your patience.' erscheint. \nDies kann einen Moment dauern."
        else:
            # end routine
            end_text = "The experiment is over.\nThank you for your participation."
            end_text2 = "Please do not close the experiment before the window with the message 'Thank you for your patience.' appears. \nThis may take a moment."
    TextboxComponent textbox_end
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      size = (0.9, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $end_text
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    TextboxComponent textbox_wait
      bold = False
      color = black
      editable = False
      letterHeight = 0.03
      pos = (0, -0.1)
      saveStartStop = False
      size = (0.7, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $end_text2
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    CodeComponent code_storeToShelf
      Code Type = JS
      Begin JS Routine:
        // Write food ratings to shelf "food_ratings"
        // Since the field is globally visible (Shelf->Scope->Designer) we have to specify that
        psychoJS.shelf.setDictionaryFieldValue({
            key: ["food_ratings", "@designer"],
            fieldName: expInfo['participantID'],
            fieldValue: image_conditions});
            // the combined array image_conditions holds the food ratings
  Routine global_vars
    RoutineSettingsComponent global_vars
      saveStartStop = False
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    CodeComponent code_global
      Code Type = Auto->JS
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      Begin Experiment:
        # Define opacities for hover buttons
        opacity1 = 0.75; # default opacity of buttons
        opacity2 = 1; # opacity if hovered over button

        # prep some vars
        reminder_text = 'init'
        sliderH_text = "init"
        sliderH_leftAnchor_text = "init"
        sliderH_rightAnchor_text = "init"

        # Window size
        # in js: 1=height; 0=width
        window_height = win.size[1]
        window_width = win.size[0]
        xrange = (window_width / window_height)
    CodeComponent code_expInfoHandling
      Code Type = JS
      Before JS Experiment:
        // the studyID is initiated here in order to make it available
        // for the filename
        const studyID = "BON006";
      Begin JS Experiment:
        // these infos are added to the experiment here, and not before experiment,
        // because they shall not appear in the input dialog at start.
        expInfo["studyID"] = studyID;
  Routine mobile_detection
    RoutineSettingsComponent mobile_detection
      saveStartStop = False
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    CodeComponent code_mobile
      Code Type = Both
      Begin Experiment:
        # ATTENTION - the javascript-part is unique!
        # don't auto-translate from python to javascript (Auto->JS)!
        mobile_device = False
      Begin JS Experiment:
        // Detect if mobile device is used
        // (only works reliable for mobile phones, not for tablets)
        mobile_device = false;
        if(/(android|bb\d+|meego).+mobile|avantgo|bada\/|blackberry|blazer|compal|elaine|fennec|hiptop|iemobile|ip(hone|od)|ipad|iris|kindle|Android|Silk|lge |maemo|midp|mmp|netfront|opera m(ob|in)i|palm( os)?|phone|p(ixi|re)\/|plucker|pocket|psp|series(4|6)0|symbian|treo|up\.(browser|link)|vodafone|wap|windows (ce|phone)|xda|xiino/i.test(navigator.userAgent)
          || /1207|6310|6590|3gso|4thp|50[1-6]i|770s|802s|a wa|abac|ac(er|oo|s\-)|ai(ko|rn)|al(av|ca|co)|amoi|an(ex|ny|yw)|aptu|ar(ch|go)|as(te|us)|attw|au(di|\-m|r |s )|avan|be(ck|ll|nq)|bi(lb|rd)|bl(ac|az)|br(e|v)w|bumb|bw\-(n|u)|c55\/|capi|ccwa|cdm\-|cell|chtm|cldc|cmd\-|co(mp|nd)|craw|da(it|ll|ng)|dbte|dc\-s|devi|dica|dmob|do(c|p)o|ds(12|\-d)|el(49|ai)|em(l2|ul)|er(ic|k0)|esl8|ez([4-7]0|os|wa|ze)|fetc|fly(\-|_)|g1 u|g560|gene|gf\-5|g\-mo|go(\.w|od)|gr(ad|un)|haie|hcit|hd\-(m|p|t)|hei\-|hi(pt|ta)|hp( i|ip)|hs\-c|ht(c(\-| |_|a|g|p|s|t)|tp)|hu(aw|tc)|i\-(20|go|ma)|i230|iac( |\-|\/)|ibro|idea|ig01|ikom|im1k|inno|ipaq|iris|ja(t|v)a|jbro|jemu|jigs|kddi|keji|kgt( |\/)|klon|kpt |kwc\-|kyo(c|k)|le(no|xi)|lg( g|\/(k|l|u)|50|54|\-[a-w])|libw|lynx|m1\-w|m3ga|m50\/|ma(te|ui|xo)|mc(01|21|ca)|m\-cr|me(rc|ri)|mi(o8|oa|ts)|mmef|mo(01|02|bi|de|do|t(\-| |o|v)|zz)|mt(50|p1|v )|mwbp|mywa|n10[0-2]|n20[2-3]|n30(0|2)|n50(0|2|5)|n7(0(0|1)|10)|ne((c|m)\-|on|tf|wf|wg|wt)|nok(6|i)|nzph|o2im|op(ti|wv)|oran|owg1|p800|pan(a|d|t)|pdxg|pg(13|\-([1-8]|c))|phil|pire|pl(ay|uc)|pn\-2|po(ck|rt|se)|prox|psio|pt\-g|qa\-a|qc(07|12|21|32|60|\-[2-7]|i\-)|qtek|r380|r600|raks|rim9|ro(ve|zo)|s55\/|sa(ge|ma|mm|ms|ny|va)|sc(01|h\-|oo|p\-)|sdk\/|se(c(\-|0|1)|47|mc|nd|ri)|sgh\-|shar|sie(\-|m)|sk\-0|sl(45|id)|sm(al|ar|b3|it|t5)|so(ft|ny)|sp(01|h\-|v\-|v )|sy(01|mb)|t2(18|50)|t6(00|10|18)|ta(gt|lk)|tcl\-|tdg\-|tel(i|m)|tim\-|t\-mo|to(pl|sh)|ts(70|m\-|m3|m5)|tx\-9|up(\.b|g1|si)|utst|v400|v750|veri|vi(rg|te)|vk(40|5[0-3]|\-v)|vm40|voda|vulc|vx(52|53|60|61|70|80|81|83|85|98)|w3c(\-| )|webc|whit|wi(g |nc|nw)|wmlb|wonu|x700|yas\-|your|zeto|zte\-/i.test(navigator.userAgent.substr(0,4))) {
          mobile_device = true;
        }
  Routine instructions
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    CodeComponent code_instructions
      Code Type = Auto->JS
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      Begin Experiment:
        submitbutton_opacity = None
      Begin Routine:
        # Window size
        window_height = win.size[1]
        window_width = win.size[0]

        xrange = (window_width / window_height)
        yrange = (window_height / window_width)
        last_xrange = xrange

        # Positional + size arguments
        button_instructions_xy = [0, (- 0.3)*max(1,yrange)]
        button_instructions_size  = [0.5*max(1,sqrt(sqrt(xrange))), 0.1*max(1,yrange)]
        instructions_size = [0.9*max(1,sqrt(xrange)), 0.6*max(1,sqrt(yrange))]

        # Text options
        if languagechoice == "ger":
            instructions_text = instr_ger
        else:
            instructions_text = instr_eng
      Each Frame:
        # Hovereffect for submitbutton
        if not mobile_device:
            if polygon_submitbutton.contains(mouse_instructions):
                submitbutton_opacity = opacity2;
            else:
                submitbutton_opacity = opacity1;

        # Window size
        window_height = win.size[1]
        window_width = win.size[0]
        xrange = (window_width / window_height)

        if xrange != last_xrange:
            # Size changed
            last_xrange = xrange
            yrange = (window_height / window_width)
            button_instructions_xy = [0, (- 0.3)*max(1,yrange)];
            button_instructions_size  = [0.5*max(1,sqrt(sqrt(xrange))), 0.1*max(1,yrange)];
            instructions_size = [0.6*max(1,sqrt(xrange)), 0.6*max(1,sqrt(yrange))];
    CodeComponent code_jsLinebreaks
      Code Type = JS
      Begin JS Routine:
        // make up for wrong line-breaks when reading file with javascript
        instructions_text = instructions_text.split('\\n').join('\n');
    TextboxComponent textbox_instructions
      alignment = center-left
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.035
      pos = (0, 0.1)
      saveStartStop = False
      size [set every frame] = instructions_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions_text
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    MouseComponent mouse_instructions
      clickable = polygon_submitbutton,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.5
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    PolygonComponent polygon_submitbutton
      fillColor = [0.9,0.9,0.9]
      lineColor = [-1,-1,-1]
      lineWidth = 2
      opacity [set every frame] = submitbutton_opacity
      pos [set every frame] = button_instructions_xy
      saveStartStop = False
      shape = rectangle
      size [set every frame] = button_instructions_size
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_submitbutton
      bold = False
      color = black
      editable = False
      letterHeight = 0.04
      pos [set every frame] = button_instructions_xy
      saveStartStop = False
      size [set every frame] = button_instructions_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $submitbutton_text
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  Routine prep_instructions
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    CodeComponent code_prepinstructions
      Code Type = Both
      Begin JS Routine:
        // read-in instructions
        instruction_file = 'stimuli/instructions.csv';
        myInstr = new TrialHandler({
              psychoJS: psychoJS,
              nReps: 1,
              method: TrialHandler.Method.SEQUENTIAL,
              extraInfo: expInfo,
              originPath: undefined,
              trialList: instruction_file,
              seed: undefined,
              name: 'myInstr'
          });

        // recopy the data
        instr_ger = myInstr.trialList[0]['instr_ger'];
        instr_eng = myInstr.trialList[0]['instr_eng'];
        // make up for wrong line-breaks
        instr_ger = instr_ger.split('\\n').join('\n');
        instr_eng = instr_eng.split('\\n').join('\n');
      Begin Routine:
        # ATTENTION - the javascript-part is unique!
        # don't auto-translate from python to javascript (Auto->JS)!

        # read-in instructions
        instruction_file = 'stimuli/instructions.csv'
        myInstr = data.TrialHandler(
                name='myInstr',
                nReps=1.0,
                method='sequential',
                extraInfo=expInfo,
                originPath=-1,
                trialList=instruction_file,
                seed = None
            )

        # recopy the data
        instr_ger = myInstr.trialList[0]['instr_ger']
        instr_eng = myInstr.trialList[0]['instr_eng']
  Routine preparation
    RoutineSettingsComponent preparation
      saveStartStop = False
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    CodeComponent code_shuffle
      Code Type = Auto->JS
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      Before Experiment:
        # Coders hint: Always put a function definition in its own exclusive
        # code-component in psychopy builder!
        #
        # Otherwise, when there is other code outside with variables of same name, then
        # the respective function variables wouldn't get the 'var' keyword when
        # auto-translated to javascript! (and so wouldn't have function scope!)
        # As a result they may very likely interfere with the outside variables.

        # Fisher-Yates shuffle (reversed)
        def shuffle_array(arr):
            n = len(arr)
            prelast = n-2 # second last element is at index n-2 if we start at 0
            i = 0
            while i <= prelast:
                # pythons & js random(): 0.0 <= x < 1
                j = int(i + random() * (n - i)) # random integer such that i ≤ j ≤ n-1
                arr[i], arr[j] = arr[j], arr[i]
                i += 1
            return arr[:] # return a real copy, not a reference!
    CodeComponent code_prepConditions
      Code Type = Auto->JS
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      Begin Experiment:
        img_count = 0
        img_path = 'stimuli/Food_Stimuli/'
        image_conditions = [] # a combined list of image-indize and its conditions
      Begin Routine:
        img_count = len(imageList)
        images = imageList # a list of image-indize
        #img_count = 2 # TODO: debug, delete

        conditions = ["liking", "wanting", "healthiness", "sustainability"]
        shuffled_conditions = []
        temp = []

        images = shuffle_array(images)

        # fill the list of randomized image-condition sets
        i = 0
        while i < img_count:
            shuffled_conditions = shuffle_array(conditions)
            # there are shorter ways of appending, but they don't translate good
            temp = [images[i]]
            temp.append(shuffled_conditions[0])
            temp.append(shuffled_conditions[1])
            temp.append(shuffled_conditions[2])
            temp.append(shuffled_conditions[3])

            image_conditions.append(temp)
            i += 1

        """
        # debug prints:
        print(image_conditions)

        print(images)
        i = 0
        while i < img_count:
            print(image_conditions[i])
            i += 1
        """
    CodeComponent code_commonVars
      Code Type = Auto->JS
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      Begin Experiment:
        globalTrialCounter = 0

        # parameter for submitbutton in all sliders
        submitbutton_size = [0.24, 0.08]
        submitbutton_xy = [0, -0.41]

        submitbutton_fillcolor = [0.9,0.9,0.9]
        submitbutton_bordercolor = [-1,-1,-1]

        submitbutton_opacity = opacity1
        submitbutton_edgethickness = 2

        # parameter for all slider
        likingColor = [0.8,0.8,0.8] # some grey
        wantingColor = [0.5, -1, 0.5] # some mediumorchid
        sustainColor = [-1, 1, -1] # green
        healthColor = [-0.2157, 0.1686, 0.8588] # cadetblue
        slider_labelcolor = likingColor
        slider_markercolor = [-1,-1,-1]
        slider_linecolor = [0.9,0.9,0.9]
        colorSpace = 'rgb'

        labelH_letter_height = 0.035
        labelV_letter_height = 0.025 * min(1, max(xrange, 0.75))

        if mobile_device:
            labelH_letter_height = 0.05
            labelV_letter_height = 0.035 * min(1, max(xrange, 0.75))
            submitbutton_size[0] = submitbutton_size[0] * 1.1
  Routine prep_trial12
    RoutineSettingsComponent prep_trial12
      saveStartStop = False
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    CodeComponent code_prepTrial12
      Code Type = JS
      Begin JS Routine:
        // The "conditions12_loop" iterates twice in order to
        // present 2 conditions for the current image.
        // The "vertical_option" & "horizontal_option" loops
        // only iterate if the respective condition is up.

        globalTrialCounter = (globalTrialCounter + 1);
        psychoJS.experiment.addData("globalTrialCounter", globalTrialCounter);
        psychoJS.experiment.addData("blockNum", 1);

        // get current indize
        ili = images_block1_loop.thisN; // current image loop index
        cli = conditions12_loop.thisN; // current condition loop index

        // extract infos for current image
        img_index = image_conditions[ili][0];
        img_file = ((img_path + img_index.toString()) + ".jpg");

        // this options declare which slider/condition is used
        liking_option = 0;
        wanting_option = 0;
        sustain_option = 0;
        health_option = 0;
        vertical_option = 0;
        horizontal_option = 1; // standard for all but liking condition

        condi = (cli + 1); // real index of current condition in image_conditions structure
        psychoJS.experiment.addData("imageRepitition", condi); // counter for image repititions
        cond = image_conditions[ili][condi]; // get the current condition

        // make settings depending on the current condition
        if ((cond === "liking")) {
            liking_option = 1;
            vertical_option = 1;
            horizontal_option = 0;
            sliderV_text = text_liking;
            slider_labelcolor = likingColor;
            psychoJS.experiment.addData("conditionNr", 1);
        } else {
            if ((cond === "wanting")) {
                wanting_option = 1;
                sliderH_text = text_wanting;
                sliderH_leftAnchor_text = labels_wanting[0];
                sliderH_rightAnchor_text = labels_wanting[1];
                slider_labelcolor = wantingColor;
                psychoJS.experiment.addData("conditionNr", 2);
            } else {
                if ((cond === "sustainability")) {
                    sustain_option = 1;
                    sliderH_text = text_sustainability;
                    sliderH_leftAnchor_text = labels_sustainability[0];
                    sliderH_rightAnchor_text = labels_sustainability[1];
                    slider_labelcolor = sustainColor;
                    psychoJS.experiment.addData("conditionNr", 3);
                } else {
                    if ((cond === "healthiness")) {
                        health_option = 1;
                        sliderH_text = text_healthiness;
                        sliderH_leftAnchor_text = labels_healthiness[0];
                        sliderH_rightAnchor_text = labels_healthiness[1];
                        slider_labelcolor = healthColor;
                        psychoJS.experiment.addData("conditionNr", 4);
                    }
                }
            }
        }
        psychoJS.experiment.addData("condition", cond);
        psychoJS.experiment.addData("image", img_index);
        psychoJS.experiment.addData("sliderType", horizontal_option); // 1 for horizontal slider
  Routine slider_vertical
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    CodeComponent code_sliderVertical
      Code Type = JS
      Begin JS Experiment:
        // dimension/position for image
        imgV_h = 0.35;
        imgV_w = (imgV_h * 1.494); // depending on image height and aspect ratio
        imgV_center_x = ((- 0.23) * Math.max(1, xrange));
        imgV_center_y = 0.15;

        // dimension/position for reminder text
        reminderV_text_x = (imgV_center_x + (imgV_w / 4));
        reminderV_text_y = (- 0.3);

        // dimension/position for slider Text
        slidertextV_letter_height = 0.03;
        slidertextV_center_x = (imgV_center_x - (imgV_w / 2));
        slidertextV_center_y = (- 0.1);

        // dimension/position for slider
        // these values are horizontal, but the slider will be rotated by 90 degree
        sliderV_w = 0.65;
        sliderV_h = 0.03;
        sliderV_center_x = 0.17;
        sliderV_center_y = 0;

        // increase some values if on mobile
        if (mobile_device) {
            imgV_h = (imgV_h * 1.2);
            imgV_center_y = 0.17;
            slidertextV_letter_height = 0.037;
            slidertextV_center_y = (- 0.14);
            sliderV_w = 0.9;
            sliderV_h = 0.04;
            sliderV_center_x = 0.25;
        }

        // position of vertical slider anchors
        sliderV_ticks = [(- 100), (- 62.8), (- 41.6), (- 17.6), (- 6), 0, 6.2, 17.8, 44.4, 65.8, 100];
        label_xpos = (sliderV_center_x + sliderV_h);
        l01_ypos = (sliderV_center_y + (((sliderV_w / 2) * sliderV_ticks[10]) / 100));
        l02_ypos = (sliderV_center_y + (((sliderV_w / 2) * sliderV_ticks[9]) / 100));
        l03_ypos = (sliderV_center_y + (((sliderV_w / 2) * sliderV_ticks[8]) / 100));
        l04_ypos = (sliderV_center_y + (((sliderV_w / 2) * sliderV_ticks[7]) / 100));
        l05_ypos = (sliderV_center_y + (((sliderV_w / 2) * sliderV_ticks[6]) / 100));
        l06_ypos = (sliderV_center_y + (((sliderV_w / 2) * sliderV_ticks[5]) / 100));
        l07_ypos = (sliderV_center_y + (((sliderV_w / 2) * sliderV_ticks[4]) / 100));
        l08_ypos = (sliderV_center_y + (((sliderV_w / 2) * sliderV_ticks[3]) / 100));
        l09_ypos = (sliderV_center_y + (((sliderV_w / 2) * sliderV_ticks[2]) / 100));
        l10_ypos = (sliderV_center_y + (((sliderV_w / 2) * sliderV_ticks[1]) / 100));
        l11_ypos = (sliderV_center_y + (((sliderV_w / 2) * sliderV_ticks[0]) / 100));
        l01_pos = [label_xpos, l01_ypos];
        l02_pos = [label_xpos, l02_ypos];
        l03_pos = [label_xpos, l03_ypos];
        l04_pos = [label_xpos, l04_ypos];
        l05_pos = [label_xpos, l05_ypos];
        l06_pos = [(sliderV_center_x - (3.3 * sliderV_h)), l06_ypos]; // label "neutral" on the left of the slider
        l07_pos = [label_xpos, l07_ypos];
        l08_pos = [label_xpos, l08_ypos];
        l09_pos = [label_xpos, l09_ypos];
        l10_pos = [label_xpos, l10_ypos];
        l11_pos = [label_xpos, l11_ypos];

        if (mobile_device) {
            l06_pos = [(sliderV_center_x - (3.5 * sliderV_h)), l06_ypos];
        }
      Begin JS Routine:
        // to compute some reaction time later on
        myStart = globalClock.getTime();
        psychoJS.experiment.addData("sliderStarted", myStart);
      Each JS Frame:
        // Hovereffect for submitbutton
        if ((! mobile_device)) {
            if (polygon_submitbuttonV.contains(mouseV)) {
                submitbutton_opacity = opacity2;
            } else {
                submitbutton_opacity = opacity1;
            }
        }
      End JS Routine:
        cond = image_conditions[ili][condi]; // get the current condition
        rating = slider_V.getRating(); // get the rating for this condition

        // the liking condition is currently the only which uses the vertical slider,
        // but as the selector code is elsewhere, we check it here.
        if (cond === "liking") {
            // range of the slider is [0, 100] and rating shall be in [-100, 100]
            rating = (rating - 50) * 2;
            }


        // replace the condition with a condition-rating tuppel
        image_conditions[ili][condi] = [cond, rating];

        // save data for both sliders under common var-names
        psychoJS.experiment.addData("sliderStopped", globalClock.getTime());
        psychoJS.experiment.addData("sliderRating", rating);
        psychoJS.experiment.addData("ratingRT", slider_V.getRT());

        // save the time of confirmation relative to routine-start
        myEnd = globalClock.getTime();
        myDur = (myEnd - myStart);
        psychoJS.experiment.addData("confirmRT", myDur);
        psychoJS.experiment.addData("confirm", 1);
    CodeComponent code_ratingDetectionV
      Code Type = Both
      Begin Experiment:
        # ATTENTION - the javascript-part is unique!
        # don't auto-translate from python to javascript (Auto->JS)!

        # track if ratings have been given to all sliders
        ratingGiven = False
      Begin JS Experiment:
        ratingGiven = false;
      Each Frame:
        # ATTENTION - the javascript-part is unique!
        # don't auto-translate from python to javascript (Auto->JS)!
        # Psychopy can't translate Pythons "None" to JS "undefined"

        # submitbutton display condition
        ratingDone = slider_V.getRating()
        if ratingDone != None:
            ratingGiven = True

        # Check if submitbutton was pressed and end routine if true
        if ratingGiven and polygon_submitbuttonV.contains(mouseV):
            buttonPressed = mouseV.getPressed()[0]
            if buttonPressed == 1:
                continueRoutine = False # native PsychoPy var, controls continuation of routine
      Each JS Frame:
        ratingDone = slider_V.getRating();
        if ((ratingDone !== undefined)) {
            ratingGiven = true;
        }
        if ((ratingGiven && textbox_submitbuttonV.contains(mouseV))) {
            buttonPressed = mouseV.getPressed()[0];
            if ((buttonPressed === 1)) {
                continueRoutine = false;
            }
        }
      End JS Routine:
        ratingGiven = false;
      End Routine:
        # ATTENTION - the javascript-part is unique!
        # don't auto-translate from python to javascript (Auto->JS)!

        ratingGiven = False;
    CodeComponent code_reminderV
      Code Type = Both
      Each Frame:
        # ATTENTION - the javascript-part is unique!
        # don't auto-translate from python to javascript (Auto->JS)!

        # If there is no rating submitted in the first 10s after stimulus onset,
        # display reminder text
        condReactionReminderText = not ratingGiven and tThisFlip >= 10.0-frameTolerance
      Each JS Frame:
        condReactionReminderText = ((! ratingGiven) && (t >= 10.0));
    TextboxComponent textbox_reminderV
      bold = False
      color = 0.7255, -0.8431, -0.5294
      editable = False
      letterHeight = 0.03
      pos = (reminderV_text_x, reminderV_text_y)
      size = (0.7, 0.1)
      startVal [condition] = condReactionReminderText
      text [set every repeat] = $reminder_text
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    ImageComponent imageV
      image [set every repeat] = $img_file
      pos = (imgV_center_x, imgV_center_y)
      size = (imgV_w, imgV_h)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_sliderV
      alignment = center-left
      anchor = center-left
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = slidertextV_letter_height
      pos = (slidertextV_center_x, slidertextV_center_y)
      size = (0.5, 0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $sliderV_text
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    SliderComponent slider_V
      borderColor = $slider_linecolor
      color = $slider_labelcolor
      fillColor = $slider_markercolor
      forceEndRoutine = False
      granularity = 0
      initVal = 50
      letterHeight = 0.05
      ori = -90
      pos = (sliderV_center_x, sliderV_center_y)
      size = (sliderV_w, sliderV_h)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = [0, 100]
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    PolygonComponent polygon_submitbuttonV
      fillColor = $submitbutton_fillcolor
      lineColor = $submitbutton_bordercolor
      lineWidth = submitbutton_edgethickness
      opacity [set every frame] = submitbutton_opacity
      pos = submitbutton_xy
      shape = rectangle
      size = submitbutton_size
      startVal [condition] = ratingGiven
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    TextboxComponent textbox_submitbuttonV
      bold = False
      borderColor = $submitbutton_bordercolor
      borderWidth = submitbutton_edgethickness
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.07
      pos = submitbutton_xy
      size = submitbutton_size
      startVal [condition] = ratingGiven
      text [set every repeat] = $submitbutton_text
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    MouseComponent mouseV
      clickable = textbox_submitbuttonV
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_l01
      alignment = center-left
      anchor = center-left
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = labelV_letter_height
      pos = l01_pos
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $labels_liking[0]
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    TextboxComponent textbox_l02
      alignment = center-left
      anchor = center-left
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = labelV_letter_height
      pos = l02_pos
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $labels_liking[1]
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    TextboxComponent textbox_l03
      alignment = center-left
      anchor = center-left
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = labelV_letter_height
      pos = l03_pos
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $labels_liking[2]
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    TextboxComponent textbox_l04
      alignment = center-left
      anchor = center-left
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = labelV_letter_height
      pos = l04_pos
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $labels_liking[3]
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    TextboxComponent textbox_l05
      alignment = center-left
      anchor = center-left
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = labelV_letter_height
      pos = l05_pos
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $labels_liking[4]
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    TextboxComponent textbox_l06
      alignment = center-left
      anchor = center-left
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = labelV_letter_height
      pos = l06_pos
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $labels_liking[5]
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    TextboxComponent textbox_l07
      alignment = center-left
      anchor = center-left
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = labelV_letter_height
      pos = l07_pos
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $labels_liking[6]
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    TextboxComponent textbox_l08
      alignment = center-left
      anchor = center-left
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = labelV_letter_height
      pos = l08_pos
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $labels_liking[7]
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    TextboxComponent textbox_l09
      alignment = center-left
      anchor = center-left
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = labelV_letter_height
      pos = l09_pos
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $labels_liking[8]
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    TextboxComponent textbox_l10
      alignment = center-left
      anchor = center-left
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = labelV_letter_height
      pos = l10_pos
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $labels_liking[9]
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    TextboxComponent textbox_l11
      alignment = center-left
      anchor = center-left
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = labelV_letter_height
      pos = l11_pos
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $labels_liking[10]
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  Routine slider_horizontal
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    CodeComponent code_sliderHorizontal
      Code Type = Auto->JS
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      Begin Experiment:
        submitbutton_opacity = opacity1

        # dimension/position for image
        imgH_h = 0.35   # = img_h * 1.2 if mobile_device?
        imgH_w = imgH_h*1.494; # depending on image height and aspect ratio
        imgH_center_x = 0
        imgH_center_y = 0.1  # 0.15 if mobile_device?

        # dimension/position for reminder text
        reminderH_text_x = 0
        reminderH_text_y = 0.4

        # dimension/position for slider Text
        slidertextH_center_x = 0
        slidertextH_center_y = -0.13 # -0.12 if mobile_device

        # dimension/position for slider
        sliderH_wanting_w = 0.8
        sliderH_w = sliderH_wanting_w*max(1,xrange)
        sliderH_h = 0.045
        sliderH_center_x = 0
        sliderH_center_y = -0.3 # -0.25 if mobile_device

        # dimension/position for anchors
        sliderH_label1_pos = [0,0]
        sliderH_label2_pos = [0,0]
        sliderH_label1_pos[0] = sliderH_center_x - (sliderH_wanting_w / 2)*max(1,xrange)
        sliderH_label1_pos[1] = sliderH_center_y - (sliderH_h)*min(1,xrange) - 0.01
        sliderH_label2_pos[0] = sliderH_center_x + (sliderH_wanting_w / 2)*max(1,xrange)
        sliderH_label2_pos[1] = sliderH_center_y - (sliderH_h)*min(1,xrange) - 0.01
        sliderH_label1_pos[0] = sliderH_label1_pos[0] *0.9
        sliderH_label2_pos[0] = sliderH_label2_pos[0] *0.9

        if mobile_device:
            imgH_h = imgH_h*1.2
            imgH_center_y = 0.15
            slidertextH_center_y = -0.12
            sliderH_center_y = -0.25
      Begin Routine:
        # to compute some reaction time later on
        myStart = globalClock.getTime()

        thisExp.addData("sliderStarted", myStart)
      Each Frame:
        # Hovereffect for submitbutton
        if not mobile_device:
            if textbox_submitbuttonH.contains(mouseH):
                submitbutton_opacity = opacity2
            else:
                submitbutton_opacity = opacity1

        # update dimension/position for slider
        window_height = win.size[1]
        window_width = win.size[0]
        xrange = (window_width / window_height)
        sliderH_w = sliderH_wanting_w*max(1,xrange)
        sliderH_h = 0.045

        # update position for anchors
        sliderH_label1_pos[0] = sliderH_center_x - (sliderH_wanting_w / 2)*max(1,xrange)
        sliderH_label1_pos[1] = sliderH_center_y - (sliderH_h)*min(1,xrange) - 0.01
        sliderH_label2_pos[0] = sliderH_center_x + (sliderH_wanting_w / 2)*max(1,xrange)
        sliderH_label2_pos[1] = sliderH_center_y - (sliderH_h)*min(1,xrange) - 0.01
        sliderH_label1_pos[0] = sliderH_label1_pos[0] *0.9
        sliderH_label2_pos[0] = sliderH_label2_pos[0] *0.9
      End Routine:
        cond = image_conditions[ili][condi] # get the current condition
        rating = slider_H.getRating() # get the rating for this condition

        # replace the condition with a condition-rating tuppel
        image_conditions[ili][condi] = [cond, rating]

        # save data for both sliders under common var-names
        thisExp.addData("sliderStopped", globalClock.getTime())
        thisExp.addData("sliderRating", rating)
        thisExp.addData("ratingRT", slider_H.getRT())

        # save the time of confirmation relative to routine-start
        myEnd = globalClock.getTime()
        myDur = myEnd - myStart
        thisExp.addData('confirmRT', myDur)
        thisExp.addData('confirm', 1)
    CodeComponent code_ratingDetectionH
      Code Type = Both
      Begin Experiment:
        # ATTENTION - the javascript-part is unique!
        # don't auto-translate from python to javascript (Auto->JS)!

        # track if ratings have been given to all sliders
        ratingGiven = False
      Begin JS Experiment:
        ratingGiven = false;
      Each Frame:
        # ATTENTION - the javascript-part is unique!
        # don't auto-translate from python to javascript (Auto->JS)!
        # Psychopy can't translate Pythons "None" to JS "undefined"

        # submitbutton display condition
        ratingDone = slider_H.getRating();
        if ratingDone != None:
            ratingGiven = True;

        # Check if submitbutton was pressed and end routine if true
        if ratingGiven and polygon_submitbuttonH.contains(mouseH):
            buttonPressed = mouseH.getPressed()[0];
            if buttonPressed == 1:
                continueRoutine = False # native PsychoPy var, controls continuation of routine
      Each JS Frame:
        ratingDone = slider_H.getRating();
        if ((ratingDone !== undefined)) {
            ratingGiven = true;
        }
        if ((ratingGiven && textbox_submitbuttonH.contains(mouseH))) {
            buttonPressed = mouseH.getPressed()[0];
            if ((buttonPressed === 1)) {
                continueRoutine = false;
            }
        }
      End JS Routine:
        ratingGiven = false;
      End Routine:
        # ATTENTION - the javascript-part is unique!
        # don't auto-translate from python to javascript (Auto->JS)!

        ratingGiven = False;
    CodeComponent code_reminderH
      Code Type = Both
      Each Frame:
        # ATTENTION - the javascript-part is unique!
        # don't auto-translate from python to javascript (Auto->JS)!

        # If there is no rating submitted in the first 10s after stimulus onset,
        # display reminder text
        condReactionReminderText = not ratingGiven and tThisFlip >= 10.0-frameTolerance
      Each JS Frame:
        condReactionReminderText = ((! ratingGiven) && (t >= 10.0));
    TextboxComponent textbox_reminderH
      bold = False
      color = 0.7255, -0.8431, -0.5294
      editable = False
      letterHeight = 0.03
      pos = (reminderH_text_x, reminderH_text_y)
      size = (0.8, 0.1)
      startVal [condition] = condReactionReminderText
      text [set every repeat] = $reminder_text
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    ImageComponent imageH
      image [set every repeat] = $img_file
      pos = (imgH_center_x, imgH_center_y)
      size = (imgH_w, imgH_h)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_sliderH
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (slidertextH_center_x, slidertextH_center_y)
      size = (0.8, 0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $sliderH_text
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    SliderComponent slider_H
      borderColor = $slider_linecolor
      color [set every repeat] = $slider_labelcolor
      fillColor = $slider_markercolor
      forceEndRoutine = False
      granularity = 0
      initVal = 50
      letterHeight = 0.05
      pos = (sliderH_center_x, sliderH_center_y)
      size [set every frame] = (sliderH_w, sliderH_h)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = [0, 100]
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    TextboxComponent textbox_sliderH_leftAnchor
      alignment = center-left
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = labelH_letter_height
      pos [set every frame] = sliderH_label1_pos
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $sliderH_leftAnchor_text
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    TextboxComponent textbox_sliderH_rightAnchor
      alignment = center-right
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = labelH_letter_height
      pos [set every frame] = sliderH_label2_pos
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $sliderH_rightAnchor_text
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    PolygonComponent polygon_submitbuttonH
      fillColor = $submitbutton_fillcolor
      lineColor = $submitbutton_bordercolor
      lineWidth = submitbutton_edgethickness
      opacity [set every frame] = submitbutton_opacity
      pos = submitbutton_xy
      shape = rectangle
      size = submitbutton_size
      startVal [condition] = ratingGiven
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    TextboxComponent textbox_submitbuttonH
      bold = False
      borderColor = $submitbutton_bordercolor
      borderWidth = submitbutton_edgethickness
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.07
      pos = submitbutton_xy
      size = submitbutton_size
      startVal [condition] = ratingGiven
      text [set every repeat] = $submitbutton_text
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    MouseComponent mouseH
      clickable = textbox_submitbuttonH
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine load_instructions
    RoutineSettingsComponent load_instructions
      saveStartStop = False
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  Routine prep_trial34
    RoutineSettingsComponent prep_trial34
      saveStartStop = False
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    CodeComponent code_prepTrial34
      Code Type = JS
      Begin JS Routine:
        // The "conditions34_loop" iterates twice in order to
        // present 2 conditions for the current image.
        // The "vertical_option" & "horizontal_option" loops
        // only iterate if the respective condition is up.

        globalTrialCounter = (globalTrialCounter + 1);
        psychoJS.experiment.addData("globalTrialCounter", globalTrialCounter);
        psychoJS.experiment.addData("blockNum", 2);

        // get current indize
        ili = images_block2_loop.thisN; // current image loop index
        cli = conditions34_loop.thisN; // current condition loop index

        // extract infos for current image
        img_index = image_conditions[ili][0];
        img_file = ((img_path + img_index.toString()) + ".jpg");

        // this options declare which slider/condition is used
        liking_option = 0;
        wanting_option = 0;
        sustain_option = 0;
        health_option = 0;
        vertical_option = 0;
        horizontal_option = 1; // standard for all but liking condition


        condi = ((cli + 1) + 2); // real index of current condition in image_conditions structure
        psychoJS.experiment.addData("imageRepitition", condi); // counter for image repititions
        cond = image_conditions[ili][condi]; // get the current condition

        // make settings depending on the current condition
        if ((cond === "liking")) {
            liking_option = 1;
            vertical_option = 1;
            horizontal_option = 0;
            sliderV_text = text_liking;
            slider_labelcolor = likingColor;
            psychoJS.experiment.addData("conditionNr", 1);
        } else {
            if ((cond === "wanting")) {
                wanting_option = 1;
                sliderH_text = text_wanting;
                sliderH_leftAnchor_text = labels_wanting[0];
                sliderH_rightAnchor_text = labels_wanting[1];
                slider_labelcolor = wantingColor;
                psychoJS.experiment.addData("conditionNr", 2);
            } else {
                if ((cond === "sustainability")) {
                    sustain_option = 1;
                    sliderH_text = text_sustainability;
                    sliderH_leftAnchor_text = labels_sustainability[0];
                    sliderH_rightAnchor_text = labels_sustainability[1];
                    slider_labelcolor = sustainColor;
                    psychoJS.experiment.addData("conditionNr", 3);
                } else {
                    if ((cond === "healthiness")) {
                        health_option = 1;
                        sliderH_text = text_healthiness;
                        sliderH_leftAnchor_text = labels_healthiness[0];
                        sliderH_rightAnchor_text = labels_healthiness[1];
                        slider_labelcolor = healthColor;
                        psychoJS.experiment.addData("conditionNr", 4);
                    }
                }
            }
        }

        psychoJS.experiment.addData("condition", cond);
        psychoJS.experiment.addData("image", img_index);
        psychoJS.experiment.addData("sliderType", horizontal_option); // 1 for horizontal slider
  Routine rating
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    CodeComponent code_rating
      Code Type = Auto->JS
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      Begin Experiment:
        j=0
        # coordinates/dimensions for the areas
        ratingX = 0
        ratingY = [0.4, 0.3, 0.2, 0.1, -0.1, -0.2, -0.3, -0.4]
        ratingW = 0.8
        ratingH = 0.08


        ratingBackColor = [0.8549, 0.8549, 0.8549]
        rating_letterHeight = 0.03
        ratingCond = ["","","",""]
      Begin Routine:
        # The ratingTexts shall be dragged into the ratingTargets (polygons) in order
        # to create a rating

        ratingTargets = [polygon_target1,polygon_target2,polygon_target3,polygon_target4]
        rTargetOccupation = [0, 0, 0, 0] # indicate if target-area is already occupied
        ratingGiven = False
        ratingResults = ["","","",""] # map which text got which rating (targetposition)
        ratingRTs = [-1,-1,-1,-1]
        myStart = globalClock.getTime()


        # text for the conditions
        ratingCond[0] = [categoryWanting, wantingColor]
        ratingCond[1] = [categoryHealthiness, healthColor]
        ratingCond[2] = [categorySustainability, sustainColor]
        ratingCond[3] = [categoryLiking, likingColor]
        ratingCond = shuffle_array(ratingCond)

        ratingTexts = [textbox_cond1, textbox_cond2, textbox_cond3, textbox_cond4]
        isDragging = False # indicate if mouse is already dragging one text
        focus = None # the text that is dragged
        focusI = None # index of the dragged text
        inTarget = False # state if a text is inside a target-area
        # the original positions of the texts
        ratingTextsOldPos = [textbox_cond1.pos, textbox_cond2.pos, textbox_cond3.pos, textbox_cond4.pos]

        submitbutton_xy = [0,-0.1]
        submitbutton_opacity = 1
      Each Frame:
        # handle the dragging of the texts
        if not isDragging:
            # for all condition texts test if they are dragged
            i = 0
            while i < len(ratingTexts):
                if mouseR.isPressedIn(ratingTexts[i]): # if so, focus on this text
                    focus = ratingTexts[i]
                    focusI = i
                    focus.pos = mouseR.getPos() # change the position of this text
                    isDragging = True
                    # and release the occupation of a target if applicable
                    j = 0
                    while j < len(ratingTargets):
                        if ratingTargets[j].contains(mouseR):
                            rTargetOccupation[j] = 0
                        j += 1
                i += 1

        else: # if dragging is ongoing
            focus.pos = mouseR.getPos()

            # on releasing the dragging
            if not mouseR.isPressedIn(focus):
                isDragging = False

                # for all target-areas...
                inTarget = False # assume focus not in target an shall snap to old pos
                i = 0
                while i < len(ratingTargets):
                    # ... test if target is free and mouse was released inside target
                    if rTargetOccupation[i] == 0 and ratingTargets[i].contains(mouseR):
                        focus.pos = ratingTargets[i].pos # snap focused text to target
                        inTarget = True
                        rTargetOccupation[i] = 1 # mark this target area as occupied
                        ratingResults[i] = ratingCond[focusI] # save this result
                        ratingRTs[i] = globalClock.getTime() - myStart
                    i += 1

                # if mouse was released outside one of the target areas...
                if not inTarget:
                    # move focused text back to its old position
                    focus.pos = ratingTextsOldPos[focusI]
                    focusI = None
                    focus = None

        # check if all targets are occupied
        ratingGiven = True # assume yes
        submitbutton_opacity = 1
        for rTarget in rTargetOccupation:
            if rTarget == 0:
                ratingGiven = False # falsify if one is missing
                submitbutton_opacity = 0

        # Check if submitbutton was pressed and end routine if true
        if ratingGiven and textbox_submitbuttonR.contains(mouseR):
            buttonPressed = mouseR.getPressed()[0];
            if buttonPressed == 1:
                # save the results
                thisExp.addData("ratingResult_1", ratingResults[0][0] )
                thisExp.addData("ratingResult_2", ratingResults[1][0] )
                thisExp.addData("ratingResult_3", ratingResults[2][0] )
                thisExp.addData("ratingResult_4", ratingResults[3][0] )
                thisExp.addData("ratingRT_1", ratingRTs[0])
                thisExp.addData("ratingRT_2", ratingRTs[1])
                thisExp.addData("ratingRT_3", ratingRTs[2])
                thisExp.addData("ratingRT_4", ratingRTs[3])
                continueRoutine = False # native PsychoPy var, controls continuation of routine
      End Routine:
        ratingGiven = False
    PolygonComponent polygon_target1
      fillColor = None
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = (ratingX, ratingY[0])
      shape = rectangle
      size = (ratingW, ratingH)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_target2
      fillColor = None
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = (ratingX, ratingY[1])
      shape = rectangle
      size = (ratingW, ratingH)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_target3
      fillColor = None
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (ratingX, ratingY[2])
      shape = rectangle
      size = (ratingW, ratingH)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_target4
      fillColor = None
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = (ratingX, ratingY[3])
      shape = rectangle
      size = (ratingW, ratingH)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_cond1
      bold = False
      color = black
      editable = False
      fillColor [set every repeat] = $ratingCond[0][1]
      letterHeight = rating_letterHeight
      pos = (ratingX, ratingY[4])
      size = (ratingW, ratingH)
      startVal [time (s)] = 0.0
      text [set every repeat] = $ratingCond[0][0]
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    TextboxComponent textbox_cond2
      bold = False
      color = black
      editable = False
      fillColor [set every repeat] = $ratingCond[1][1]
      letterHeight = rating_letterHeight
      pos = (ratingX, ratingY[5])
      size = (ratingW, ratingH)
      startVal [time (s)] = 0.0
      text [set every repeat] = $ratingCond[1][0]
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    TextboxComponent textbox_cond3
      bold = False
      color = black
      editable = False
      fillColor [set every repeat] = $ratingCond[2][1]
      letterHeight = rating_letterHeight
      pos = (ratingX, ratingY[6])
      size = (ratingW, ratingH)
      startVal [time (s)] = 0.0
      text [set every repeat] = $ratingCond[2][0]
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    TextboxComponent textbox_cond4
      bold = False
      color = black
      editable = False
      fillColor [set every repeat] = $ratingCond[3][1]
      letterHeight = rating_letterHeight
      pos = (ratingX, ratingY[7])
      size = (ratingW, ratingH)
      startVal [time (s)] = 0.0
      text [set every repeat] = $ratingCond[3][0]
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    MouseComponent mouseR
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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    TextboxComponent textbox_submitbuttonR
      bold = False
      borderColor = $submitbutton_bordercolor
      borderWidth = submitbutton_edgethickness
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.07
      opacity [set every frame] = submitbutton_opacity
      pos [set every repeat] = submitbutton_xy
      size = submitbutton_size
      startVal [condition] = ratingGiven
      text [set every repeat] = $submitbutton_text
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    TextboxComponent textbox_target1
      anchor = center-right
      bold = False
      color = black
      editable = False
      letterHeight = rating_letterHeight
      pos = (ratingX-ratingW/2, ratingY[0])
      size = (0.1, ratingH)
      startVal [time (s)] = 0.0
      text = 1.
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    TextboxComponent textbox_target2
      anchor = center-right
      bold = False
      color = black
      editable = False
      letterHeight = rating_letterHeight
      pos = (ratingX-ratingW/2, ratingY[1])
      size = (0.1, ratingH)
      startVal [time (s)] = 0.0
      text = 2.
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    TextboxComponent textbox_target3
      anchor = center-right
      bold = False
      color = black
      editable = False
      letterHeight = rating_letterHeight
      pos = (ratingX-ratingW/2, ratingY[2])
      size = (0.1, ratingH)
      startVal [time (s)] = 0.0
      text = 3.
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    TextboxComponent textbox_target4
      anchor = center-right
      bold = False
      color = black
      editable = False
      letterHeight = rating_letterHeight
      pos = (ratingX-ratingW/2, ratingY[3])
      size = (0.1, ratingH)
      startVal [time (s)] = 0.0
      text = 4.
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  Routine instructions_2
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    CodeComponent code_instructions_2
      Code Type = Auto->JS
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      Begin Experiment:
        submitbutton_opacity = None
      Begin Routine:
        # Window size
        window_height = win.size[1]
        window_width = win.size[0]

        xrange = (window_width / window_height)
        yrange = (window_height / window_width)
        last_xrange = xrange

        # Positional + size arguments
        button_instructions_xy = [0, (- 0.3)*max(1,yrange)]
        button_instructions_size  = [0.5*max(1,sqrt(sqrt(xrange))), 0.1*max(1,yrange)]
        instructions_size = [0.9*max(1,sqrt(xrange)), 0.6*max(1,sqrt(yrange))]

        # Text options
        if languagechoice == "ger":
            instructions2_text = instr2_ger
        else:
            instructions2_text = instr2_eng
      Each Frame:
        # Hovereffect for submitbutton
        if not mobile_device:
            if polygon_submitbutton.contains(mouse_instructions):
                submitbutton_opacity = opacity2;
            else:
                submitbutton_opacity = opacity1;

        # Window size
        window_height = win.size[1]
        window_width = win.size[0]
        xrange = (window_width / window_height)

        if xrange != last_xrange:
            # Size changed
            last_xrange = xrange
            yrange = (window_height / window_width)
            button_instructions_xy = [0, (- 0.3)*max(1,yrange)];
            button_instructions_size  = [0.5*max(1,sqrt(sqrt(xrange))), 0.1*max(1,yrange)];
            instructions_size = [0.6*max(1,sqrt(xrange)), 0.6*max(1,sqrt(yrange))];
    CodeComponent code_jsLinebreaks_2
      Code Type = JS
      Begin JS Routine:
        // make up for wrong line-breaks when reading file with javascript
        instructions2_text = instructions2_text.split('\\n').join('\n');
    TextboxComponent textbox_instructions_2
      alignment = center-left
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.035
      pos = (0, 0.1)
      saveStartStop = False
      size [set every frame] = instructions_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions2_text
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    MouseComponent mouse_instructions_2
      clickable = polygon_submitbutton_2,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.5
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    PolygonComponent polygon_submitbutton_2
      fillColor = [0.9,0.9,0.9]
      lineColor = [-1,-1,-1]
      lineWidth = 2
      opacity [set every frame] = submitbutton_opacity
      pos [set every frame] = button_instructions_xy
      saveStartStop = False
      shape = rectangle
      size [set every frame] = button_instructions_size
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_submitbutton_2
      bold = False
      color = black
      editable = False
      letterHeight = 0.04
      pos [set every frame] = button_instructions_xy
      saveStartStop = False
      size [set every frame] = button_instructions_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $submitbutton_text
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  Routine instructions_3
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    CodeComponent code_instructions_3
      Code Type = Auto->JS
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      Begin Experiment:
        submitbutton_opacity = None
      Begin Routine:
        # Window size
        window_height = win.size[1]
        window_width = win.size[0]

        xrange = (window_width / window_height)
        yrange = (window_height / window_width)
        last_xrange = xrange

        # Positional + size arguments
        button_instructions_xy = [0, (- 0.3)*max(1,yrange)]
        button_instructions_size  = [0.5*max(1,sqrt(sqrt(xrange))), 0.1*max(1,yrange)]
        instructions_size = [0.6*max(1,sqrt(xrange)), 0.6*max(1,sqrt(yrange))]

        # Text options
        if languagechoice == "ger":
            instructions3_text = instr3_ger
        else:
            instructions3_text = instr3_eng
      Each Frame:
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    CodeComponent code_jsLinebreaks_3
      Code Type = JS
      Begin JS Routine:
        // make up for wrong line-breaks when reading file with javascript
        instructions3_text = instructions3_text.split('\\n').join('\n');
    TextboxComponent textbox_instructions_3
      alignment = center-left
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.035
      pos = (0, 0.1)
      saveStartStop = False
      size [set every frame] = instructions_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions3_text
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    MouseComponent mouse_instructions_3
      clickable = polygon_submitbutton_3,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.5
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    PolygonComponent polygon_submitbutton_3
      fillColor = [0.9,0.9,0.9]
      lineColor = [-1,-1,-1]
      lineWidth = 2
      opacity [set every frame] = submitbutton_opacity
      pos [set every frame] = button_instructions_xy
      saveStartStop = False
      shape = rectangle
      size [set every frame] = button_instructions_size
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_submitbutton_3
      bold = False
      color = black
      editable = False
      letterHeight = 0.04
      pos [set every frame] = button_instructions_xy
      saveStartStop = False
      size [set every frame] = button_instructions_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $submitbutton_text
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  Routine load_imageList
    RoutineSettingsComponent load_imageList
      saveStartStop = False
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        imageList = []
      Begin Routine:
        imageList.append(imageNr)
  Routine reRandomize
    RoutineSettingsComponent reRandomize
      saveStartStop = False
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    CodeComponent code_reRandomize
      Code Type = Auto->JS
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      Begin Routine:
        # re-randomize the image_conditions for the next block
        image_conditions = shuffle_array(image_conditions)
        #print("newly randomized image_conditions")
        #print(image_conditions)
Flow
  Routine global_vars
  Routine mobile_detection
  Routine language_choice
  LoopInitiator instructionReadLoop loopType="TrialHandler"
    conditions = [{'instr_ger': 'In der folgenden Aufgabe sehen Sie in zufaelliger Abfolge verschiedene Bilder von Essen. Danach bitten wir Sie jeweils anzugeben, wie sehr Sie das praesentierte Essen in diesem Moment gern erhalten wuerden, bzw. wie sehr Sie das gezeigte Essen moegen. und wie ökologisch nachhaltig und wie gesund Sie das Essen einschätzen. \nAlle vier Fragen werden mittels verschiedener Skalen abgefragt: Bitte nutzen Sie die grüne horizontale Skala, um anzugeben, wie ökologisch nachhaltig Sie das Essen einschätzen, die blaue horizontale Skala, um anzugeben, wie gesund Sie das Essen einschätzen, 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
    conditionsFile = stimuli/instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine load_instructions
  LoopTerminator instructionReadLoop
  LoopInitiator imageListReadLoop loopType="TrialHandler"
    conditionsFile = stimuli/imageList.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'imageNr': 1},
      {'imageNr': 3},
      {'imageNr': 4},
      {'imageNr': 8},
      {'imageNr': 12},
      {'imageNr': 14},
      {'imageNr': 20},
      {'imageNr': 24},
      {'imageNr': 26},
      {'imageNr': 30},
      {'imageNr': 33},
      {'imageNr': 34},
      {'imageNr': 36},
      {'imageNr': 38},
      {'imageNr': 52},
      {'imageNr': 58},
      {'imageNr': 61},
      {'imageNr': 62},
      {'imageNr': 72},
      {'imageNr': 76},
      {'imageNr': 81},
      {'imageNr': 103},
      {'imageNr': 104},
      {'imageNr': 114},
      {'imageNr': 115},
      {'imageNr': 121},
      {'imageNr': 131},
      {'imageNr': 136},
      {'imageNr': 138},
      {'imageNr': 141},
      {'imageNr': 142},
      {'imageNr': 144},
      {'imageNr': 157},
      {'imageNr': 167},
      {'imageNr': 170},
      {'imageNr': 171},
      {'imageNr': 180},
      {'imageNr': 181},
      {'imageNr': 183},
      {'imageNr': 189},
      {'imageNr': 190},
      {'imageNr': 192},
      {'imageNr': 199},
      {'imageNr': 202},
      {'imageNr': 203},
      {'imageNr': 224},
      {'imageNr': 228},
      {'imageNr': 241},
      {'imageNr': 256},
      {'imageNr': 259},
      {'imageNr': 263},
      {'imageNr': 272},
      {'imageNr': 300},
      {'imageNr': 321},
      {'imageNr': 322},
      {'imageNr': 323},
      {'imageNr': 326},
      {'imageNr': 328},
      {'imageNr': 331},
      {'imageNr': 337}]
    Routine load_imageList
  LoopTerminator imageListReadLoop
  Routine instructions
  Routine instructions_2
  Routine preparation
  LoopInitiator images_block1_loop loopType="TrialHandler"
    loopType = sequential
    nReps = img_count
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    Routine fixation
    LoopInitiator conditions12_loop loopType="TrialHandler"
      loopType = sequential
      nReps = 2
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      Routine prep_trial12
      LoopInitiator vertical_option loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = vertical_option
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        Routine slider_vertical
      LoopTerminator vertical_option
      LoopInitiator horizontal_option loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = horizontal_option
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        Routine slider_horizontal
      LoopTerminator horizontal_option
    LoopTerminator conditions12_loop
  LoopTerminator images_block1_loop
  Routine reRandomize
  LoopInitiator images_block2_loop loopType="TrialHandler"
    loopType = sequential
    nReps = img_count
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    Routine fixation
    LoopInitiator conditions34_loop loopType="TrialHandler"
      loopType = sequential
      nReps = 2
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      Routine prep_trial34
      LoopInitiator vertical_option2 loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = vertical_option
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        Routine slider_vertical
      LoopTerminator vertical_option2
      LoopInitiator horizontal_option2 loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = horizontal_option
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        Routine slider_horizontal
      LoopTerminator horizontal_option2
    LoopTerminator conditions34_loop
  LoopTerminator images_block2_loop
  Routine fixation
  Routine instructions_3
  Routine rating
  Routine end
